# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments HDAWG

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_HDAWG
support_arm: True
support_hardware_loop: True
startup : Do nothing

interface: Other

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: HDAWG8 (basic)
model_str_2: HDAWG8 (advanced)

check_option: False

option_str_1: PC
option_str_2: CNT

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#########################################
# SECTION: Setup
# GROUP: Revisions

[Revisions - Data Server]
label: Data Server
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>Contains the revision number of the Zurich Instruments Data Server.<br/><b>/zi/about/revision</b></p></body></html>
get_cmd: /zi/about/revision
permission: READ

[Revisions - Firmware]
label: Firmware
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>Revision of the device-internal controller software.<br/><b>/system/fwrevision</b></p></body></html>
get_cmd: /system/fwrevision
permission: READ

[Revisions - FPGA]
label: FPGA
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>HDL firmware revision.<br/><b>/system/fpgarevision</b></p></body></html>
get_cmd: /system/fpgarevision
permission: READ


#########################################
# SECTION: Setup
# GROUP: Preset

[Preset - Factory Reset]
label: Factory Reset
datatype: BUTTON
section: Setup
group: Preset
tooltip: <html><head/><body><p>Load the factory default settings.<br/></p></body></html>
permission: BOTH


#########################################
# SECTION: Setup
# GROUP: PQSC

[PQSC - Connect to PQSC]
label: Connect to PQSC
datatype: BOOLEAN
section: Setup
group: PQSC
def_value: False
tooltip: <html><head/><body><p>Configure the instrument to work with PQSC.<br/></p></body></html>
permission: WRITE
show_in_measurement_dlg: True


#########################################
# SECTION: Setup
# GROUP: Device

[Device - Reference Clock]
label: Reference Clock
datatype: COMBO
section: Setup
group: Device
def_value: Internal
show_in_measurement_dlg: True
tooltip: <html><head/><body><p>Reference clock source.<br/><b>system/clocks/referenceclock/source</b></p></body></html>
set_cmd: /system/clocks/referenceclock/source
get_cmd: /system/clocks/referenceclock/source
state_quant: PQSC - Connect to PQSC
state_value_1: False
cmd_def_1: 0
combo_def_1: Internal
cmd_def_2: 1
combo_def_2: External
cmd_def_3: 2
combo_def_3: ZSync

[Device - Sample Clock]
label: Sample Clock
datatype: DOUBLE
section: Setup
group: Device
def_value: 2.4e9
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Indicates the frequency of the sample clock. Changing the sample clock temporarily interrupts the AWG sequencers.<br/><b>system/clocks/sampleclock/freq</b></p></body></html>
set_cmd: /system/clocks/sampleclock/freq
get_cmd: /system/clocks/sampleclock/freq

#########################################
# SECTION: Outputs
# GROUP: Output 1

[Output 1 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/0/offset</b></p></body></html>
set_cmd: /sigouts/0/offset
get_cmd: /sigouts/0/offset

[Output 1 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/0/delay</b></p></body></html>
set_cmd: /sigouts/0/delay
get_cmd: /sigouts/0/delay

[Output 1 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/0/direct</b></p></body></html>
set_cmd: /sigouts/0/direct
get_cmd: /sigouts/0/direct


[Output 1 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/0/range</b></p></body></html>
set_cmd: /sigouts/0/range
get_cmd: /sigouts/0/range
state_quant: Output 1 - Direct
state_value_1: false

[Output 1 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/0/filter</b></p></body></html>
set_cmd: /sigouts/0/filter
get_cmd: /sigouts/0/filter
state_quant: Output 1 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 2

[Output 2 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/1/offset</b></p></body></html>
set_cmd: /sigouts/1/offset
get_cmd: /sigouts/1/offset

[Output 2 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/1/delay</b></p></body></html>
set_cmd: /sigouts/1/delay
get_cmd: /sigouts/1/delay

[Output 2 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/1/direct</b></p></body></html>
set_cmd: /sigouts/1/direct
get_cmd: /sigouts/1/direct

[Output 2 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/1/range</b></p></body></html>
set_cmd: /sigouts/1/range
get_cmd: /sigouts/1/range
state_quant: Output 2 - Direct
state_value_1: false

[Output 2 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/1/filter</b></p></body></html>
set_cmd: /sigouts/1/filter
get_cmd: /sigouts/1/filter
state_quant: Output 2 - Direct
state_value_1: false


#########################################
# SECTION: Outputs
# GROUP: Output 3

[Output 3 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/2/offset</b></p></body></html>
set_cmd: /sigouts/2/offset
get_cmd: /sigouts/2/offset

[Output 3 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/2/delay</b></p></body></html>
set_cmd: /sigouts/2/delay
get_cmd: /sigouts/2/delay

[Output 3 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/2/direct</b></p></body></html>
set_cmd: /sigouts/2/direct
get_cmd: /sigouts/2/direct


[Output 3 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/2/range</b></p></body></html>
set_cmd: /sigouts/2/range
get_cmd: /sigouts/2/range
state_quant: Output 3 - Direct
state_value_1: false

[Output 3 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/2/filter</b></p></body></html>
set_cmd: /sigouts/2/filter
get_cmd: /sigouts/2/filter
state_quant: Output 3 - Direct
state_value_1: false

#########################################
# SECTION: Output 3-4
# GROUP: Output 4

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# SECTION: Oscillators
# GROUP: Oscillators
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
[Oscillators - advanced]
section: Oscillator/Sines
group: Oscillators
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
combo_def_10: 9
combo_def_11: 10
combo_def_12: 11
combo_def_13: 12
combo_def_14: 13
combo_def_15: 14
combo_def_16: 15
combo_def_17: 16
def_value: 1
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 1]
label: Frequency 1
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/0/freq</b></p></body></html>
set_cmd: /oscs/0/freq
get_cmd: /oscs/0/freq
state_quant: Oscillators - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 2]
label: Frequency 2
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/1/freq</b></p></body></html>
set_cmd: /oscs/1/freq
get_cmd: /oscs/1/freq
state_quant: Oscillators - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 3]
label: Frequency 3
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/2/freq</b></p></body></html>
set_cmd: /oscs/2/freq
get_cmd: /oscs/2/freq
state_quant: Oscillators - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16
model_value_1: HDAWG8 (advanced)

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# SECTION: Sine Generators
# GROUP: Sine 1
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
[Sine 1 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 1
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/0/oscselect</b></p></body></html>
set_cmd: /sines/0/oscselect
get_cmd: /sines/0/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 1 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 1
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/0/harmonic</b></p></body></html>
set_cmd: /sines/0/harmonic
get_cmd: /sines/0/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 1 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 1
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/0/phaseshift</b></p></body></html>
set_cmd: /sines/0/phaseshift
get_cmd: /sines/0/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 2

[Sine 2 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 2
def_value: 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/1/oscselect</b></p></body></html>
set_cmd: /sines/1/oscselect
get_cmd: /sines/1/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 2 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 2
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/1/harmonic</b></p></body></html>
set_cmd: /sines/1/harmonic
get_cmd: /sines/1/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 2 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 2
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/1/phaseshift</b></p></body></html>
set_cmd: /sines/1/phaseshift
get_cmd: /sines/1/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 3

[Sine 3 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 3
def_value: 3
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/2/oscselect</b></p></body></html>
set_cmd: /sines/2/oscselect
get_cmd: /sines/2/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 3 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 3
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/2/harmonic</b></p></body></html>
set_cmd: /sines/2/harmonic
get_cmd: /sines/2/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 3 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 3
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/2/phaseshift</b></p></body></html>
set_cmd: /sines/2/phaseshift
get_cmd: /sines/2/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 4

[Sine 4 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 4
def_value: 4
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/3/oscselect</b></p></body></html>
set_cmd: /sines/3/oscselect
get_cmd: /sines/3/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

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

[Sine 5 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 5
def_value: 5
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/4/oscselect</b></p></body></html>
set_cmd: /sines/4/oscselect
get_cmd: /sines/4/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

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

[Sine 6 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 6
def_value: 6
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/5/oscselect</b></p></body></html>
set_cmd: /sines/5/oscselect
get_cmd: /sines/5/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

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

[Sine 7 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 7
def_value: 7
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/6/oscselect</b></p></body></html>
set_cmd: /sines/6/oscselect
get_cmd: /sines/6/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

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

[Sine 8 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 8
def_value: 8
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/7/oscselect</b></p></body></html>
set_cmd: /sines/7/oscselect
get_cmd: /sines/7/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

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# SECTION: Sequencer 1-2
# GROUP: AWG 1-2
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
[Sequencer 1-2 - Run]
label: Run
datatype: BUTTON
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: false
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>

[Sequencer 1-2 - Output 1]
label: Output 1
datatype: BOOLEAN
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: false


[Sequencer 1-2 - Output 2]
label: Output 2
datatype: BOOLEAN
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: false


[Sequencer 1-2 - IQ Modulation]
label: IQ Modulation 
datatype: BOOLEAN
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: false
model_value_1: HDAWG8 (basic)


[Sequencer 1-2 - Gain 1]
label: Gain 1
datatype: DOUBLE
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: 1.0
state_quant: Sequencer 1-2 - IQ Modulation
state_value: true


[Sequencer 1-2 - Gain 2]
label: Gain 2
datatype: DOUBLE
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: 1.0
state_quant: Sequencer 1-2 - IQ Modulation
state_value: true


[Sequencer 1-2 - Modulation Frequency]
label: Modulation Frequency
datatype: DOUBLE
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: 100e6
unit: Hz
state_quant: Sequencer 1-2 - IQ Modulation
state_value: true


[Sequencer 1-2 - Modulation Phase]
label: Modulation Phase
datatype: DOUBLE
section: Sequencer 1-2
group: Control
show_in_measurement_dlg: True
def_value: 90
unit: deg
state_quant: Sequencer 1-2 - IQ Modulation
state_value: true


[Sequencer 1-2 - Trigger Mode]
label: Trigger Mode
datatype: COMBO
section: Sequencer 1-2
group: Sequencer 1-2
show_in_measurement_dlg: True
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Send Trigger
cmd_def_3: 2
combo_def_3: Receive Trigger
cmd_def_4: 3
combo_def_4: ZSync Trigger

[Sequencer 1-2 - Alignment]
label: Alignment
datatype: COMBO
section: Sequencer 1-2
group: Sequencer 1-2
def_value: Start with Trigger
show_in_measurement_dlg: True
tooltip: MISSING
cmd_def_1: 0
combo_def_1: Start with Trigger
cmd_def_2: 1
combo_def_2: End with Trigger


[Sequencer 1-2 - Single]
label: Single
datatype: COMBO
section: Sequencer 1-2
group: Sequencer 1-2
def_value: On
show_in_measurement_dlg: False
tooltip: Puts the Sequencer into single-shot mod.
set_cmd: /awgs/0/single
get_cmd: /awgs/0/single
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: On


[Sequencer 1-2 - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer 1-2
group: Sequence Parameters
show_in_measurement_dlg: True
def_value: None
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Simple
cmd_def_3: 2
combo_def_3: Rabi
cmd_def_4: 3
combo_def_4: T1
cmd_def_5: 4
combo_def_5: T2*
cmd_def_6: 5
combo_def_6: Custom
cmd_def_7: 6
combo_def_7: Trigger

[Custom Sequence 1-2 - Path]
label: Path
datatype: PATH
section: Sequencer 1-2
group: Sequence Parameters
state_quant: Sequencer 1-2 - Sequence
state_value: Custom


[Sequencer 1-2 - Trigger Delay]
label: Trigger Delay
datatype: DOUBLE
section: Sequencer 1-2
group: Sequencer 1-2
show_in_measurement_dlg: False
def_value: 0
unit: s
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: Receive Trigger

[Sequencer 1-2 - Repetitions]
label: Repetitions
datatype: DOUBLE
def_value: 100
section: Sequencer 1-2
group: Sequencer 1-2
show_in_measurement_dlg: True

[Sequencer 1-2 - Period]
label: Period
datatype: DOUBLE
section: Sequencer 1-2
group: Sequencer 1-2
def_value: 100e-6
unit: s
show_in_measurement_dlg: True

[Sequencer 1-2 - Pulse Amplitude]
label: Pulse Amplitude
section: Sequencer 1-2
group: Sequence Parameters
datatype: DOUBLE
def_value: 1.0
show_in_measurement_dlg: False
state_quant: Sequencer 1-2 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2* 

[Sequencer 1-2 - Pulse Width]
label: Pulse Width
section: Sequencer 1-2
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 50e-9
show_in_measurement_dlg: False
state_quant: Sequencer 1-2 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 1-2 - Delay Time]
label: Delay Time
section: Sequencer 1-2
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 0
show_in_measurement_dlg: False
state_quant: Sequencer 1-2 - Sequence
state_value_1: T1
state_value_2: T2*


#########################################
# SECTION: Sequencer 1-2
# GROUP: Wave 1

[Wave 1 - Gain 11]
label: Gain 11
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 1
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/0/gains/0
get_cmd: /awgs/0/outputs/0/gains/0
model_value_1: HDAWG8 (advanced)

[Wave 1 - Gain 12]
label: Gain 12
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 1
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/0/gains/1
get_cmd: /awgs/0/outputs/0/gains/1
model_value_1: HDAWG8 (advanced)

[Wave 1 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer 1-2
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/0/outputs/0/hold</b></p></body></html>
set_cmd: /awgs/0/outputs/0/hold
get_cmd: /awgs/0/outputs/0/hold
model_value_1: HDAWG8 (advanced)

[Wave 1 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer 1-2
group: Wave 1
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/0/outputs/0/modulation/mode</b></p></body></html>
set_cmd: /awgs/0/outputs/0/modulation/mode
get_cmd: /awgs/0/outputs/0/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 11
cmd_def_3: 2
combo_def_3: Sine 22
cmd_def_4: 3
combo_def_4: Sine 12
cmd_def_5: 4
combo_def_5: Sine 21
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 1 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
section: Sequencer 1-2
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/enables/0</b></p></body></html>
set_cmd: /sines/0/enables/0
get_cmd: /sines/0/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 1 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 1
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/amplitudes/0</b></p></body></html>
set_cmd: /sines/0/amplitudes/0
get_cmd: /sines/0/amplitudes/0
state_quant: Wave 1 - Enable Sine 1
state_value_1: true
model_value_1: HDAWG8 (advanced)

[Wave 1 - Enable Sine 2]
label: Enable Sine 2
datatype: BOOLEAN
section: Sequencer 1-2
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/enables/1</b></p></body></html>
set_cmd: /sines/0/enables/1
get_cmd: /sines/0/enables/1
model_value_1: HDAWG8 (advanced)

[Wave 1 - Amplitude Sine 2]
label: Amplitude Sine 2
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 1
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/amplitudes/1</b></p></body></html>
set_cmd: /sines/0/amplitudes/1
get_cmd: /sines/0/amplitudes/1
state_quant: Wave 1 - Enable Sine 2
state_value_1: true
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer 1-2
# GROUP: Wave 2

[Wave 2 - Gain 21]
label: Gain 21
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 2
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/1/gains/0
get_cmd: /awgs/0/outputs/1/gains/0
model_value_1: HDAWG8 (advanced)

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

[Wave 2 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer 1-2
group: Wave 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/0/outputs/1/hold</b></p></body></html>
set_cmd: /awgs/0/outputs/1/hold
get_cmd: /awgs/0/outputs/1/hold
model_value_1: HDAWG8 (advanced)

[Wave 2 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer 1-2
group: Wave 2
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/0/outputs/1/modulation/mode</b></p></body></html>
set_cmd: /awgs/0/outputs/1/modulation/mode
get_cmd: /awgs/0/outputs/1/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 11
cmd_def_3: 2
combo_def_3: Sine 22
cmd_def_4: 3
combo_def_4: Sine 12
cmd_def_5: 4
combo_def_5: Sine 21
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 2 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
section: Sequencer 1-2
group: Wave 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/enables/0</b></p></body></html>
set_cmd: /sines/1/enables/0
get_cmd: /sines/1/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 2 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
section: Sequencer 1-2
group: Wave 2
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/amplitudes/0</b></p></body></html>
set_cmd: /sines/1/amplitudes/0
get_cmd: /sines/1/amplitudes/0
state_quant: Wave 2 - Enable Sine 1
state_value_1: true
model_value_1: HDAWG8 (advanced)

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# SECTION: Triggers
# GROUP: Triggers Group 1
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
[Sequencer 1-2 - Trigger 1]
label: Trigger 1
datatype: COMBO
section: Sequencer 1-2
group: Triggers
def_value: Trigger In 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the digital trigger source signal.<br/><b>awgs/0/auxtriggers/0/channel</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/0/channel
get_cmd: /awgs/0/auxtriggers/0/channel
cmd_def_1: 0
combo_def_1: Trigger In 1
cmd_def_2: 1
combo_def_2: Trigger In 2
cmd_def_3: 2
combo_def_3: Trigger In 3
cmd_def_4: 3
combo_def_4: Trigger In 4
cmd_def_5: 4
combo_def_5: Trigger In 5
cmd_def_6: 5
combo_def_6: Trigger In 6
cmd_def_7: 6
combo_def_7: Trigger In 7
cmd_def_8: 7
combo_def_8: Trigger In 8
model_value_1: HDAWG8 (advanced)

[Sequencer 1-2 - Slope 1]
label: Slope 1
datatype: COMBO
section: Sequencer 1-2
group: Triggers
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.<br/><b>awgs/0/auxtriggers/0/slope</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/0/slope
get_cmd: /awgs/0/auxtriggers/0/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)

[Sequencer 1-2 - Trigger 2]
label: Trigger 2
datatype: COMBO
section: Sequencer 1-2
group: Triggers
def_value: Trigger In 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the digital trigger source signal.<br/><b>awgs/0/auxtriggers/1/channel</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/1/channel
get_cmd: /awgs/0/auxtriggers/1/channel
cmd_def_1: 0
combo_def_1: Trigger In 1
cmd_def_2: 1
combo_def_2: Trigger In 2
cmd_def_3: 2
combo_def_3: Trigger In 3
cmd_def_4: 3
combo_def_4: Trigger In 4
cmd_def_5: 4
combo_def_5: Trigger In 5
cmd_def_6: 5
combo_def_6: Trigger In 6
cmd_def_7: 6
combo_def_7: Trigger In 7
cmd_def_8: 7
combo_def_8: Trigger In 8
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Slope 2]
label: Slope 2
datatype: COMBO
section: Sequencer 1-2
group: Triggers
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.<br/><b>awgs/0/auxtriggers/1/slope</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/1/slope
get_cmd: /awgs/0/auxtriggers/1/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer 1-2
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/0/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/index
get_cmd: /awgs/0/dio/strobe/index
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Strobe Slope]
label: Strobe Slope
datatype: COMBO
section: Sequencer 1-2
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/0/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/slope
get_cmd: /awgs/0/dio/strobe/slope
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer 1-2
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/0/dio/valid/index</b></p></body></html>
set_cmd: /awgs/0/dio/valid/index
get_cmd: /awgs/0/dio/valid/index
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer 1-2
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/0/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/0/dio/valid/polarity
get_cmd: /awgs/0/dio/valid/polarity
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Codeword Mask]
label: Codeword Mask
datatype: DOUBLE
section: Sequencer 1-2
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO bits to be used for waveform selection in connection with playWaveDIO().<br/><b>awgs/0/dio/mask/value</b></p></body></html>
set_cmd: /awgs/0/dio/mask/value
get_cmd: /awgs/0/dio/mask/value
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 1-2 - Codeword Shift]
label: Codeword Shift
datatype: DOUBLE
section: Sequencer 1-2
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the amount of bit shifting to apply for the DIO wave selection.<br/><b>awgs/0/dio/mask/shift</b></p></body></html>
set_cmd: /awgs/0/dio/mask/shift
get_cmd: /awgs/0/dio/mask/shift
state_quant: Sequencer 1-2 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer 3-4
# GROUP: AWG 3-4

[Sequencer 3-4 - Run]
label: Run
datatype: BUTTON
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: false
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>


[Sequencer 3-4 - Output 3]
label: Output 3
datatype: BOOLEAN
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: false


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

[Sequencer 3-4 - IQ Modulation]
label: IQ Modulation 
datatype: BOOLEAN
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: false
model_value_1: HDAWG8 (basic)


[Sequencer 3-4 - Gain 3]
label: Gain 3
datatype: DOUBLE
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: 1.0
state_quant: Sequencer 3-4 - IQ Modulation
state_value: true


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

[Sequencer 3-4 - Modulation Frequency]
label: Modulation Frequency
datatype: DOUBLE
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: 100e6
unit: Hz
state_quant: Sequencer 3-4 - IQ Modulation
state_value: true


[Sequencer 3-4 - Modulation Phase]
label: Modulation Phase
datatype: DOUBLE
section: Sequencer 3-4
group: Control
show_in_measurement_dlg: True
def_value: 90
unit: deg
state_quant: Sequencer 3-4 - IQ Modulation
state_value: true


[Sequencer 3-4 - Trigger Mode]
label: Trigger Mode
datatype: COMBO
section: Sequencer 3-4
group: Sequencer 3-4
show_in_measurement_dlg: False
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Send Trigger
cmd_def_3: 2
combo_def_3: Receive Trigger
cmd_def_4: 3
combo_def_4: ZSync Trigger

[Sequencer 3-4 - Alignment]
label: Alignment
datatype: COMBO
section: Sequencer 3-4
group: Sequencer 3-4
def_value: Start with Trigger
show_in_measurement_dlg: True
tooltip: MISSING
cmd_def_1: 0
combo_def_1: Start with Trigger
cmd_def_2: 1
combo_def_2: End with Trigger

[Sequencer 3-4 - Single]
label: Single
datatype: COMBO
section: Sequencer 3-4
group: Sequencer 3-4
def_value: On
show_in_measurement_dlg: False
tooltip: Puts the Sequencer into single-shot mod.
set_cmd: /awgs/1/single
get_cmd: /awgs/1/single
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: On

[Sequencer 3-4 - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer 3-4
group: Sequence Parameters
show_in_measurement_dlg: False
def_value: None
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Simple
cmd_def_3: 2
combo_def_3: Rabi
cmd_def_4: 3
combo_def_4: T1
cmd_def_5: 4
combo_def_5: T2*
cmd_def_6: 5
combo_def_6: Custom
cmd_def_7: 6
combo_def_7: Trigger

[Custom Sequence 3-4 - Path]
label: Path
datatype: PATH
section: Sequencer 3-4
group: Sequence Parameters
state_quant: Sequencer 3-4 - Sequence
state_value: Custom

[Sequencer 3-4 - Trigger Delay]
label: Trigger Delay
datatype: DOUBLE
section: Sequencer 3-4
group: Sequencer 3-4
show_in_measurement_dlg: False
def_value: 0
unit: s
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: Receive Trigger

[Sequencer 3-4 - Repetitions]
label: Repetitions
datatype: DOUBLE
def_value: 100
section: Sequencer 3-4
group: Sequencer 3-4
show_in_measurement_dlg: False

[Sequencer 3-4 - Period]
label: Period
datatype: DOUBLE
section: Sequencer 3-4
group: Sequencer 3-4
def_value: 100e-6
unit: s
show_in_measurement_dlg: False

[Sequencer 3-4 - Pulse Amplitude]
label: Pulse Amplitude
section: Sequencer 3-4
group: Sequence Parameters
datatype: DOUBLE
def_value: 1.0
show_in_measurement_dlg: False
state_quant: Sequencer 3-4 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 3-4 - Pulse Width]
label: Pulse Width
section: Sequencer 3-4
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 50e-9
show_in_measurement_dlg: False
state_quant: Sequencer 3-4 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 3-4 - Delay Time]
label: Delay Time
section: Sequencer 3-4
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 0
show_in_measurement_dlg: False
state_quant: Sequencer 3-4 - Sequence
state_value_1: T1
state_value_2: T2*


#########################################
# SECTION: Sequencer 3-4
# GROUP: Wave 3

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

[Wave 3 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer 3-4
group: Wave 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/0/outputs/0/hold</b></p></body></html>
set_cmd: /awgs/1/outputs/0/hold
get_cmd: /awgs/1/outputs/0/hold
model_value_1: HDAWG8 (advanced)

[Wave 3 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer 3-4
group: Wave 3
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/0/outputs/0/modulation/mode</b></p></body></html>
set_cmd: /awgs/1/outputs/0/modulation/mode
get_cmd: /awgs/1/outputs/0/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 33
cmd_def_3: 2
combo_def_3: Sine 44
cmd_def_4: 3
combo_def_4: Sine 34
cmd_def_5: 4
combo_def_5: Sine 43
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

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

[Sequencer 3-4 - Trigger 1]
label: Trigger 1
datatype: COMBO
section: Sequencer 3-4
group: Triggers
def_value: Trigger In 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the digital trigger source signal.<br/><b>awgs/1/auxtriggers/0/channel</b></p></body></html>
set_cmd: /awgs/1/auxtriggers/0/channel
get_cmd: /awgs/1/auxtriggers/0/channel
cmd_def_1: 0
combo_def_1: Trigger In 1
cmd_def_2: 1
combo_def_2: Trigger In 2
cmd_def_3: 2
combo_def_3: Trigger In 3
cmd_def_4: 3
combo_def_4: Trigger In 4
cmd_def_5: 4
combo_def_5: Trigger In 5
cmd_def_6: 5
combo_def_6: Trigger In 6
cmd_def_7: 6
combo_def_7: Trigger In 7
cmd_def_8: 7
combo_def_8: Trigger In 8
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Slope 1]
label: Slope 1
datatype: COMBO
section: Sequencer 3-4
group: Triggers
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.<br/><b>awgs/1/auxtriggers/0/slope</b></p></body></html>
set_cmd: /awgs/1/auxtriggers/0/slope
get_cmd: /awgs/1/auxtriggers/0/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


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

[Sequencer 3-4 - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer 3-4
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/1/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/1/dio/strobe/index
get_cmd: /awgs/1/dio/strobe/index
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Strobe Slope]
label: Strobe Slope
datatype: COMBO
section: Sequencer 3-4
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/1/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/1/dio/strobe/slope
get_cmd: /awgs/1/dio/strobe/slope
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer 3-4
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/1/dio/valid/index</b></p></body></html>
set_cmd: /awgs/1/dio/valid/index
get_cmd: /awgs/1/dio/valid/index
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer 3-4
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/1/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/1/dio/valid/polarity
get_cmd: /awgs/1/dio/valid/polarity
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Codeword Mask]
label: Codeword Mask
datatype: DOUBLE
section: Sequencer 3-4
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO bits to be used for waveform selection in connection with playWaveDIO().<br/><b>awgs/1/dio/mask/value</b></p></body></html>
set_cmd: /awgs/1/dio/mask/value
get_cmd: /awgs/1/dio/mask/value
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 3-4 - Codeword Shift]
label: Codeword Shift
datatype: DOUBLE
section: Sequencer 3-4
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the amount of bit shifting to apply for the DIO wave selection.<br/><b>awgs/1/dio/mask/shift</b></p></body></html>
set_cmd: /awgs/1/dio/mask/shift
get_cmd: /awgs/1/dio/mask/shift
state_quant: Sequencer 3-4 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer 5-6
# GROUP: AWG 5-6

[Sequencer 5-6 - Run]
label: Run
datatype: BUTTON
section: Sequencer 5-6
group: Control
show_in_measurement_dlg: True
def_value: false
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>


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

[Sequencer 5-6 - IQ Modulation]
label: IQ Modulation 
datatype: BOOLEAN
section: Sequencer 5-6
group: Control
show_in_measurement_dlg: True
def_value: false
model_value_1: HDAWG8 (basic)


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

[Sequencer 5-6 - Modulation Frequency]
label: Modulation Frequency
datatype: DOUBLE
section: Sequencer 5-6
group: Control
show_in_measurement_dlg: True
def_value: 100e6
unit: Hz
state_quant: Sequencer 5-6 - IQ Modulation
state_value: true


[Sequencer 5-6 - Modulation Phase]
label: Modulation Phase
datatype: DOUBLE
section: Sequencer 5-6
group: Control
show_in_measurement_dlg: True
def_value: 90
unit: deg
state_quant: Sequencer 5-6 - IQ Modulation
state_value: true


[Sequencer 5-6 - Trigger Mode]
label: Trigger Mode
datatype: COMBO
section: Sequencer 5-6
group: Sequencer 5-6
show_in_measurement_dlg: False
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Send Trigger
cmd_def_3: 2
combo_def_3: Receive Trigger
cmd_def_4: 3
combo_def_4: ZSync Trigger

[Sequencer 5-6 - Alignment]
label: Alignment
datatype: COMBO
section: Sequencer 5-6
group: Sequencer 5-6
def_value: Start with Trigger
show_in_measurement_dlg: True
tooltip: MISSING
cmd_def_1: 0
combo_def_1: Start with Trigger
cmd_def_2: 1
combo_def_2: End with Trigger

[Sequencer 5-6 - Single]
label: Single
datatype: COMBO
section: Sequencer 5-6
group: Sequencer 5-6
def_value: On
show_in_measurement_dlg: False
tooltip: Puts the Sequencer into single-shot mod.
set_cmd: /awgs/2/single
get_cmd: /awgs/2/single
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: On

#########################################
# SECTION: Sequencer 5-6
# GROUP: Sequencer 5-6

[Sequencer 5-6 - Trigger Delay]
label: Trigger Delay
datatype: DOUBLE
section: Sequencer 5-6
group: Sequencer 5-6
show_in_measurement_dlg: False
def_value: 0
unit: s
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: Receive Trigger

[Sequencer 5-6 - Repetitions]
label: Repetitions
datatype: DOUBLE
def_value: 100
section: Sequencer 5-6
group: Sequencer 5-6
show_in_measurement_dlg: False

[Sequencer 5-6 - Period]
label: Period
datatype: DOUBLE
section: Sequencer 5-6
group: Sequencer 5-6
def_value: 100e-6
unit: s
show_in_measurement_dlg: False

[Sequencer 5-6 - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer 5-6
group: Sequence Parameters
show_in_measurement_dlg: False
def_value: None
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Simple
cmd_def_3: 2
combo_def_3: Rabi
cmd_def_4: 3
combo_def_4: T1
cmd_def_5: 4
combo_def_5: T2*
cmd_def_6: 5
combo_def_6: Custom
cmd_def_7: 6
combo_def_7: Trigger

[Custom Sequence 5-6 - Path]
label: Path
datatype: PATH
section: Sequencer 5-6
group: Sequence Parameters
state_quant: Sequencer 5-6 - Sequence
state_value_1: Custom


[Sequencer 5-6 - Pulse Amplitude]
label: Pulse Amplitude
section: Sequencer 5-6
group: Sequence Parameters
datatype: DOUBLE
def_value: 1.0
show_in_measurement_dlg: False
state_quant: Sequencer 5-6 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 5-6 - Pulse Width]
label: Pulse Width
section: Sequencer 5-6
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 50e-9
show_in_measurement_dlg: False
state_quant: Sequencer 5-6 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 5-6 - Delay Time]
label: Delay Time
section: Sequencer 5-6
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 0
show_in_measurement_dlg: False
state_quant: Sequencer 5-6 - Sequence
state_value_1: T1
state_value_2: T2*



#########################################
# SECTION: Sequencer 5-6
# GROUP: Wave 5

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

[Sequencer 5-6 - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer 5-6
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/2/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/2/dio/strobe/index
get_cmd: /awgs/2/dio/strobe/index
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 5-6 - Strobe Slope]
label: Sequencer 5-6
datatype: COMBO
section: Sequencer 5-6
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/2/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/2/dio/strobe/slope
get_cmd: /awgs/2/dio/strobe/slope
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 5-6 - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer 5-6
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/2/dio/valid/index</b></p></body></html>
set_cmd: /awgs/2/dio/valid/index
get_cmd: /awgs/2/dio/valid/index
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 5-6 - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer 5-6
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/2/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/2/dio/valid/polarity
get_cmd: /awgs/2/dio/valid/polarity
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 5-6 - Codeword Mask]
label: Codeword Mask
datatype: DOUBLE
section: Sequencer 5-6
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO bits to be used for waveform selection in connection with playWaveDIO().<br/><b>awgs/2/dio/mask/value</b></p></body></html>
set_cmd: /awgs/2/dio/mask/value
get_cmd: /awgs/2/dio/mask/value
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 5-6 - Codeword Shift]
label: Codeword Shift
datatype: DOUBLE
section: Sequencer 5-6
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the amount of bit shifting to apply for the DIO wave selection.<br/><b>awgs/2/dio/mask/shift</b></p></body></html>
set_cmd: /awgs/2/dio/mask/shift
get_cmd: /awgs/2/dio/mask/shift
state_quant: Sequencer 5-6 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)



#########################################
# SECTION: Sequencer 7-8
# GROUP: AWG 7-8

[Sequencer 7-8 - Run]
label: Run
datatype: BUTTON
section: Sequencer 7-8
group: Control
show_in_measurement_dlg: True
def_value: false
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>


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

[Sequencer 7-8 - IQ Modulation]
label: IQ Modulation 
datatype: BOOLEAN
section: Sequencer 7-8
group: Control
show_in_measurement_dlg: True
def_value: false
model_value_1: HDAWG8 (basic)


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

[Sequencer 7-8 - Modulation Frequency]
label: Modulation Frequency
datatype: DOUBLE
section: Sequencer 7-8
group: Control
show_in_measurement_dlg: True
def_value: 100e6
unit: Hz
state_quant: Sequencer 7-8 - IQ Modulation
state_value: true


[Sequencer 7-8 - Modulation Phase]
label: Modulation Phase
datatype: DOUBLE
section: Sequencer 7-8
group: Control
show_in_measurement_dlg: True
def_value: 90
unit: deg
state_quant: Sequencer 7-8 - IQ Modulation
state_value: true

[Sequencer 7-8 - Trigger Mode]
label: Trigger Mode
datatype: COMBO
section: Sequencer 7-8
group: Sequencer 7-8
show_in_measurement_dlg: False
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Send Trigger
cmd_def_3: 2
combo_def_3: Receive Trigger
cmd_def_4: 3
combo_def_4: ZSync Trigger


[Sequencer 7-8 - Alignment]
label: Alignment
datatype: COMBO
section: Sequencer 7-8
group: Sequencer 7-8
def_value: Start with Trigger
show_in_measurement_dlg: True
tooltip: MISSING
cmd_def_1: 0
combo_def_1: Start with Trigger
cmd_def_2: 1
combo_def_2: End with Trigger

[Sequencer 7-8 - Single]
label: Single
datatype: COMBO
section: Sequencer 7-8
group: Sequencer 7-8
def_value: On
show_in_measurement_dlg: False
tooltip: Puts the Sequencer into single-shot mod.
set_cmd: /awgs/3/single
get_cmd: /awgs/3/single
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: On

[Sequencer 7-8 - Trigger Delay]
label: Trigger Delay
datatype: DOUBLE
section: Sequencer 7-8
group: Sequencer 7-8
show_in_measurement_dlg: False
def_value: 0
unit: s
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: Receive Trigger

[Sequencer 7-8 - Repetitions]
label: Repetitions
datatype: DOUBLE
def_value: 100
section: Sequencer 7-8
group: Sequencer 7-8
show_in_measurement_dlg: False

[Sequencer 7-8 - Period]
label: Period
datatype: DOUBLE
section: Sequencer 7-8
group: Sequencer 7-8
def_value: 100e-6
unit: s
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 7-8
# GROUP: Sequencer 7-8

[Sequencer 7-8 - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer 7-8
group: Sequence Parameters
show_in_measurement_dlg: False
def_value: None
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Simple
cmd_def_3: 2
combo_def_3: Rabi
cmd_def_4: 3
combo_def_4: T1
cmd_def_5: 4
combo_def_5: T2*
cmd_def_6: 5
combo_def_6: Custom
cmd_def_7: 6
combo_def_7: Trigger

[Custom Sequence 7-8 - Path]
label: Path
datatype: PATH
section: Sequencer 7-8
group: Sequence Parameters
state_quant: Sequencer 7-8 - Sequence
state_value: Custom

[Sequencer 7-8 - Pulse Amplitude]
label: Pulse Amplitude
section: Sequencer 7-8
group: Sequence Parameters
datatype: DOUBLE
def_value: 1.0
show_in_measurement_dlg: False
state_quant: Sequencer 7-8 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 7-8 - Pulse Width]
label: Pulse Width
section: Sequencer 7-8
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 50e-9
show_in_measurement_dlg: False
state_quant: Sequencer 7-8 - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*

[Sequencer 7-8 - Delay Time]
label: Delay Time
section: Sequencer 7-8
group: Sequence Parameters
datatype: DOUBLE
unit: s
def_value: 0
show_in_measurement_dlg: False
state_quant: Sequencer 7-8 - Sequence
state_value_1: T1
state_value_2: T2*


#########################################
# SECTION: Sequencer 7-8
# GROUP: Wave 7

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

[Sequencer 7-8 - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer 7-8
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/3/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/3/dio/strobe/index
get_cmd: /awgs/3/dio/strobe/index
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 7-8 - Strobe Slope]
label: Strobe Slope
datatype: COMBO
section: Sequencer 7-8
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/3/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/3/dio/strobe/slope
get_cmd: /awgs/3/dio/strobe/slope
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 7-8 - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer 7-8
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/3/dio/valid/index</b></p></body></html>
set_cmd: /awgs/3/dio/valid/index
get_cmd: /awgs/3/dio/valid/index
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 7-8 - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer 7-8
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/3/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/3/dio/valid/polarity
get_cmd: /awgs/3/dio/valid/polarity
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer 7-8 - Codeword Mask]
label: Codeword Mask
datatype: DOUBLE
section: Sequencer 7-8
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO bits to be used for waveform selection in connection with playWaveDIO().<br/><b>awgs/3/dio/mask/value</b></p></body></html>
set_cmd: /awgs/3/dio/mask/value
get_cmd: /awgs/3/dio/mask/value
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)


[Sequencer 7-8 - Codeword Shift]
label: Codeword Shift
datatype: DOUBLE
section: Sequencer 7-8
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the amount of bit shifting to apply for the DIO wave selection.<br/><b>awgs/3/dio/mask/shift</b></p></body></html>
set_cmd: /awgs/3/dio/mask/shift
get_cmd: /awgs/3/dio/mask/shift
state_quant: Sequencer 7-8 - Trigger Mode
state_value_1: None
state_value_2: Send Trigger
state_value_3: Receive Trigger
model_value_1: HDAWG8 (advanced)



#########################################
# SECTION: Waveforms
# GROUP: Waveform

[Waveform - 1]
datatype: VECTOR
section: Waveforms
group: Waveform
show_in_measurement_dlg: False
permission: WRITE
x_name: Samples
x_unit: #

[Waveform - 2]
datatype: VECTOR
section: Waveforms
group: Waveform
show_in_measurement_dlg: False
permission: WRITE
x_name: Samples
x_unit: #

[Waveform - 3]
datatype: VECTOR
section: Waveforms
group: Waveform
show_in_measurement_dlg: False
permission: WRITE
x_name: Samples
x_unit: #

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# SECTION: DIO
# GROUP: Trigger In
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
[Trigger In - advanced]
section: DIO
group: Trigger In
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
model_value_1: HDAWG8 (advanced)

[Trigger In - 1 Level]
label: 1 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/0/level</b></p></body></html>
set_cmd: /triggers/in/0/level
get_cmd: /triggers/in/0/level
state_quant: Trigger In - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 1 50 Ohm]
label: 1 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/0/imp50</b></p></body></html>
set_cmd: /triggers/in/0/imp50
get_cmd: /triggers/in/0/imp50
state_quant: Trigger In - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 2 Level]
label: 2 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/1/level</b></p></body></html>
set_cmd: /triggers/in/1/level
get_cmd: /triggers/in/1/level
state_quant: Trigger In - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 2 50 Ohm]
label: 2 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/1/imp50</b></p></body></html>
set_cmd: /triggers/in/1/imp50
get_cmd: /triggers/in/1/imp50
state_quant: Trigger In - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 3 Level]
label: 3 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/2/level</b></p></body></html>
set_cmd: /triggers/in/2/level
get_cmd: /triggers/in/2/level
state_quant: Trigger In - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 3 50 Ohm]
label: 3 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/2/imp50</b></p></body></html>
set_cmd: /triggers/in/2/imp50
get_cmd: /triggers/in/2/imp50
state_quant: Trigger In - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

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# GROUP: Trigger Stream
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
[Trigger Stream - Enable 1]
label: Enable 1
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/0/enable</b></p></body></html>
set_cmd: /triggers/streams/0/enable
get_cmd: /triggers/streams/0/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 1]
label: Holdoff 1
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/0/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/0/holdofftime
get_cmd: /triggers/streams/0/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 1]
label: Source 1
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/0/mask</b></p></body></html>
set_cmd: /triggers/streams/0/mask
get_cmd: /triggers/streams/0/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 2]
label: Enable 2
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/1/enable</b></p></body></html>
set_cmd: /triggers/streams/1/enable
get_cmd: /triggers/streams/1/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 2]
label: Holdoff 2
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/1/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/1/holdofftime
get_cmd: /triggers/streams/1/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 2]
label: Source 2
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 3
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/1/mask</b></p></body></html>
set_cmd: /triggers/streams/1/mask
get_cmd: /triggers/streams/1/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 3]
label: Enable 3
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/2/enable</b></p></body></html>
set_cmd: /triggers/streams/2/enable
get_cmd: /triggers/streams/2/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 3]
label: Holdoff 3
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/2/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/2/holdofftime
get_cmd: /triggers/streams/2/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 3]
label: Source 3
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 5
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/2/mask</b></p></body></html>
set_cmd: /triggers/streams/2/mask
get_cmd: /triggers/streams/2/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 4]
label: Enable 4
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/3/enable</b></p></body></html>
set_cmd: /triggers/streams/3/enable
get_cmd: /triggers/streams/3/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 4]
label: Holdoff 4
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/3/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/3/holdofftime
get_cmd: /triggers/streams/3/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 4]
label: Source 4
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 7
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/3/mask</b></p></body></html>
set_cmd: /triggers/streams/3/mask
get_cmd: /triggers/streams/3/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: DIO
# GROUP: Marker Out

[Marker Out - advanced]
section: DIO
group: Marker Out
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 1]
label: Signal 1
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/0/source</b></p></body></html>
set_cmd: /triggers/out/0/source
get_cmd: /triggers/out/0/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 1]
label: Delay 1
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/0/delay</b></p></body></html>
set_cmd: /triggers/out/0/delay
get_cmd: /triggers/out/0/delay
state_quant: Marker Out - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 2]
label: Signal 2
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/1/source</b></p></body></html>
set_cmd: /triggers/out/1/source
get_cmd: /triggers/out/1/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 2]
label: Delay 2
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/1/delay</b></p></body></html>
set_cmd: /triggers/out/1/delay
get_cmd: /triggers/out/1/delay
state_quant: Marker Out - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 3]
label: Signal 3
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/2/source</b></p></body></html>
set_cmd: /triggers/out/2/source
get_cmd: /triggers/out/2/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 3]
label: Delay 3
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/2/delay</b></p></body></html>
set_cmd: /triggers/out/2/delay
get_cmd: /triggers/out/2/delay
state_quant: Marker Out - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 4]
label: Signal 4
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/3/source</b></p></body></html>
set_cmd: /triggers/out/3/source
get_cmd: /triggers/out/3/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: HDAWG8 (advanced)

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

[Marker Out - Signal 5]
label: Signal 5
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/4/source</b></p></body></html>
set_cmd: /triggers/out/4/source
get_cmd: /triggers/out/4/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: HDAWG8 (advanced)

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

[Marker Out - Signal 6]
label: Signal 6
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/5/source</b></p></body></html>
set_cmd: /triggers/out/5/source
get_cmd: /triggers/out/5/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: HDAWG8 (advanced)

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

[Marker Out - Signal 7]
label: Signal 7
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/6/source</b></p></body></html>
set_cmd: /triggers/out/6/source
get_cmd: /triggers/out/6/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 7
state_value_2: 8
model_value_1: HDAWG8 (advanced)

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

[Marker Out - Signal 8]
label: Signal 8
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/7/source</b></p></body></html>
set_cmd: /triggers/out/7/source
get_cmd: /triggers/out/7/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 8
model_value_1: HDAWG8 (advanced)

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# GROUP: Digital I/O
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
[Digital I/O - Interface]
label: Interface
datatype: COMBO
section: DIO
group: Digital I/O
def_value: LVCMOS
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Set the DIO interface.<br/><b>dios/0/interface</b></p></body></html>
set_cmd: /dios/0/interface
get_cmd: /dios/0/interface
state_quant: PQSC - Connect to PQSC
state_value_1: False
model_value_1: HDAWG8 (advanced)
cmd_def_1: 0
combo_def_1: LVCMOS
cmd_def_2: 1
combo_def_2: LVDS

[Digital I/O - Mode]
label: Mode
datatype: COMBO
section: DIO
group: Digital I/O
def_value: Manual
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select DIO mode<br/><b>dios/0/mode</b></p></body></html>
set_cmd: /dios/0/mode
get_cmd: /dios/0/mode
state_quant: PQSC - Connect to PQSC
state_value_1: False
model_value_1: HDAWG8 (advanced)
cmd_def_1: 0
combo_def_1: Manual
cmd_def_2: 1
combo_def_2: AWG Sequencer
cmd_def_3: 2
combo_def_3: DIO Codeword
cmd_def_4: 3
combo_def_4: QCCS

[Digital I/O - Output]
label: Output
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the value of the DIO output for those bytes where 'drive' is enabled.<br/><b>dios/0/output</b></p></body></html>
set_cmd: /dios/0/output
get_cmd: /dios/0/output
state_quant: PQSC - Connect to PQSC
state_value_1: False
model_value_1: HDAWG8 (advanced)


[Digital I/O - Drive]
label: Drive
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When on (1), the corresponding 8-bit bus is in output mode. When off (0), it is in input mode. Bit 0 corresponds to the least significant byte. For example, the value 1 drives the least significant byte, the value 8 drives the most significant byte.<br/><b>dios/0/drive</b></p></body></html>
set_cmd: /dios/0/drive
get_cmd: /dios/0/drive
state_quant: PQSC - Connect to PQSC
state_value_1: False
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Precompensation 1-2
# GROUP: Precompensation 1

[Precompensation 1 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: Precompensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the entire precompensation filter chain.<br/><b>sigouts/0/precompensation/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/enable
get_cmd: /sigouts/0/precompensation/enable
option_value_1: PC


#########################################
# SECTION: Precompensation 1-2
# GROUP: Exponential Compensation 1

[Exponential Compensation 1 - advanced]
section: Precompensation 1-2
group: Exponential Compensation 1
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
option_value_1: PC

[Exponential Compensation 1 - Enable 1]
label: Enable 1
datatype: BOOLEAN
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/0/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/0/enable
get_cmd: /sigouts/0/precompensation/exponentials/0/enable
state_quant: Exponential Compensation 1 - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
option_value_1: PC

[Exponential Compensation 1 - TC 1]
label: TC 1
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/0/timeconstant</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/0/timeconstant
get_cmd: /sigouts/0/precompensation/exponentials/0/timeconstant
state_quant: Exponential Compensation 1 - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
option_value_1: PC

[Exponential Compensation 1 - Amp 1]
label: Amp 1
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the exponential overshoot compensation filter relative to the signal amplitude.<br/><b>sigouts/0/precompensation/exponentials/0/amplitude</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/0/amplitude
get_cmd: /sigouts/0/precompensation/exponentials/0/amplitude
state_quant: Exponential Compensation 1 - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
option_value_1: PC

[Exponential Compensation 1 - Enable 2]
label: Enable 2
datatype: BOOLEAN
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/1/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/1/enable
get_cmd: /sigouts/0/precompensation/exponentials/1/enable
state_quant: Exponential Compensation 1 - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
option_value_1: PC

[Exponential Compensation 1 - TC 2]
label: TC 2
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/1/timeconstant</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/1/timeconstant
get_cmd: /sigouts/0/precompensation/exponentials/1/timeconstant
state_quant: Exponential Compensation 1 - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
option_value_1: PC

[Exponential Compensation 1 - Amp 2]
label: Amp 2
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the exponential overshoot compensation filter relative to the signal amplitude.<br/><b>sigouts/0/precompensation/exponentials/1/amplitude</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/1/amplitude
get_cmd: /sigouts/0/precompensation/exponentials/1/amplitude
state_quant: Exponential Compensation 1 - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
option_value_1: PC

[Exponential Compensation 1 - Enable 3]
label: Enable 3
datatype: BOOLEAN
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/2/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/2/enable
get_cmd: /sigouts/0/precompensation/exponentials/2/enable
state_quant: Exponential Compensation 1 - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
option_value_1: PC

[Exponential Compensation 1 - TC 3]
label: TC 3
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the exponential overshoot compensation filter.<br/><b>sigouts/0/precompensation/exponentials/2/timeconstant</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/2/timeconstant
get_cmd: /sigouts/0/precompensation/exponentials/2/timeconstant
state_quant: Exponential Compensation 1 - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
option_value_1: PC

[Exponential Compensation 1 - Amp 3]
label: Amp 3
datatype: DOUBLE
section: Precompensation 1-2
group: Exponential Compensation 1
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the exponential overshoot compensation filter relative to the signal amplitude.<br/><b>sigouts/0/precompensation/exponentials/2/amplitude</b></p></body></html>
set_cmd: /sigouts/0/precompensation/exponentials/2/amplitude
get_cmd: /sigouts/0/precompensation/exponentials/2/amplitude
state_quant: Exponential Compensation 1 - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
option_value_1: PC

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# GROUP: High-Pass Compensation 1
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
[High-Pass Compensation 1 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: High-Pass Compensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the high-pass compensation filter.<br/><b>sigouts/0/precompensation/highpass/0/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/highpass/0/enable
get_cmd: /sigouts/0/precompensation/highpass/0/enable
option_value_1: PC

[High-Pass Compensation 1 - TC]
label: TC
datatype: DOUBLE
section: Precompensation 1-2
group: High-Pass Compensation 1
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the high-pass compensation filter.<br/><b>sigouts/0/precompensation/highpass/0/timeconstant</b></p></body></html>
set_cmd: /sigouts/0/precompensation/highpass/0/timeconstant
get_cmd: /sigouts/0/precompensation/highpass/0/timeconstant
option_value_1: PC

[High-Pass Compensation 1 - Clearing]
label: Clearing
datatype: COMBO
section: Precompensation 1-2
group: High-Pass Compensation 1
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When to react to a clearing pulse generated after the AWG Sequencer setPrecompClear instruction.<br/><b>sigouts/0/precompensation/highpass/0/clearing/slope</b></p></body></html>
set_cmd: /sigouts/0/precompensation/highpass/0/clearing/slope
get_cmd: /sigouts/0/precompensation/highpass/0/clearing/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rise
cmd_def_3: 2
combo_def_3: Fall
cmd_def_4: 3
combo_def_4: Both
option_value_1: PC


#########################################
# SECTION: Precompensation 1-2
# GROUP: Bounce Compensation 1

[Bounce Compensation 1 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: Bounce Compensation 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the bounce correction filter.<br/><b>sigouts/0/precompensation/bounces/0/enable</b></p></body></html>
set_cmd: /sigouts/0/precompensation/bounces/0/enable
get_cmd: /sigouts/0/precompensation/bounces/0/enable
option_value_1: PC

[Bounce Compensation 1 - Delay]
label: Delay
datatype: DOUBLE
section: Precompensation 1-2
group: Bounce Compensation 1
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the delay of the bounce correction filter.<br/><b>sigouts/0/precompensation/bounces/0/delay</b></p></body></html>
set_cmd: /sigouts/0/precompensation/bounces/0/delay
get_cmd: /sigouts/0/precompensation/bounces/0/delay
option_value_1: PC

[Bounce Compensation 1 - Amplitude]
label: Amplitude
datatype: DOUBLE
section: Precompensation 1-2
group: Bounce Compensation 1
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the bounce correction filter relative to the signal amplitude.<br/><b>sigouts/0/precompensation/bounces/0/amplitude</b></p></body></html>
set_cmd: /sigouts/0/precompensation/bounces/0/amplitude
get_cmd: /sigouts/0/precompensation/bounces/0/amplitude
option_value_1: PC


#########################################
# SECTION: Precompensation 1-2
# GROUP: Precompensation 2

[Precompensation 2 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: Precompensation 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the entire precompensation filter chain.<br/><b>sigouts/1/precompensation/enable</b></p></body></html>
set_cmd: /sigouts/1/precompensation/enable
get_cmd: /sigouts/1/precompensation/enable
option_value_1: PC


#########################################
# SECTION: Precompensation 1-2
# GROUP: Exponential Compensation 2

[Exponential Compensation 2 - advanced]
section: Precompensation 1-2
group: Exponential Compensation 2
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
option_value_1: PC

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

[High-Pass Compensation 2 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: High-Pass Compensation 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the high-pass compensation filter.<br/><b>sigouts/1/precompensation/highpass/0/enable</b></p></body></html>
set_cmd: /sigouts/1/precompensation/highpass/0/enable
get_cmd: /sigouts/1/precompensation/highpass/0/enable
option_value_1: PC

[High-Pass Compensation 2 - TC]
label: TC
datatype: DOUBLE
section: Precompensation 1-2
group: High-Pass Compensation 2
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the high-pass compensation filter.<br/><b>sigouts/1/precompensation/highpass/0/timeconstant</b></p></body></html>
set_cmd: /sigouts/1/precompensation/highpass/0/timeconstant
get_cmd: /sigouts/1/precompensation/highpass/0/timeconstant
option_value_1: PC

[High-Pass Compensation 2 - Clearing]
label: Clearing
datatype: COMBO
section: Precompensation 1-2
group: High-Pass Compensation 2
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When to react to a clearing pulse generated after the AWG Sequencer setPrecompClear instruction.<br/><b>sigouts/1/precompensation/highpass/0/clearing/slope</b></p></body></html>
set_cmd: /sigouts/1/precompensation/highpass/0/clearing/slope
get_cmd: /sigouts/1/precompensation/highpass/0/clearing/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rise
cmd_def_3: 2
combo_def_3: Fall
cmd_def_4: 3
combo_def_4: Both
option_value_1: PC


#########################################
# SECTION: Precompensation 1-2
# GROUP: Bounce Compensation 2

[Bounce Compensation 2 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 1-2
group: Bounce Compensation 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the bounce correction filter.<br/><b>sigouts/1/precompensation/bounces/0/enable</b></p></body></html>
set_cmd: /sigouts/1/precompensation/bounces/0/enable
get_cmd: /sigouts/1/precompensation/bounces/0/enable
option_value_1: PC

[Bounce Compensation 2 - Delay]
label: Delay
datatype: DOUBLE
section: Precompensation 1-2
group: Bounce Compensation 2
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the delay of the bounce correction filter.<br/><b>sigouts/1/precompensation/bounces/0/delay</b></p></body></html>
set_cmd: /sigouts/1/precompensation/bounces/0/delay
get_cmd: /sigouts/1/precompensation/bounces/0/delay
option_value_1: PC

[Bounce Compensation 2 - Amplitude]
label: Amplitude
datatype: DOUBLE
section: Precompensation 1-2
group: Bounce Compensation 2
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the bounce correction filter relative to the signal amplitude.<br/><b>sigouts/1/precompensation/bounces/0/amplitude</b></p></body></html>
set_cmd: /sigouts/1/precompensation/bounces/0/amplitude
get_cmd: /sigouts/1/precompensation/bounces/0/amplitude
option_value_1: PC


#########################################
# SECTION: Precompensation 3-4
# GROUP: Precompensation 3

[Precompensation 3 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 3-4
group: Precompensation 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the entire precompensation filter chain.<br/><b>sigouts/2/precompensation/enable</b></p></body></html>
set_cmd: /sigouts/2/precompensation/enable
get_cmd: /sigouts/2/precompensation/enable
option_value_1: PC


#########################################
# SECTION: Precompensation 3-4
# GROUP: Exponential Compensation 3

[Exponential Compensation 3 - advanced]
section: Precompensation 3-4
group: Exponential Compensation 3
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
option_value_1: PC

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

[High-Pass Compensation 3 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 3-4
group: High-Pass Compensation 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the high-pass compensation filter.<br/><b>sigouts/2/precompensation/highpass/0/enable</b></p></body></html>
set_cmd: /sigouts/2/precompensation/highpass/0/enable
get_cmd: /sigouts/2/precompensation/highpass/0/enable
option_value_1: PC

[High-Pass Compensation 3 - TC]
label: TC
datatype: DOUBLE
section: Precompensation 3-4
group: High-Pass Compensation 3
def_value: 1e-6
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the characteristic time constant of the high-pass compensation filter.<br/><b>sigouts/2/precompensation/highpass/0/timeconstant</b></p></body></html>
set_cmd: /sigouts/2/precompensation/highpass/0/timeconstant
get_cmd: /sigouts/2/precompensation/highpass/0/timeconstant
option_value_1: PC

[High-Pass Compensation 3 - Clearing]
label: Clearing
datatype: COMBO
section: Precompensation 3-4
group: High-Pass Compensation 3
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When to react to a clearing pulse generated after the AWG Sequencer setPrecompClear instruction.<br/><b>sigouts/2/precompensation/highpass/0/clearing/slope</b></p></body></html>
set_cmd: /sigouts/2/precompensation/highpass/0/clearing/slope
get_cmd: /sigouts/2/precompensation/highpass/0/clearing/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rise
cmd_def_3: 2
combo_def_3: Fall
cmd_def_4: 3
combo_def_4: Both
option_value_1: PC


#########################################
# SECTION: Precompensation 3-4
# GROUP: Bounce Compensation 3

[Bounce Compensation 3 - Enable]
label: Enable
datatype: BOOLEAN
section: Precompensation 3-4
group: Bounce Compensation 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables (1) or disables (0) the bounce correction filter.<br/><b>sigouts/2/precompensation/bounces/0/enable</b></p></body></html>
set_cmd: /sigouts/2/precompensation/bounces/0/enable
get_cmd: /sigouts/2/precompensation/bounces/0/enable
option_value_1: PC

[Bounce Compensation 3 - Delay]
label: Delay
datatype: DOUBLE
section: Precompensation 3-4
group: Bounce Compensation 3
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the delay of the bounce correction filter.<br/><b>sigouts/2/precompensation/bounces/0/delay</b></p></body></html>
set_cmd: /sigouts/2/precompensation/bounces/0/delay
get_cmd: /sigouts/2/precompensation/bounces/0/delay
option_value_1: PC

[Bounce Compensation 3 - Amplitude]
label: Amplitude
datatype: DOUBLE
section: Precompensation 3-4
group: Bounce Compensation 3
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the amplitude of the bounce correction filter relative to the signal amplitude.<br/><b>sigouts/2/precompensation/bounces/0/amplitude</b></p></body></html>
set_cmd: /sigouts/2/precompensation/bounces/0/amplitude
get_cmd: /sigouts/2/precompensation/bounces/0/amplitude
option_value_1: PC


#########################################
# SECTION: Precompensation 3-4
# GROUP: Precompensation 4

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# SECTION: Counter
# GROUP: Counter 1
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
[Counter 1 - Enable]
label: Enable
datatype: BOOLEAN
section: Counter
group: Counter 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enable the pulse counter unit.<br/><b>cnts/0/enable</b></p></body></html>
set_cmd: /cnts/0/enable
get_cmd: /cnts/0/enable
option_value_1: CNT

[Counter 1 - Mode]
label: Mode
datatype: COMBO
section: Counter
group: Counter 1
def_value: Free Running
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the run mode of the counter unit.<br/><b>cnts/0/mode</b></p></body></html>
set_cmd: /cnts/0/mode
get_cmd: /cnts/0/mode
cmd_def_1: 1
combo_def_1: Free Running
cmd_def_2: 2
combo_def_2: Gated Free Running
cmd_def_3: 3
combo_def_3: Free Running
cmd_def_4: 4
combo_def_4: Time Tagging
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 1

[Counter 1 - Period]
label: Period
datatype: DOUBLE
section: Counter
group: Counter 1
def_value: 1e-3
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Set the period used for the Free Running and Gated Free Running modes. Also sets the hold-off time for the Time Tagging mode.<br/><b>cnts/0/period</b></p></body></html>
set_cmd: /cnts/0/period
get_cmd: /cnts/0/period
option_value_1: CNT

[Counter 1 - Input]
label: Input
datatype: COMBO
section: Counter
group: Counter 1
def_value: DIO Bit 0.
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the counter signal source.<br/><b>cnts/0/inputselect</b></p></body></html>
set_cmd: /cnts/0/inputselect
get_cmd: /cnts/0/inputselect
cmd_def_1: 0
combo_def_1: DIO Bit 0.
cmd_def_2: 1
combo_def_2: DIO Bit 1.
cmd_def_3: 2
combo_def_3: DIO Bit 2.
cmd_def_4: 3
combo_def_4: DIO Bit 3.
cmd_def_5: 4
combo_def_5: DIO Bit 4.
cmd_def_6: 5
combo_def_6: DIO Bit 5.
cmd_def_7: 6
combo_def_7: DIO Bit 6.
cmd_def_8: 7
combo_def_8: DIO Bit 7.
cmd_def_9: 8
combo_def_9: DIO Bit 8.
cmd_def_10: 9
combo_def_10: DIO Bit 9.
cmd_def_11: 10
combo_def_11: DIO Bit 10.
cmd_def_12: 11
combo_def_12: DIO Bit 11.
cmd_def_13: 12
combo_def_13: DIO Bit 12.
cmd_def_14: 13
combo_def_14: DIO Bit 13.
cmd_def_15: 14
combo_def_15: DIO Bit 14.
cmd_def_16: 15
combo_def_16: DIO Bit 15.
cmd_def_17: 16
combo_def_17: DIO Bit 16.
cmd_def_18: 17
combo_def_18: DIO Bit 17.
cmd_def_19: 18
combo_def_19: DIO Bit 18.
cmd_def_20: 19
combo_def_20: DIO Bit 19.
cmd_def_21: 20
combo_def_21: DIO Bit 20.
cmd_def_22: 21
combo_def_22: DIO Bit 21.
cmd_def_23: 22
combo_def_23: DIO Bit 22.
cmd_def_24: 23
combo_def_24: DIO Bit 23.
cmd_def_25: 24
combo_def_25: DIO Bit 24.
cmd_def_26: 25
combo_def_26: DIO Bit 25.
cmd_def_27: 26
combo_def_27: DIO Bit 26.
cmd_def_28: 27
combo_def_28: DIO Bit 27.
cmd_def_29: 28
combo_def_29: DIO Bit 28.
cmd_def_30: 29
combo_def_30: DIO Bit 29.
cmd_def_31: 30
combo_def_31: DIO Bit 30.
cmd_def_32: 31
combo_def_32: DIO Bit 31.
cmd_def_33: 32
combo_def_33: Trigger/Ref Input 1 (front panel).
cmd_def_34: 33
combo_def_34: Trigger/Ref Input 2 (front panel).
cmd_def_35: 34
combo_def_35: Trigger Input 3 (rear panel).
cmd_def_36: 35
combo_def_36: Trigger Input 4 (rear panel).
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 1

[Counter 1 - Trig Rising]
label: Trig Rising
datatype: BOOLEAN
section: Counter
group: Counter 1
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from low to high. For dual edge triggering, select also the falling edge.<br/><b>cnts/0/trigrising</b></p></body></html>
set_cmd: /cnts/0/trigrising
get_cmd: /cnts/0/trigrising
option_value_1: CNT

[Counter 1 - Trig Falling]
label: Trig Falling
datatype: BOOLEAN
section: Counter
group: Counter 1
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from high to low. For dual edge triggering, select also the rising edge.<br/><b>cnts/0/trigfalling</b></p></body></html>
set_cmd: /cnts/0/trigfalling
get_cmd: /cnts/0/trigfalling
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 1

[Counter 1 - Gate Select]
label: Gate Select
datatype: COMBO
section: Counter
group: Counter 1
def_value: Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal source used for enabling the counter in the Gated Free Running and Gated modes.<br/><b>cnts/0/gateselect</b></p></body></html>
set_cmd: /cnts/0/gateselect
get_cmd: /cnts/0/gateselect
cmd_def_1: 0
combo_def_1: Trigger 1
cmd_def_2: 1
combo_def_2: Trigger 2
cmd_def_3: 2
combo_def_3: Trigger 3
cmd_def_4: 3
combo_def_4: Trigger 4
cmd_def_5: 4
combo_def_5: Trigger 5
cmd_def_6: 5
combo_def_6: Trigger 6
cmd_def_7: 6
combo_def_7: Trigger 7
cmd_def_8: 7
combo_def_8: Trigger 8
cmd_def_9: 32
combo_def_9: Internal Trigger 1
cmd_def_10: 33
combo_def_10: Internal Trigger 2
cmd_def_11: 34
combo_def_11: Internal Trigger 3
cmd_def_12: 35
combo_def_12: Internal Trigger 4
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 1

[Counter 1 - Operation]
label: Operation
datatype: COMBO
section: Counter
group: Counter 1
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the arithmetic operation (addition, subtraction) applied to the counter unit outputs. 'Other counter' refers to the grouping of the counter units: 1 with 2, and 3 with 4.<br/><b>cnts/0/operation</b></p></body></html>
set_cmd: /cnts/0/operation
get_cmd: /cnts/0/operation
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Add Other Counter
cmd_def_3: 2
combo_def_3: Subtract Other Counter
option_value_1: CNT

[Counter 1 - Integrate]
label: Integrate
datatype: BOOLEAN
section: Counter
group: Counter 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sum up counter values over time.<br/><b>cnts/0/integrate</b></p></body></html>
set_cmd: /cnts/0/integrate
get_cmd: /cnts/0/integrate
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 1

[Counter 1 - Value]
label: Value
datatype: DOUBLE
section: Counter
group: Counter 1
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Counter output value.<br/><b>cnts/0/value</b></p></body></html>
set_cmd: /cnts/0/value
get_cmd: /cnts/0/value
option_value_1: CNT
permission: READ


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Enable]
label: Enable
datatype: BOOLEAN
section: Counter
group: Counter 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enable the pulse counter unit.<br/><b>cnts/1/enable</b></p></body></html>
set_cmd: /cnts/1/enable
get_cmd: /cnts/1/enable
option_value_1: CNT

[Counter 2 - Mode]
label: Mode
datatype: COMBO
section: Counter
group: Counter 2
def_value: Free Running
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the run mode of the counter unit.<br/><b>cnts/1/mode</b></p></body></html>
set_cmd: /cnts/1/mode
get_cmd: /cnts/1/mode
cmd_def_1: 1
combo_def_1: Free Running
cmd_def_2: 2
combo_def_2: Gated Free Running
cmd_def_3: 3
combo_def_3: Free Running
cmd_def_4: 4
combo_def_4: Time Tagging
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Period]
label: Period
datatype: DOUBLE
section: Counter
group: Counter 2
def_value: 1e-3
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Set the period used for the Free Running and Gated Free Running modes. Also sets the hold-off time for the Time Tagging mode.<br/><b>cnts/1/period</b></p></body></html>
set_cmd: /cnts/1/period
get_cmd: /cnts/1/period
option_value_1: CNT

[Counter 2 - Input]
label: Input
datatype: COMBO
section: Counter
group: Counter 2
def_value: DIO Bit 0.
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the counter signal source.<br/><b>cnts/1/inputselect</b></p></body></html>
set_cmd: /cnts/1/inputselect
get_cmd: /cnts/1/inputselect
cmd_def_1: 0
combo_def_1: DIO Bit 0.
cmd_def_2: 1
combo_def_2: DIO Bit 1.
cmd_def_3: 2
combo_def_3: DIO Bit 2.
cmd_def_4: 3
combo_def_4: DIO Bit 3.
cmd_def_5: 4
combo_def_5: DIO Bit 4.
cmd_def_6: 5
combo_def_6: DIO Bit 5.
cmd_def_7: 6
combo_def_7: DIO Bit 6.
cmd_def_8: 7
combo_def_8: DIO Bit 7.
cmd_def_9: 8
combo_def_9: DIO Bit 8.
cmd_def_10: 9
combo_def_10: DIO Bit 9.
cmd_def_11: 10
combo_def_11: DIO Bit 10.
cmd_def_12: 11
combo_def_12: DIO Bit 11.
cmd_def_13: 12
combo_def_13: DIO Bit 12.
cmd_def_14: 13
combo_def_14: DIO Bit 13.
cmd_def_15: 14
combo_def_15: DIO Bit 14.
cmd_def_16: 15
combo_def_16: DIO Bit 15.
cmd_def_17: 16
combo_def_17: DIO Bit 16.
cmd_def_18: 17
combo_def_18: DIO Bit 17.
cmd_def_19: 18
combo_def_19: DIO Bit 18.
cmd_def_20: 19
combo_def_20: DIO Bit 19.
cmd_def_21: 20
combo_def_21: DIO Bit 20.
cmd_def_22: 21
combo_def_22: DIO Bit 21.
cmd_def_23: 22
combo_def_23: DIO Bit 22.
cmd_def_24: 23
combo_def_24: DIO Bit 23.
cmd_def_25: 24
combo_def_25: DIO Bit 24.
cmd_def_26: 25
combo_def_26: DIO Bit 25.
cmd_def_27: 26
combo_def_27: DIO Bit 26.
cmd_def_28: 27
combo_def_28: DIO Bit 27.
cmd_def_29: 28
combo_def_29: DIO Bit 28.
cmd_def_30: 29
combo_def_30: DIO Bit 29.
cmd_def_31: 30
combo_def_31: DIO Bit 30.
cmd_def_32: 31
combo_def_32: DIO Bit 31.
cmd_def_33: 32
combo_def_33: Trigger/Ref Input 1 (front panel).
cmd_def_34: 33
combo_def_34: Trigger/Ref Input 2 (front panel).
cmd_def_35: 34
combo_def_35: Trigger Input 3 (rear panel).
cmd_def_36: 35
combo_def_36: Trigger Input 4 (rear panel).
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Trig Rising]
label: Trig Rising
datatype: BOOLEAN
section: Counter
group: Counter 2
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from low to high. For dual edge triggering, select also the falling edge.<br/><b>cnts/1/trigrising</b></p></body></html>
set_cmd: /cnts/1/trigrising
get_cmd: /cnts/1/trigrising
option_value_1: CNT

[Counter 2 - Trig Falling]
label: Trig Falling
datatype: BOOLEAN
section: Counter
group: Counter 2
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from high to low. For dual edge triggering, select also the rising edge.<br/><b>cnts/1/trigfalling</b></p></body></html>
set_cmd: /cnts/1/trigfalling
get_cmd: /cnts/1/trigfalling
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Gate Select]
label: Gate Select
datatype: COMBO
section: Counter
group: Counter 2
def_value: Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal source used for enabling the counter in the Gated Free Running and Gated modes.<br/><b>cnts/1/gateselect</b></p></body></html>
set_cmd: /cnts/1/gateselect
get_cmd: /cnts/1/gateselect
cmd_def_1: 0
combo_def_1: Trigger 1
cmd_def_2: 1
combo_def_2: Trigger 2
cmd_def_3: 2
combo_def_3: Trigger 3
cmd_def_4: 3
combo_def_4: Trigger 4
cmd_def_5: 4
combo_def_5: Trigger 5
cmd_def_6: 5
combo_def_6: Trigger 6
cmd_def_7: 6
combo_def_7: Trigger 7
cmd_def_8: 7
combo_def_8: Trigger 8
cmd_def_9: 32
combo_def_9: Internal Trigger 1
cmd_def_10: 33
combo_def_10: Internal Trigger 2
cmd_def_11: 34
combo_def_11: Internal Trigger 3
cmd_def_12: 35
combo_def_12: Internal Trigger 4
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Operation]
label: Operation
datatype: COMBO
section: Counter
group: Counter 2
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the arithmetic operation (addition, subtraction) applied to the counter unit outputs. 'Other counter' refers to the grouping of the counter units: 1 with 2, and 3 with 4.<br/><b>cnts/1/operation</b></p></body></html>
set_cmd: /cnts/1/operation
get_cmd: /cnts/1/operation
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Add Other Counter
cmd_def_3: 2
combo_def_3: Subtract Other Counter
option_value_1: CNT

[Counter 2 - Integrate]
label: Integrate
datatype: BOOLEAN
section: Counter
group: Counter 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sum up counter values over time.<br/><b>cnts/1/integrate</b></p></body></html>
set_cmd: /cnts/1/integrate
get_cmd: /cnts/1/integrate
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 2

[Counter 2 - Value]
label: Value
datatype: DOUBLE
section: Counter
group: Counter 2
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Counter output value.<br/><b>cnts/1/value</b></p></body></html>
set_cmd: /cnts/1/value
get_cmd: /cnts/1/value
option_value_1: CNT
permission: READ


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Enable]
label: Enable
datatype: BOOLEAN
section: Counter
group: Counter 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enable the pulse counter unit.<br/><b>cnts/2/enable</b></p></body></html>
set_cmd: /cnts/2/enable
get_cmd: /cnts/2/enable
option_value_1: CNT

[Counter 3 - Mode]
label: Mode
datatype: COMBO
section: Counter
group: Counter 3
def_value: Free Running
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the run mode of the counter unit.<br/><b>cnts/2/mode</b></p></body></html>
set_cmd: /cnts/2/mode
get_cmd: /cnts/2/mode
cmd_def_1: 1
combo_def_1: Free Running
cmd_def_2: 2
combo_def_2: Gated Free Running
cmd_def_3: 3
combo_def_3: Free Running
cmd_def_4: 4
combo_def_4: Time Tagging
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Period]
label: Period
datatype: DOUBLE
section: Counter
group: Counter 3
def_value: 1e-3
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Set the period used for the Free Running and Gated Free Running modes. Also sets the hold-off time for the Time Tagging mode.<br/><b>cnts/2/period</b></p></body></html>
set_cmd: /cnts/2/period
get_cmd: /cnts/2/period
option_value_1: CNT

[Counter 3 - Input]
label: Input
datatype: COMBO
section: Counter
group: Counter 3
def_value: DIO Bit 0.
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the counter signal source.<br/><b>cnts/2/inputselect</b></p></body></html>
set_cmd: /cnts/2/inputselect
get_cmd: /cnts/2/inputselect
cmd_def_1: 0
combo_def_1: DIO Bit 0.
cmd_def_2: 1
combo_def_2: DIO Bit 1.
cmd_def_3: 2
combo_def_3: DIO Bit 2.
cmd_def_4: 3
combo_def_4: DIO Bit 3.
cmd_def_5: 4
combo_def_5: DIO Bit 4.
cmd_def_6: 5
combo_def_6: DIO Bit 5.
cmd_def_7: 6
combo_def_7: DIO Bit 6.
cmd_def_8: 7
combo_def_8: DIO Bit 7.
cmd_def_9: 8
combo_def_9: DIO Bit 8.
cmd_def_10: 9
combo_def_10: DIO Bit 9.
cmd_def_11: 10
combo_def_11: DIO Bit 10.
cmd_def_12: 11
combo_def_12: DIO Bit 11.
cmd_def_13: 12
combo_def_13: DIO Bit 12.
cmd_def_14: 13
combo_def_14: DIO Bit 13.
cmd_def_15: 14
combo_def_15: DIO Bit 14.
cmd_def_16: 15
combo_def_16: DIO Bit 15.
cmd_def_17: 16
combo_def_17: DIO Bit 16.
cmd_def_18: 17
combo_def_18: DIO Bit 17.
cmd_def_19: 18
combo_def_19: DIO Bit 18.
cmd_def_20: 19
combo_def_20: DIO Bit 19.
cmd_def_21: 20
combo_def_21: DIO Bit 20.
cmd_def_22: 21
combo_def_22: DIO Bit 21.
cmd_def_23: 22
combo_def_23: DIO Bit 22.
cmd_def_24: 23
combo_def_24: DIO Bit 23.
cmd_def_25: 24
combo_def_25: DIO Bit 24.
cmd_def_26: 25
combo_def_26: DIO Bit 25.
cmd_def_27: 26
combo_def_27: DIO Bit 26.
cmd_def_28: 27
combo_def_28: DIO Bit 27.
cmd_def_29: 28
combo_def_29: DIO Bit 28.
cmd_def_30: 29
combo_def_30: DIO Bit 29.
cmd_def_31: 30
combo_def_31: DIO Bit 30.
cmd_def_32: 31
combo_def_32: DIO Bit 31.
cmd_def_33: 32
combo_def_33: Trigger/Ref Input 1 (front panel).
cmd_def_34: 33
combo_def_34: Trigger/Ref Input 2 (front panel).
cmd_def_35: 34
combo_def_35: Trigger Input 3 (rear panel).
cmd_def_36: 35
combo_def_36: Trigger Input 4 (rear panel).
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Trig Rising]
label: Trig Rising
datatype: BOOLEAN
section: Counter
group: Counter 3
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from low to high. For dual edge triggering, select also the falling edge.<br/><b>cnts/2/trigrising</b></p></body></html>
set_cmd: /cnts/2/trigrising
get_cmd: /cnts/2/trigrising
option_value_1: CNT

[Counter 3 - Trig Falling]
label: Trig Falling
datatype: BOOLEAN
section: Counter
group: Counter 3
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Performs a trigger event when the source signal crosses the trigger level from high to low. For dual edge triggering, select also the rising edge.<br/><b>cnts/2/trigfalling</b></p></body></html>
set_cmd: /cnts/2/trigfalling
get_cmd: /cnts/2/trigfalling
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Gate Select]
label: Gate Select
datatype: COMBO
section: Counter
group: Counter 3
def_value: Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal source used for enabling the counter in the Gated Free Running and Gated modes.<br/><b>cnts/2/gateselect</b></p></body></html>
set_cmd: /cnts/2/gateselect
get_cmd: /cnts/2/gateselect
cmd_def_1: 0
combo_def_1: Trigger 1
cmd_def_2: 1
combo_def_2: Trigger 2
cmd_def_3: 2
combo_def_3: Trigger 3
cmd_def_4: 3
combo_def_4: Trigger 4
cmd_def_5: 4
combo_def_5: Trigger 5
cmd_def_6: 5
combo_def_6: Trigger 6
cmd_def_7: 6
combo_def_7: Trigger 7
cmd_def_8: 7
combo_def_8: Trigger 8
cmd_def_9: 32
combo_def_9: Internal Trigger 1
cmd_def_10: 33
combo_def_10: Internal Trigger 2
cmd_def_11: 34
combo_def_11: Internal Trigger 3
cmd_def_12: 35
combo_def_12: Internal Trigger 4
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Operation]
label: Operation
datatype: COMBO
section: Counter
group: Counter 3
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the arithmetic operation (addition, subtraction) applied to the counter unit outputs. 'Other counter' refers to the grouping of the counter units: 1 with 2, and 3 with 4.<br/><b>cnts/2/operation</b></p></body></html>
set_cmd: /cnts/2/operation
get_cmd: /cnts/2/operation
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Add Other Counter
cmd_def_3: 2
combo_def_3: Subtract Other Counter
option_value_1: CNT

[Counter 3 - Integrate]
label: Integrate
datatype: BOOLEAN
section: Counter
group: Counter 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sum up counter values over time.<br/><b>cnts/2/integrate</b></p></body></html>
set_cmd: /cnts/2/integrate
get_cmd: /cnts/2/integrate
option_value_1: CNT


#########################################
# SECTION: Counter
# GROUP: Counter 3

[Counter 3 - Value]
label: Value
datatype: DOUBLE
section: Counter
group: Counter 3
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Counter output value.<br/><b>cnts/2/value</b></p></body></html>
set_cmd: /cnts/2/value
get_cmd: /cnts/2/value
option_value_1: CNT
permission: READ


#########################################
# SECTION: Counter
# GROUP: Counter 4

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

