# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments PQSC

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_PQSC
support_arm: True
support_hardware_loop: False
startup : Do nothing

interface: Other
# address: <autodetect>
[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: PQSC



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#    datatype:           The data type should be one of DOUBLE, BOOLEAN, COMBO, STRING,
#                        COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE, BOOLEAN and COMBO
#                        datatypes can be stepped in a measurement. The BUTTON datatype does not have an
#                        associated value, and can therefore not be controlled from the Measurement
#                        program. It is typically used to manually force an instrument to perform a
#                        certain task.
#    label:              Label shown next to control in user interface. If not
#                        specified, the label defaults to the name of the quantity.
#    unit:               Unit for the quantity.
#    def_value:          Default value.
#    tooltip:            Tool tip shown when hovering the mouse over the control
#                        in the driver GUI. HTML tags are used to ensure that
#                        tootips are wrapped in the UI.
#    low_lim:            Lowest allowable value. Defaults to -INF.
#    high_lim:           Highest allowable values. Defaults to +INF.
#    x_name:             X-axis label for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    x_unit:             X-axis unit for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    combo_def_1, combo_def_2, ...:      Options for a pull-down combo box. Only used when datatype is COMBO.
#    group:              Name of the group where the control belongs.
#    section:            Name of the section where the control belongs.
#    state_quant:        Quantity that determines this control's visibility.
#    state_value_1,state_value_2, ...:            Values of state_quant for which the control is visible.
#    model_value_1, model_value_2, ...:           Values of model for which the control is
#                        visible. The value must match one of the models defined in the Model and
#                        Options-section described above.
#    option_value_1, option_value_2, ...: Values of option for which the control is visible.
#    permission:         Sets read/writability, options are BOTH, READ, WRITE or NONE.
#                        Default is BOTH.
#    show_in_measurement_dlg:            This setting is optional. If True, the
#                        quantity will be automatically shown when adding the instrument to a Measurement
#                        configuration. This is useful for instrument that contain a lot of quantities,
#                        but where most are not likely to be stepped in a measurement.
#    set_cmd:            Command used to send data to the instrument. Put "<*>" where the value
#                        should appear. If "<*>" does not occur in the string, the value will be added
#                        after the command.
#    get_cmd:            Command used to get the data from the instrument. Default is set_cmd?.
#    cmd_def_1, cmd_def_2, ...:       List of strings that define what is sent to/read from
#                        an instrument for a quantity that is defined as a a list of multiple options.
#                        Only used when datatype is COMBO.


#########################################
# SECTION: Device
# GROUP: Preset

[Preset - Factory Reset]
datatype: BUTTON
group: Preset
section: Device
label: Factory Reset
tooltip: <html><body><p>Load the factory default settings.</p></body></html>


#########################################
# SECTION: Device
# GROUP: Revisions

[Revisions - Data Server]
datatype: STRING
group: Revisions
section: Device
label: Data Server
def_value: 
tooltip: <html><body><p>Contains the revision number of the Zurich Instruments Data Server.</p><p><b>zi/about/revision</b></p></body></html>
permission: READ
get_cmd: data_server_version

[Revisions - Firmware]
datatype: STRING
group: Revisions
section: Device
label: Firmware
def_value: 
tooltip: <html><body><p>Revision of the device-internal controller software.</p><p><b>system/fwrevision</b></p></body></html>
permission: READ
get_cmd: firmware_version

[Revisions - FPGA]
datatype: STRING
group: Revisions
section: Device
label: FPGA
def_value: 
tooltip: <html><body><p>HDL firmware revision.</p><p><b>system/fpgarevision</b></p></body></html>
permission: READ
get_cmd: fpga_version


#########################################
# SECTION: Device
# GROUP: Input Reference Clock

[Input Reference Clock - Set Source]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Set Source
def_value: internal
tooltip: <html><body><p>The intended reference clock source. When the source is changed, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.</p><p><b>system/clocks/referenceclock/in/source</b></p></body></html>
combo_def_1: internal
cmd_def_1: 0
combo_def_2: external
cmd_def_2: 1
permission: BOTH
set_cmd: ref_clock
get_cmd: ref_clock

[Input Reference Clock - Actual Source]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Actual Source
def_value: internal
tooltip: <html><body><p>The actual reference clock source.</p><p><b>system/clocks/referenceclock/in/sourceactual</b></p></body></html>
combo_def_1: internal
cmd_def_1: 0
combo_def_2: external
cmd_def_2: 1
permission: READ
get_cmd: ref_clock_actual

[Input Reference Clock - Status]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Status
def_value: locked
tooltip: <html><body><p>Status of the reference clock.</p><p><b>system/clocks/referenceclock/in/status</b></p></body></html>
combo_def_1: locked
cmd_def_1: 0
combo_def_2: error
cmd_def_2: 1
combo_def_3: busy
cmd_def_3: 2
permission: READ
get_cmd: ref_clock_status


#########################################
# SECTION: Ports
# GROUP: Control

[Control - Repetitions (Number of Triggers)]
datatype: DOUBLE
group: Control
section: Ports
label: Repetitions (Number of Triggers)
def_value: 1
tooltip: <html><body><p>Number of triggers to be generated.</p><p><b>execution/repetitions</b></p></body></html>
permission: BOTH
show_in_measurement_dlg: True
set_cmd: repetitions
get_cmd: repetitions

[Control - Holdoff Time]
datatype: DOUBLE
group: Control
section: Ports
label: Holdoff Time
unit: s
def_value: 1e-07
tooltip: <html><body><p>Hold-off time between repeated triggers.</p><p><b>execution/holdoff</b></p></body></html>
permission: BOTH
show_in_measurement_dlg: True
set_cmd: holdoff
get_cmd: holdoff

[Control - Run/Stop]
datatype: BUTTON
group: Control
section: Ports
label: Run/Stop
tooltip: <html><body><p>Runs/stops sending triggers to all connected instruments over ZSync ports</p></body></html>
show_in_measurement_dlg: True

[Control - Show Connected Devices]
datatype: BOOLEAN
group: Control
section: Ports
label: Show Connected Devices
def_value: False
tooltip: <html><body><p>Display devices connected to ZSync ports. </p></body></html>


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 1

[ZSYNC Device Port 1 - Serial]
datatype: STRING
group: ZSYNC Device Port 1
section: Ports
label: Serial
def_value: 
tooltip: <html><body><p>The device ID of the instrument connected to this port.</p><p><b>zsyncs/0/connection/serial</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[0].connection.serial

[ZSYNC Device Port 1 - Type]
datatype: STRING
group: ZSYNC Device Port 1
section: Ports
label: Type
def_value: 
tooltip: <html><body><p>The device type of the instrument connected to this port.</p><p><b>zsyncs/0/connection/devtype</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[0].connection.devtype


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 2

[ZSYNC Device Port 2 - Serial]
datatype: STRING
group: ZSYNC Device Port 2
section: Ports
label: Serial
def_value: 
tooltip: <html><body><p>The device ID of the instrument connected to this port.</p><p><b>zsyncs/1/connection/serial</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[1].connection.serial

[ZSYNC Device Port 2 - Type]
datatype: STRING
group: ZSYNC Device Port 2
section: Ports
label: Type
def_value: 
tooltip: <html><body><p>The device type of the instrument connected to this port.</p><p><b>zsyncs/1/connection/devtype</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[1].connection.devtype


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 3

[ZSYNC Device Port 3 - Serial]
datatype: STRING
group: ZSYNC Device Port 3
section: Ports
label: Serial
def_value: 
tooltip: <html><body><p>The device ID of the instrument connected to this port.</p><p><b>zsyncs/2/connection/serial</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[2].connection.serial

[ZSYNC Device Port 3 - Type]
datatype: STRING
group: ZSYNC Device Port 3
section: Ports
label: Type
def_value: 
tooltip: <html><body><p>The device type of the instrument connected to this port.</p><p><b>zsyncs/2/connection/devtype</b></p></body></html>
state_quant: Control - Show Connected Devices
state_value_1: True
permission: READ
get_cmd: nodetree.zsyncs[2].connection.devtype


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 4

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# SECTION: Register Forwarding
# GROUP: ZSync Output
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
[ZSync Output - ZSYNC Output Port]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: ZSYNC Output Port
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17

[ZSync Output - Enable Port 1 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Port Forwarding
def_value: False
tooltip: <html><body><p>Enable readout registers forwarding for a given port.</p><p><b>zsyncs/0/output/registerbank/enable</b></p></body></html>
state_quant: ZSync Output - ZSYNC Output Port
state_value_1: 1
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.enable
get_cmd: nodetree.zsyncs[0].output.registerbank.enable

[ZSync Output - Port 1 Bit 1 Register]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 1 Register
def_value: 1
tooltip: <html><body><p>The readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/0/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].register
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].register

[ZSync Output - Port 1 Bit 1 Index]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 1 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/0/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].index
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].index

[ZSync Output - Enable Port 1 Bit 1 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Bit 1 Forwarding
def_value: False
tooltip: <html><body><p>Enable forwarding of given bit.</p><p><b>zsyncs/0/output/registerbank/sources/0/enable</b></p></body></html>
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].enable
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[0].enable

[ZSync Output - Port 1 Bit 2 Register]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 2 Register
def_value: 1
tooltip: <html><body><p>The readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/1/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].register
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].register

[ZSync Output - Port 1 Bit 2 Index]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 2 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/1/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].index
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].index

[ZSync Output - Enable Port 1 Bit 2 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Bit 2 Forwarding
def_value: False
tooltip: <html><body><p>Enable forwarding of given bit.</p><p><b>zsyncs/0/output/registerbank/sources/1/enable</b></p></body></html>
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].enable
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[1].enable

[ZSync Output - Port 1 Bit 3 Register]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 3 Register
def_value: 1
tooltip: <html><body><p>The readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/2/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].register
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].register

[ZSync Output - Port 1 Bit 3 Index]
datatype: COMBO
group: ZSync Output
section: Register Forwarding
label: Bit 3 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register forwarded.</p><p><b>zsyncs/0/output/registerbank/sources/2/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].index
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].index

[ZSync Output - Enable Port 1 Bit 3 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Bit 3 Forwarding
def_value: False
tooltip: <html><body><p>Enable forwarding of given bit.</p><p><b>zsyncs/0/output/registerbank/sources/2/enable</b></p></body></html>
state_quant: ZSync Output - Enable Port 1 Forwarding
state_value_1: True
permission: BOTH
set_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].enable
get_cmd: nodetree.zsyncs[0].output.registerbank.sources[2].enable

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

[ZSync Output - Enable Port 2 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Port Forwarding
def_value: False
tooltip: <html><body><p>Enable readout registers forwarding for a given port.</p><p><b>zsyncs/1/output/registerbank/enable</b></p></body></html>
state_quant: ZSync Output - ZSYNC Output Port
state_value_1: 2
permission: BOTH
set_cmd: nodetree.zsyncs[1].output.registerbank.enable
get_cmd: nodetree.zsyncs[1].output.registerbank.enable

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

[ZSync Output - Enable Port 3 Forwarding]
datatype: BOOLEAN
group: ZSync Output
section: Register Forwarding
label: Enable Port Forwarding
def_value: False
tooltip: <html><body><p>Enable readout registers forwarding for a given port.</p><p><b>zsyncs/2/output/registerbank/enable</b></p></body></html>
state_quant: ZSync Output - ZSYNC Output Port
state_value_1: 3
permission: BOTH
set_cmd: nodetree.zsyncs[2].output.registerbank.enable
get_cmd: nodetree.zsyncs[2].output.registerbank.enable

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# SECTION: LUT Decoder
# GROUP: Source Registor Selector
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
[Source Registor Selector - Address Word Bit]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Address Word Bit
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15

[Source Registor Selector - Address Word Bit 1 Register]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 1 Register
def_value: 1
tooltip: <html><body><p>The readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/0/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 1
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[0].register
get_cmd: nodetree.feedback.decoder.lut.sources[0].register

[Source Registor Selector - Address Word Bit 1 Index]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 1 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/0/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 1
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[0].index
get_cmd: nodetree.feedback.decoder.lut.sources[0].index

[Source Registor Selector - Address Word Bit 2 Register]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 2 Register
def_value: 1
tooltip: <html><body><p>The readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/1/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 2
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[1].register
get_cmd: nodetree.feedback.decoder.lut.sources[1].register

[Source Registor Selector - Address Word Bit 2 Index]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 2 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/1/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 2
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[1].index
get_cmd: nodetree.feedback.decoder.lut.sources[1].index

[Source Registor Selector - Address Word Bit 3 Register]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 3 Register
def_value: 1
tooltip: <html><body><p>The readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/2/register</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
combo_def_17: 17
cmd_def_17: 16
combo_def_18: 18
cmd_def_18: 17
combo_def_19: 19
cmd_def_19: 18
combo_def_20: 20
cmd_def_20: 19
combo_def_21: 21
cmd_def_21: 20
combo_def_22: 22
cmd_def_22: 21
combo_def_23: 23
cmd_def_23: 22
combo_def_24: 24
cmd_def_24: 23
combo_def_25: 25
cmd_def_25: 24
combo_def_26: 26
cmd_def_26: 25
combo_def_27: 27
cmd_def_27: 26
combo_def_28: 28
cmd_def_28: 27
combo_def_29: 29
cmd_def_29: 28
combo_def_30: 30
cmd_def_30: 29
combo_def_31: 31
cmd_def_31: 30
combo_def_32: 32
cmd_def_32: 31
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 3
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[2].register
get_cmd: nodetree.feedback.decoder.lut.sources[2].register

[Source Registor Selector - Address Word Bit 3 Index]
datatype: COMBO
group: Source Registor Selector
section: LUT Decoder
label: Bit 3 Index
def_value: 1
tooltip: <html><body><p>The index of the bit in the readout register used as source address of the Lookup Table.</p><p><b>feedback/decoder/lut/sources/2/index</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
combo_def_9: 9
cmd_def_9: 8
combo_def_10: 10
cmd_def_10: 9
combo_def_11: 11
cmd_def_11: 10
combo_def_12: 12
cmd_def_12: 11
combo_def_13: 13
cmd_def_13: 12
combo_def_14: 14
cmd_def_14: 13
combo_def_15: 15
cmd_def_15: 14
combo_def_16: 16
cmd_def_16: 15
state_quant: Source Registor Selector - Address Word Bit
state_value_1: 3
permission: BOTH
set_cmd: nodetree.feedback.decoder.lut.sources[2].index
get_cmd: nodetree.feedback.decoder.lut.sources[2].index

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

