# Instrument driver configuration file.


[General settings]
# The General settings-section define name and version of the driver.
# Note that it is the name property in this section that sets the
# driver name, not the name of the driver definition INI file.

# The name is shown in all the configuration windows
name: Zurich Instruments SHFQA

# The version string should be updated whenever changes are made to
# this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: Zurich_Instruments_SHFQA

# Pre-defined communication interface for instrument, default is  GPIB.
interface: Other

# Pre-defined address for instrument, default is an empty string.
address: DEV12000

# Pre-defined startup option for instrument, default is Set config.
startup: Do nothing

# Set to True if driver is a Signal Generator. Default is False.
signal_generator: False

# Set to True if driver is a Signal Analyzer. Default is False
signal_analyzer: False

# Set to True if driver is a Controller. Default is False
controller: False

# Set to True if driver supports hardware looping. Default is False
support_hardware_loop: True

# Set to True if driver supports hardware arming. Default is False
support_arm: True

# Set to True if driver should run in a 32-bit Python environment.
# Default  is False (run in 64-bit).
use_32bit_mode: False


[Model and options]
# The Model and options-section provides a way to enable/disable
# certain features of a driver depending on the instrument
# model/installed options.

# List of models supported by this driver
model_str_1: SHFQA2
model_str_2: SHFQA4

# If True, the driver checks the instrument model id at startup
# (True or False). The  model is checked by sending the model_cmd
# command over the VISA interface. Default is False.
check_model: False


[VISA settings]
# This section contains configuration of the VISA protocol. The VISA
# protocol enables text-based communication with instruments over GPIB,
# USB, serial and ethernet interfaces.

# Enable or disable communication over the VISA protocol
# (True or False). If False, the driver will not perform any operations
# (unless there is a custom driver).
use_visa: False

# Reset the interface (not the instrument) at startup (True or False).
# Default is False.
reset: False

# String used for sending boolean True to the instrument, default is 1.
str_true: 1

# String used for sending boolean False to the instrument, default is 0.
str_false: 0

# Conversion string used for converting value to string to be sent to
# the instrument. Default is  %.9e , which creates 9-digit string using
# exponential notation. To create strings with floating-point notation,
# use  %.9f  instead.
str_value_out: %.9e

# If  True , the program will automatically read the response from the
# instrument after each write command. Useful for instruments that
# always reply to all commands. Default is  False
always_read_after_write: False

# Time (in seconds) before the timing out while waiting for an
# instrument response. Default is 5 seconds.
timeout: 5


# All quantities are defined in separate sections, with the name of the
# quantity given by the section header. The properties of a quantity
# are defined by a number of keywords, see below for a list the
# possible options. Only the datatype  keyword is mandatory, the other
# ones are optional.
#
# datatype:                 The data type should be one of DOUBLE,
#                           BOOLEAN, COMBO, STRING, COMPLEX, VECTOR,
#                           VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE,
#                           BOOLEAN and COMBO datatypes can be stepped
#                           in a measurement. The BUTTON datatype does
#                           not have an associated value, and can
#                           therefore not be controlled from the
#                           Measurement program. It is typically used to
#                           manually force an instrument to perform a
#                           certain task.
# label:                    Label shown next to control in user
#                           interface. If not specified, the label
#                           defaults to the name of the quantity.
# unit:                     Unit for the quantity.
# def_value:                Default value.
# tooltip:                  Tool tip shown when hovering the mouse over
#                           the control in the driver GUI.
# low_lim:                  Lowest allowable value. Defaults to -INF.
# high_lim:                 Highest allowable values. Defaults to  +INF.
# x_name:                   X-axis label for a vector data. Only valid
#                           if datatype  is VECTOR or VECTOR_COMPLEX.
# x_unit:                   X-axis unit for a vector data. Only valid if
#                           datatype is VECTOR or VECTOR_COMPLEX.
# combo_def_1,              Options for a pull-down combo box. Only used
# combo_def_2,              when datatype is COMBO.
# ...:
# group:                    Name of the group where the control belongs.
# section:                  Name of the section where the control
#                           belongs.
# state_quant:              Quantity that determines this control’s
#                           visibility.
# second_state_quant:       A second quantity that determines this
#                           control’s visibility. This is an ‘AND’
#                           operation: if a control has a state_quant
#                           and a second_state_quant, both need to be
#                           True for it to appear
# state_value_1,            Values of  "state_quant"  for which the
# state_value_2,            control is visible.
# ...:
# second_state_value_1,     Values of "second_state_quant" for which the
# second_state_value_2,     control is visible, if "state_quant" is also
# ...:                      True.
# model_value_1,            Values of  "model"  for which the control is
# model_value_2,            visible. The value must match one of the
# ...:                      models defined in the Model and
#                           Options-section described above.
# option_value_1,           Values of  "option"  for which the control
# option_value_2,           is visible. The value must match one of the
# ...:                      options defined in the Model and
#                           Options-section described above.
# permission:               Sets read/writability, options are BOTH,
#                           READ, WRITE or NONE. Default is BOTH.
# show_in_measurement_dlg:  This setting is optional. If True, the
#                           the quantity will be automatically shown
#                           when adding the instrument to a Measurement
#                           configuration. This is useful for instrument
#                           that contain a lot of quantities, but where
#                           most are not likely to be stepped in a
#                           measurement
# set_cmd:                  Command used to send data to the instrument.
#                           Put "<*>" where the value should appear. If
#                           "<*>" does not occur in the string, the
#                           value will be added after the command.
# get_cmd:                  Command used to get the data from the
#                           instrument. Default is set_cmd?.
# cmd_def_1,                List of strings that define what is sent
# cmd_def_2,                to/read from an instrument for a quantity
# ...:                      that is defined as a a list of multiple
#                           options. Only used when datatype is COMBO.


#########################################
# SECTION: Device
# GROUP: Preset

[Preset - Factory Reset]
datatype: BUTTON
group: Preset
section: Device
label: Factory Reset
tooltip: <html><body><p>Load the factory default settings.</p></body></html>


#########################################
# SECTION: Device
# GROUP: Revisions

[Revisions - Data Server]
datatype: STRING
group: Revisions
section: Device
label: Data Server
def_value: 
tooltip: <html><body><p>Contains the revision number of the Zurich Instruments Data Server.</p><p><b>zi/about/revision</b></p></body></html>
permission: READ
get_cmd: data_server_version

[Revisions - Firmware]
datatype: STRING
group: Revisions
section: Device
label: Firmware
def_value: 
tooltip: <html><body><p>Revision of the device-internal controller software.</p><p><b>system/fwrevision</b></p></body></html>
permission: READ
get_cmd: firmware_version

[Revisions - FPGA]
datatype: STRING
group: Revisions
section: Device
label: FPGA
def_value: 
tooltip: <html><body><p>HDL firmware revision.</p><p><b>system/fpgarevision</b></p></body></html>
permission: READ
get_cmd: fpga_version


#########################################
# SECTION: Device
# GROUP: Input Reference Clock

[Input Reference Clock - Set Source]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Set Source
def_value: internal
tooltip: <html><body><p>The intended reference clock source. When the source is changed, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.</p><p><b>system/clocks/referenceclock/in/source</b></p></body></html>
combo_def_1: internal
cmd_def_1: 0
combo_def_2: external
cmd_def_2: 1
combo_def_3: zsync
cmd_def_3: 2
permission: BOTH
set_cmd: ref_clock
get_cmd: ref_clock

[Input Reference Clock - Actual Source]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Actual Source
def_value: internal
tooltip: <html><body><p>The actual reference clock source.</p><p><b>system/clocks/referenceclock/in/sourceactual</b></p></body></html>
combo_def_1: internal
cmd_def_1: 0
combo_def_2: external
cmd_def_2: 1
combo_def_3: zsync
cmd_def_3: 2
permission: READ
get_cmd: ref_clock_actual

[Input Reference Clock - Status]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Status
def_value: locked
tooltip: <html><body><p>Status of the reference clock.</p><p><b>system/clocks/referenceclock/in/status</b></p></body></html>
combo_def_1: locked
cmd_def_1: 0
combo_def_2: error
cmd_def_2: 1
combo_def_3: busy
cmd_def_3: 2
permission: READ
get_cmd: ref_clock_status


#########################################
# SECTION: Device
# GROUP: Extras

[Extras - Enable Internal Trigger Loopback]
datatype: BOOLEAN
group: Extras
section: Device
label: Enable Internal Trigger Loopback
def_value: False
tooltip: <html><body><p>Start a trigger pulse using the internal loopback. This is A 1kHz continuous trigger pulse from marker 1 A using the internal loopback to trigger in 1 A.</p></body></html>

[Extras - Self Trigger Channel]
datatype: BUTTON
group: Extras
section: Device
label: Self Trigger Channel
tooltip: <html><body><p>Combined with `Enable Internal Trigger Loopback`, this controller is used to realize mesaurements with internal trigger loopback. Use this controller as trigger channel in arm/trig mode.</p></body></html>
show_in_measurement_dlg: True


#########################################
# SECTION: In / Out
# GROUP: Channel 1

[Channel 1 - Center Frequency]
datatype: DOUBLE
group: Channel 1
section: In / Out
label: Center Frequency
unit: Hz
def_value: 1000000000.0
tooltip: <html><body><p>The Center Frequency of the analysis band.</p><p><b>qachannels/0/centerfreq</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].center_freq
get_cmd: qachannels[0].center_freq

[Channel 1 - Input Range]
datatype: COMBO
group: Channel 1
section: In / Out
label: Input Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Input power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/0/input/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
combo_def_10: -35
combo_def_11: -40
combo_def_12: -45
combo_def_13: -50
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].input_range
get_cmd: qachannels[0].input_range

[Channel 1 - Input On]
datatype: BOOLEAN
group: Channel 1
section: In / Out
label: Input On
def_value: False
tooltip: <html><body><p>Enables the Signal Input.</p><p><b>qachannels/0/input/on</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].input
get_cmd: qachannels[0].input

[Channel 1 - Output Range]
datatype: COMBO
group: Channel 1
section: In / Out
label: Output Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/0/output/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].output_range
get_cmd: qachannels[0].output_range

[Channel 1 - Output On]
datatype: BOOLEAN
group: Channel 1
section: In / Out
label: Output On
def_value: False
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>qachannels/0/output/on</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].output
get_cmd: qachannels[0].output


#########################################
# SECTION: In / Out
# GROUP: Channel 2

[Channel 2 - Center Frequency]
datatype: DOUBLE
group: Channel 2
section: In / Out
label: Center Frequency
unit: Hz
def_value: 1000000000.0
tooltip: <html><body><p>The Center Frequency of the analysis band.</p><p><b>qachannels/1/centerfreq</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].center_freq
get_cmd: qachannels[1].center_freq

[Channel 2 - Input Range]
datatype: COMBO
group: Channel 2
section: In / Out
label: Input Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Input power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/1/input/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
combo_def_10: -35
combo_def_11: -40
combo_def_12: -45
combo_def_13: -50
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].input_range
get_cmd: qachannels[1].input_range

[Channel 2 - Input On]
datatype: BOOLEAN
group: Channel 2
section: In / Out
label: Input On
def_value: False
tooltip: <html><body><p>Enables the Signal Input.</p><p><b>qachannels/1/input/on</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].input
get_cmd: qachannels[1].input

[Channel 2 - Output Range]
datatype: COMBO
group: Channel 2
section: In / Out
label: Output Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/1/output/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].output_range
get_cmd: qachannels[1].output_range

[Channel 2 - Output On]
datatype: BOOLEAN
group: Channel 2
section: In / Out
label: Output On
def_value: False
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>qachannels/1/output/on</b></p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].output
get_cmd: qachannels[1].output


#########################################
# SECTION: In / Out
# GROUP: Channel 3

[Channel 3 - Center Frequency]
datatype: DOUBLE
group: Channel 3
section: In / Out
label: Center Frequency
unit: Hz
def_value: 1000000000.0
tooltip: <html><body><p>The Center Frequency of the analysis band.</p><p><b>qachannels/2/centerfreq</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].center_freq
get_cmd: qachannels[2].center_freq

[Channel 3 - Input Range]
datatype: COMBO
group: Channel 3
section: In / Out
label: Input Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Input power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/2/input/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
combo_def_10: -35
combo_def_11: -40
combo_def_12: -45
combo_def_13: -50
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].input_range
get_cmd: qachannels[2].input_range

[Channel 3 - Input On]
datatype: BOOLEAN
group: Channel 3
section: In / Out
label: Input On
def_value: False
tooltip: <html><body><p>Enables the Signal Input.</p><p><b>qachannels/2/input/on</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].input
get_cmd: qachannels[2].input

[Channel 3 - Output Range]
datatype: COMBO
group: Channel 3
section: In / Out
label: Output Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/2/output/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].output_range
get_cmd: qachannels[2].output_range

[Channel 3 - Output On]
datatype: BOOLEAN
group: Channel 3
section: In / Out
label: Output On
def_value: False
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>qachannels/2/output/on</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].output
get_cmd: qachannels[2].output


#########################################
# SECTION: In / Out
# GROUP: Channel 4

[Channel 4 - Center Frequency]
datatype: DOUBLE
group: Channel 4
section: In / Out
label: Center Frequency
unit: Hz
def_value: 1000000000.0
tooltip: <html><body><p>The Center Frequency of the analysis band.</p><p><b>qachannels/3/centerfreq</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].center_freq
get_cmd: qachannels[3].center_freq

[Channel 4 - Input Range]
datatype: COMBO
group: Channel 4
section: In / Out
label: Input Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Input power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/3/input/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
combo_def_10: -35
combo_def_11: -40
combo_def_12: -45
combo_def_13: -50
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].input_range
get_cmd: qachannels[3].input_range

[Channel 4 - Input On]
datatype: BOOLEAN
group: Channel 4
section: In / Out
label: Input On
def_value: False
tooltip: <html><body><p>Enables the Signal Input.</p><p><b>qachannels/3/input/on</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].input
get_cmd: qachannels[3].input

[Channel 4 - Output Range]
datatype: COMBO
group: Channel 4
section: In / Out
label: Output Range
unit: dBm
def_value: 10
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>qachannels/3/output/range</b></p></body></html>
combo_def_1: 10
combo_def_2: 5
combo_def_3: 0
combo_def_4: -5
combo_def_5: -10
combo_def_6: -15
combo_def_7: -20
combo_def_8: -25
combo_def_9: -30
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].output_range
get_cmd: qachannels[3].output_range

[Channel 4 - Output On]
datatype: BOOLEAN
group: Channel 4
section: In / Out
label: Output On
def_value: False
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>qachannels/3/output/on</b></p></body></html>
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].output
get_cmd: qachannels[3].output


#########################################
# SECTION: QA Setup
# GROUP: QA Channel 1

[QA Channel 1 - Application Mode]
datatype: COMBO
group: QA Channel 1
section: QA Setup
label: Application Mode
def_value: spectroscopy
tooltip: <html><body><p>Selects between Spectroscopy and Qubit Readout mode.</p><p><b>qachannels/0/mode</b></p></body></html>
combo_def_1: spectroscopy
cmd_def_1: 0
combo_def_2: readout
cmd_def_2: 1
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].mode
get_cmd: qachannels[0].mode

[QA Channel 1 - Digital Trigger 1]
datatype: COMBO
group: QA Channel 1
section: QA Setup
label: Digital Trigger 1
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/0/generator/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].generator.dig_trigger1_source
get_cmd: qachannels[0].generator.dig_trigger1_source

[QA Channel 1 - Digital Trigger 2]
datatype: COMBO
group: QA Channel 1
section: QA Setup
label: Digital Trigger 2
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/0/generator/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].generator.dig_trigger2_source
get_cmd: qachannels[0].generator.dig_trigger2_source

[QA Channel 1 - Readout Integration Length]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Readout Integration Length
def_value: 128
tooltip: <html><body><p>Sets the length of all Integration Weights in number of samples. A maximum of 4096 samples can be integrated, which corresponds to 2.05 us.</p><p><b>qachannels/0/readout/integration/length</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].readout.integration_length
get_cmd: qachannels[0].readout.integration_length

[QA Channel 1 - Readout Integration Delay]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Readout Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the readout integration for all Integration Weights with respect to the common delay of the Readout Pulse Generator. The resolution is 2 ns.</p><p><b>qachannels/0/readout/integration/delay</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].readout.integration_delay
get_cmd: qachannels[0].readout.integration_delay

[QA Channel 1 - Integration Weights File Path]
datatype: PATH
group: QA Channel 1
section: QA Setup
label: Integration Weights File Path
def_value: 
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 1 - Trigger Signal]
datatype: COMBO
group: QA Channel 1
section: QA Setup
label: Trigger Signal
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the trigger for the integration and envelope in Spectroscopy mode.</p><p><b>qachannels/0/spectroscopy/trigger/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Software Trigger 0
cmd_def_13: swtrig0
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].sweeper.trigger_source
get_cmd: qachannels[0].sweeper.trigger_source

[QA Channel 1 - Trigger Level]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Trigger Level
unit: V
def_value: 0.5
tooltip: <html><body><p>Defines the analog Trigger level.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 1 - Trigger Input Impedance]
datatype: COMBO
group: QA Channel 1
section: QA Setup
label: Trigger Input Impedance
def_value: OFF: 1 k Ohm
tooltip: <html><body><p>Trigger Input impedance: When on, the Trigger Input impedance is 50 Ohm; when off, 1 kOhm.</p></body></html>
combo_def_1: OFF: 1 k Ohm
cmd_def_1: 0
combo_def_2: ON: 50 Ohm
cmd_def_2: 1
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 1 - Spectroscopy Integration Length]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Spectroscopy Integration Length
def_value: 1024
tooltip: <html><body><p>Sets the integration length in Spectroscopy mode in number of samples. Up to 33.5 MSa (2^25 samples) can be recorded, which corresponds to 16.7 ms.</p><p><b>qachannels/0/spectroscopy/length</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].sweeper.integration_length
get_cmd: qachannels[0].sweeper.integration_length

[QA Channel 1 - Spectroscopy Integration Delay]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Spectroscopy Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets the delay of the integration in Spectroscopy mode with respect to the Trigger signal. The resolution is 2 ns.</p><p><b>qachannels/0/spectroscopy/delay</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].sweeper.integration_delay
get_cmd: qachannels[0].sweeper.integration_delay

[QA Channel 1 - Offset Frequency]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Offset Frequency
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>Controls the frequency of each digital Oscillator.</p><p><b>qachannels/0/oscs/0/freq</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].sweeper.oscillator_freq
get_cmd: qachannels[0].sweeper.oscillator_freq

[QA Channel 1 - Output Frequency]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Output Frequency
unit: Hz
def_value: 1010000000.0
tooltip: <html><body><p>Displays the carrier frequency of the microwave signal at the Out connector. This frequency corresponds to the sum of the Center Frequency and the Offset Frequency.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
get_cmd: qachannels[0].sweeper.output_freq

[QA Channel 1 - Amplitude]
datatype: DOUBLE
group: QA Channel 1
section: QA Setup
label: Amplitude
def_value: 0.5
tooltip: <html><body><p>Controls the gain of each digital Oscillator. The gain is defined relative to the Output Range of the Readout Channel.</p><p><b>qachannels/0/oscs/0/gain</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].sweeper.oscillator_gain
get_cmd: qachannels[0].sweeper.oscillator_gain


#########################################
# SECTION: QA Setup
# GROUP: QA Channel 2

[QA Channel 2 - Application Mode]
datatype: COMBO
group: QA Channel 2
section: QA Setup
label: Application Mode
def_value: spectroscopy
tooltip: <html><body><p>Selects between Spectroscopy and Qubit Readout mode.</p><p><b>qachannels/1/mode</b></p></body></html>
combo_def_1: spectroscopy
cmd_def_1: 0
combo_def_2: readout
cmd_def_2: 1
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].mode
get_cmd: qachannels[1].mode

[QA Channel 2 - Digital Trigger 1]
datatype: COMBO
group: QA Channel 2
section: QA Setup
label: Digital Trigger 1
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/1/generator/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].generator.dig_trigger1_source
get_cmd: qachannels[1].generator.dig_trigger1_source

[QA Channel 2 - Digital Trigger 2]
datatype: COMBO
group: QA Channel 2
section: QA Setup
label: Digital Trigger 2
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/1/generator/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].generator.dig_trigger2_source
get_cmd: qachannels[1].generator.dig_trigger2_source

[QA Channel 2 - Readout Integration Length]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Readout Integration Length
def_value: 128
tooltip: <html><body><p>Sets the length of all Integration Weights in number of samples. A maximum of 4096 samples can be integrated, which corresponds to 2.05 us.</p><p><b>qachannels/1/readout/integration/length</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].readout.integration_length
get_cmd: qachannels[1].readout.integration_length

[QA Channel 2 - Readout Integration Delay]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Readout Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the readout integration for all Integration Weights with respect to the common delay of the Readout Pulse Generator. The resolution is 2 ns.</p><p><b>qachannels/1/readout/integration/delay</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].readout.integration_delay
get_cmd: qachannels[1].readout.integration_delay

[QA Channel 2 - Integration Weights File Path]
datatype: PATH
group: QA Channel 2
section: QA Setup
label: Integration Weights File Path
def_value: 
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 2 - Trigger Signal]
datatype: COMBO
group: QA Channel 2
section: QA Setup
label: Trigger Signal
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the trigger for the integration and envelope in Spectroscopy mode.</p><p><b>qachannels/1/spectroscopy/trigger/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Software Trigger 0
cmd_def_13: swtrig0
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].sweeper.trigger_source
get_cmd: qachannels[1].sweeper.trigger_source

[QA Channel 2 - Trigger Level]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Trigger Level
unit: V
def_value: 0.5
tooltip: <html><body><p>Defines the analog Trigger level.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 2 - Trigger Input Impedance]
datatype: COMBO
group: QA Channel 2
section: QA Setup
label: Trigger Input Impedance
def_value: OFF: 1 k Ohm
tooltip: <html><body><p>Trigger Input impedance: When on, the Trigger Input impedance is 50 Ohm; when off, 1 kOhm.</p></body></html>
combo_def_1: OFF: 1 k Ohm
cmd_def_1: 0
combo_def_2: ON: 50 Ohm
cmd_def_2: 1
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[QA Channel 2 - Spectroscopy Integration Length]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Spectroscopy Integration Length
def_value: 1024
tooltip: <html><body><p>Sets the integration length in Spectroscopy mode in number of samples. Up to 33.5 MSa (2^25 samples) can be recorded, which corresponds to 16.7 ms.</p><p><b>qachannels/1/spectroscopy/length</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].sweeper.integration_length
get_cmd: qachannels[1].sweeper.integration_length

[QA Channel 2 - Spectroscopy Integration Delay]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Spectroscopy Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets the delay of the integration in Spectroscopy mode with respect to the Trigger signal. The resolution is 2 ns.</p><p><b>qachannels/1/spectroscopy/delay</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].sweeper.integration_delay
get_cmd: qachannels[1].sweeper.integration_delay

[QA Channel 2 - Offset Frequency]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Offset Frequency
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>Controls the frequency of each digital Oscillator.</p><p><b>qachannels/1/oscs/0/freq</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].sweeper.oscillator_freq
get_cmd: qachannels[1].sweeper.oscillator_freq

[QA Channel 2 - Output Frequency]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Output Frequency
unit: Hz
def_value: 1010000000.0
tooltip: <html><body><p>Displays the carrier frequency of the microwave signal at the Out connector. This frequency corresponds to the sum of the Center Frequency and the Offset Frequency.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
get_cmd: qachannels[1].sweeper.output_freq

[QA Channel 2 - Amplitude]
datatype: DOUBLE
group: QA Channel 2
section: QA Setup
label: Amplitude
def_value: 0.5
tooltip: <html><body><p>Controls the gain of each digital Oscillator. The gain is defined relative to the Output Range of the Readout Channel.</p><p><b>qachannels/1/oscs/0/gain</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].sweeper.oscillator_gain
get_cmd: qachannels[1].sweeper.oscillator_gain


#########################################
# SECTION: QA Setup
# GROUP: QA Channel 3

[QA Channel 3 - Application Mode]
datatype: COMBO
group: QA Channel 3
section: QA Setup
label: Application Mode
def_value: spectroscopy
tooltip: <html><body><p>Selects between Spectroscopy and Qubit Readout mode.</p><p><b>qachannels/2/mode</b></p></body></html>
combo_def_1: spectroscopy
cmd_def_1: 0
combo_def_2: readout
cmd_def_2: 1
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].mode
get_cmd: qachannels[2].mode

[QA Channel 3 - Digital Trigger 1]
datatype: COMBO
group: QA Channel 3
section: QA Setup
label: Digital Trigger 1
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/2/generator/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].generator.dig_trigger1_source
get_cmd: qachannels[2].generator.dig_trigger1_source

[QA Channel 3 - Digital Trigger 2]
datatype: COMBO
group: QA Channel 3
section: QA Setup
label: Digital Trigger 2
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/2/generator/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].generator.dig_trigger2_source
get_cmd: qachannels[2].generator.dig_trigger2_source

[QA Channel 3 - Readout Integration Length]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Readout Integration Length
def_value: 128
tooltip: <html><body><p>Sets the length of all Integration Weights in number of samples. A maximum of 4096 samples can be integrated, which corresponds to 2.05 us.</p><p><b>qachannels/2/readout/integration/length</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].readout.integration_length
get_cmd: qachannels[2].readout.integration_length

[QA Channel 3 - Readout Integration Delay]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Readout Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the readout integration for all Integration Weights with respect to the common delay of the Readout Pulse Generator. The resolution is 2 ns.</p><p><b>qachannels/2/readout/integration/delay</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].readout.integration_delay
get_cmd: qachannels[2].readout.integration_delay

[QA Channel 3 - Integration Weights File Path]
datatype: PATH
group: QA Channel 3
section: QA Setup
label: Integration Weights File Path
def_value: 
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[QA Channel 3 - Trigger Signal]
datatype: COMBO
group: QA Channel 3
section: QA Setup
label: Trigger Signal
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the trigger for the integration and envelope in Spectroscopy mode.</p><p><b>qachannels/2/spectroscopy/trigger/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Software Trigger 0
cmd_def_13: swtrig0
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].sweeper.trigger_source
get_cmd: qachannels[2].sweeper.trigger_source

[QA Channel 3 - Trigger Level]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Trigger Level
unit: V
def_value: 0.5
tooltip: <html><body><p>Defines the analog Trigger level.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[QA Channel 3 - Trigger Input Impedance]
datatype: COMBO
group: QA Channel 3
section: QA Setup
label: Trigger Input Impedance
def_value: OFF: 1 k Ohm
tooltip: <html><body><p>Trigger Input impedance: When on, the Trigger Input impedance is 50 Ohm; when off, 1 kOhm.</p></body></html>
combo_def_1: OFF: 1 k Ohm
cmd_def_1: 0
combo_def_2: ON: 50 Ohm
cmd_def_2: 1
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[QA Channel 3 - Spectroscopy Integration Length]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Spectroscopy Integration Length
def_value: 1024
tooltip: <html><body><p>Sets the integration length in Spectroscopy mode in number of samples. Up to 33.5 MSa (2^25 samples) can be recorded, which corresponds to 16.7 ms.</p><p><b>qachannels/2/spectroscopy/length</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].sweeper.integration_length
get_cmd: qachannels[2].sweeper.integration_length

[QA Channel 3 - Spectroscopy Integration Delay]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Spectroscopy Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets the delay of the integration in Spectroscopy mode with respect to the Trigger signal. The resolution is 2 ns.</p><p><b>qachannels/2/spectroscopy/delay</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].sweeper.integration_delay
get_cmd: qachannels[2].sweeper.integration_delay

[QA Channel 3 - Offset Frequency]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Offset Frequency
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>Controls the frequency of each digital Oscillator.</p><p><b>qachannels/2/oscs/0/freq</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].sweeper.oscillator_freq
get_cmd: qachannels[2].sweeper.oscillator_freq

[QA Channel 3 - Output Frequency]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Output Frequency
unit: Hz
def_value: 1010000000.0
tooltip: <html><body><p>Displays the carrier frequency of the microwave signal at the Out connector. This frequency corresponds to the sum of the Center Frequency and the Offset Frequency.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: READ
get_cmd: qachannels[2].sweeper.output_freq

[QA Channel 3 - Amplitude]
datatype: DOUBLE
group: QA Channel 3
section: QA Setup
label: Amplitude
def_value: 0.5
tooltip: <html><body><p>Controls the gain of each digital Oscillator. The gain is defined relative to the Output Range of the Readout Channel.</p><p><b>qachannels/2/oscs/0/gain</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].sweeper.oscillator_gain
get_cmd: qachannels[2].sweeper.oscillator_gain


#########################################
# SECTION: QA Setup
# GROUP: QA Channel 4

[QA Channel 4 - Application Mode]
datatype: COMBO
group: QA Channel 4
section: QA Setup
label: Application Mode
def_value: spectroscopy
tooltip: <html><body><p>Selects between Spectroscopy and Qubit Readout mode.</p><p><b>qachannels/3/mode</b></p></body></html>
combo_def_1: spectroscopy
cmd_def_1: 0
combo_def_2: readout
cmd_def_2: 1
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].mode
get_cmd: qachannels[3].mode

[QA Channel 4 - Digital Trigger 1]
datatype: COMBO
group: QA Channel 4
section: QA Setup
label: Digital Trigger 1
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/3/generator/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].generator.dig_trigger1_source
get_cmd: qachannels[3].generator.dig_trigger1_source

[QA Channel 4 - Digital Trigger 2]
datatype: COMBO
group: QA Channel 4
section: QA Setup
label: Digital Trigger 2
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the digital Trigger.</p><p><b>qachannels/3/generator/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Readout done
cmd_def_13: chan0rod
combo_def_14: Channel 2, Readout done
cmd_def_14: chan1rod
combo_def_15: Channel 3, Readout done
cmd_def_15: chan2rod
combo_def_16: Channel 4, Readout done
cmd_def_16: chan3rod
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].generator.dig_trigger2_source
get_cmd: qachannels[3].generator.dig_trigger2_source

[QA Channel 4 - Readout Integration Length]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Readout Integration Length
def_value: 128
tooltip: <html><body><p>Sets the length of all Integration Weights in number of samples. A maximum of 4096 samples can be integrated, which corresponds to 2.05 us.</p><p><b>qachannels/3/readout/integration/length</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].readout.integration_length
get_cmd: qachannels[3].readout.integration_length

[QA Channel 4 - Readout Integration Delay]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Readout Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the readout integration for all Integration Weights with respect to the common delay of the Readout Pulse Generator. The resolution is 2 ns.</p><p><b>qachannels/3/readout/integration/delay</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].readout.integration_delay
get_cmd: qachannels[3].readout.integration_delay

[QA Channel 4 - Integration Weights File Path]
datatype: PATH
group: QA Channel 4
section: QA Setup
label: Integration Weights File Path
def_value: 
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[QA Channel 4 - Trigger Signal]
datatype: COMBO
group: QA Channel 4
section: QA Setup
label: Trigger Signal
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the source of the trigger for the integration and envelope in Spectroscopy mode.</p><p><b>qachannels/3/spectroscopy/trigger/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Software Trigger 0
cmd_def_13: swtrig0
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].sweeper.trigger_source
get_cmd: qachannels[3].sweeper.trigger_source

[QA Channel 4 - Trigger Level]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Trigger Level
unit: V
def_value: 0.5
tooltip: <html><body><p>Defines the analog Trigger level.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[QA Channel 4 - Trigger Input Impedance]
datatype: COMBO
group: QA Channel 4
section: QA Setup
label: Trigger Input Impedance
def_value: OFF: 1 k Ohm
tooltip: <html><body><p>Trigger Input impedance: When on, the Trigger Input impedance is 50 Ohm; when off, 1 kOhm.</p></body></html>
combo_def_1: OFF: 1 k Ohm
cmd_def_1: 0
combo_def_2: ON: 50 Ohm
cmd_def_2: 1
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[QA Channel 4 - Spectroscopy Integration Length]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Spectroscopy Integration Length
def_value: 1024
tooltip: <html><body><p>Sets the integration length in Spectroscopy mode in number of samples. Up to 33.5 MSa (2^25 samples) can be recorded, which corresponds to 16.7 ms.</p><p><b>qachannels/3/spectroscopy/length</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].sweeper.integration_length
get_cmd: qachannels[3].sweeper.integration_length

[QA Channel 4 - Spectroscopy Integration Delay]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Spectroscopy Integration Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets the delay of the integration in Spectroscopy mode with respect to the Trigger signal. The resolution is 2 ns.</p><p><b>qachannels/3/spectroscopy/delay</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].sweeper.integration_delay
get_cmd: qachannels[3].sweeper.integration_delay

[QA Channel 4 - Offset Frequency]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Offset Frequency
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>Controls the frequency of each digital Oscillator.</p><p><b>qachannels/3/oscs/0/freq</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].sweeper.oscillator_freq
get_cmd: qachannels[3].sweeper.oscillator_freq

[QA Channel 4 - Output Frequency]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Output Frequency
unit: Hz
def_value: 1010000000.0
tooltip: <html><body><p>Displays the carrier frequency of the microwave signal at the Out connector. This frequency corresponds to the sum of the Center Frequency and the Offset Frequency.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: READ
get_cmd: qachannels[3].sweeper.output_freq

[QA Channel 4 - Amplitude]
datatype: DOUBLE
group: QA Channel 4
section: QA Setup
label: Amplitude
def_value: 0.5
tooltip: <html><body><p>Controls the gain of each digital Oscillator. The gain is defined relative to the Output Range of the Readout Channel.</p><p><b>qachannels/3/oscs/0/gain</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].sweeper.oscillator_gain
get_cmd: qachannels[3].sweeper.oscillator_gain


#########################################
# SECTION: QA Result
# GROUP: Readout 1

[Readout 1 - Enable Readout]
datatype: BOOLEAN
group: Readout 1
section: QA Result
label: Enable Readout
def_value: False
tooltip: <html><body><p>Enables the acquisition of readout results.</p><p><b>qachannels/0/readout/result/enable</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: nodetree.qachannels[0].readout.result.enable
get_cmd: nodetree.qachannels[0].readout.result.enable

[Readout 1 - Result Source]
datatype: COMBO
group: Readout 1
section: QA Result
label: Result Source
def_value: result_of_integration
tooltip: <html><body><p>Selects the signal source of the Result Logger.</p><p><b>qachannels/0/readout/result/source</b></p></body></html>
combo_def_1: result_of_integration
cmd_def_1: 1
combo_def_2: result_of_discrimination
cmd_def_2: 3
state_quant: Readout 1 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].readout.result_source
get_cmd: qachannels[0].readout.result_source

[Readout 1 - Length (Sample)]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Length (Sample)
def_value: 1
tooltip: <html><body><p>Number of data points to record. One data point corresponds to a single averaged result value of the selected source.</p><p><b>qachannels/0/readout/result/length</b></p></body></html>
state_quant: Readout 1 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].readout.result_length
get_cmd: qachannels[0].readout.result_length

[Readout 1 - Averages]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Averages
def_value: 1
tooltip: <html><body><p>Number of measurements that are averaged. Only powers of 2 are valid, other values are rounded down to the next power of 2. 1 means no averaging. The maximum setting is 32768.</p><p><b>qachannels/0/readout/result/averages</b></p></body></html>
state_quant: Readout 1 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].readout.num_averages
get_cmd: qachannels[0].readout.num_averages

[Readout 1 - Number of Integration Units]
datatype: COMBO
group: Readout 1
section: QA Result
label: Number of Integration Units
def_value: 1
combo_def_1: 1
cmd_def_1: 1
combo_def_2: 2
cmd_def_2: 2
combo_def_3: 3
cmd_def_3: 3
combo_def_4: 4
cmd_def_4: 4
combo_def_5: 5
cmd_def_5: 5
combo_def_6: 6
cmd_def_6: 6
combo_def_7: 7
cmd_def_7: 7
combo_def_8: 8
cmd_def_8: 8
combo_def_9: 9
cmd_def_9: 9
combo_def_10: 10
cmd_def_10: 10
combo_def_11: 11
cmd_def_11: 11
combo_def_12: 12
cmd_def_12: 12
combo_def_13: 13
cmd_def_13: 13
combo_def_14: 14
cmd_def_14: 14
combo_def_15: 15
cmd_def_15: 15
combo_def_16: 16
cmd_def_16: 16
state_quant: Readout 1 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Readout 1 - Result Average - Integration 1]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 1
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 2]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 2
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 3]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 3
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 4]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 4
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 5]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 5
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 6]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 6
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 7]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 7
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 8]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 8
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 9]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 9
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 10]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 10
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 11]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 11
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 12]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 12
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 13]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 13
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 14]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 14
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 15]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 15
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Integration 16]
datatype: COMPLEX
group: Readout 1
section: QA Result
label: Result Average - Integration 16
def_value: 0j
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 1]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 1
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 2]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 2
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 3]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 3
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 4]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 4
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 5]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 5
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 6]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 6
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 7]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 7
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 8]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 8
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 9]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 9
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 10]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 10
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 11]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 11
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 12]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 12
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 13]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 13
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 14]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 14
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 15]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 15
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Average - Discrimination 16]
datatype: DOUBLE
group: Readout 1
section: QA Result
label: Result Average - Discrimination 16
def_value: 0
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 1]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 2]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 3]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 4]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 5]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 6]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 7]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 8]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 9]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 10]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 11]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 12]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 13]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 14]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 15]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Integration 16]
datatype: VECTOR_COMPLEX
group: Readout 1
section: QA Result
label: Result Vector - Integration 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 1]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 2]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 3]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 4]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 5]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 6]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 7]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 8]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 9]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 10]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 11]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 12]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 13]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 14]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 15]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 1 - Result Vector - Discrimination 16]
datatype: VECTOR
group: Readout 1
section: QA Result
label: Result Vector - Discrimination 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 1 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 1 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: QA Result
# GROUP: Readout 2

[Readout 2 - Enable Readout]
datatype: BOOLEAN
group: Readout 2
section: QA Result
label: Enable Readout
def_value: False
tooltip: <html><body><p>Enables the acquisition of readout results.</p><p><b>qachannels/1/readout/result/enable</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: nodetree.qachannels[1].readout.result.enable
get_cmd: nodetree.qachannels[1].readout.result.enable

[Readout 2 - Result Source]
datatype: COMBO
group: Readout 2
section: QA Result
label: Result Source
def_value: result_of_integration
tooltip: <html><body><p>Selects the signal source of the Result Logger.</p><p><b>qachannels/1/readout/result/source</b></p></body></html>
combo_def_1: result_of_integration
cmd_def_1: 1
combo_def_2: result_of_discrimination
cmd_def_2: 3
state_quant: Readout 2 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].readout.result_source
get_cmd: qachannels[1].readout.result_source

[Readout 2 - Length (Sample)]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Length (Sample)
def_value: 1
tooltip: <html><body><p>Number of data points to record. One data point corresponds to a single averaged result value of the selected source.</p><p><b>qachannels/1/readout/result/length</b></p></body></html>
state_quant: Readout 2 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].readout.result_length
get_cmd: qachannels[1].readout.result_length

[Readout 2 - Averages]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Averages
def_value: 1
tooltip: <html><body><p>Number of measurements that are averaged. Only powers of 2 are valid, other values are rounded down to the next power of 2. 1 means no averaging. The maximum setting is 32768.</p><p><b>qachannels/1/readout/result/averages</b></p></body></html>
state_quant: Readout 2 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].readout.num_averages
get_cmd: qachannels[1].readout.num_averages

[Readout 2 - Number of Integration Units]
datatype: COMBO
group: Readout 2
section: QA Result
label: Number of Integration Units
def_value: 1
combo_def_1: 1
cmd_def_1: 1
combo_def_2: 2
cmd_def_2: 2
combo_def_3: 3
cmd_def_3: 3
combo_def_4: 4
cmd_def_4: 4
combo_def_5: 5
cmd_def_5: 5
combo_def_6: 6
cmd_def_6: 6
combo_def_7: 7
cmd_def_7: 7
combo_def_8: 8
cmd_def_8: 8
combo_def_9: 9
cmd_def_9: 9
combo_def_10: 10
cmd_def_10: 10
combo_def_11: 11
cmd_def_11: 11
combo_def_12: 12
cmd_def_12: 12
combo_def_13: 13
cmd_def_13: 13
combo_def_14: 14
cmd_def_14: 14
combo_def_15: 15
cmd_def_15: 15
combo_def_16: 16
cmd_def_16: 16
state_quant: Readout 2 - Enable Readout
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Readout 2 - Result Average - Integration 1]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 1
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 2]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 2
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 3]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 3
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 4]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 4
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 5]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 5
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 6]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 6
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 7]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 7
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 8]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 8
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 9]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 9
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 10]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 10
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 11]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 11
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 12]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 12
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 13]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 13
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 14]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 14
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 15]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 15
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Integration 16]
datatype: COMPLEX
group: Readout 2
section: QA Result
label: Result Average - Integration 16
def_value: 0j
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 1]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 1
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 2]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 2
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 3]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 3
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 4]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 4
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 5]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 5
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 6]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 6
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 7]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 7
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 8]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 8
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 9]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 9
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 10]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 10
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 11]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 11
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 12]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 12
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 13]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 13
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 14]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 14
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 15]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 15
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Average - Discrimination 16]
datatype: DOUBLE
group: Readout 2
section: QA Result
label: Result Average - Discrimination 16
def_value: 0
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 1]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 2]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 3]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 4]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 5]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 6]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 7]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 8]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 9]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 10]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 11]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 12]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 13]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 14]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 15]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Integration 16]
datatype: VECTOR_COMPLEX
group: Readout 2
section: QA Result
label: Result Vector - Integration 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 1]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 2]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 3]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 4]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 5]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 6]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 7]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 8]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 9]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 10]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 11]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 12]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 13]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 14]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 15]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 2 - Result Vector - Discrimination 16]
datatype: VECTOR
group: Readout 2
section: QA Result
label: Result Vector - Discrimination 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 2 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 2 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: QA Result
# GROUP: Readout 3

[Readout 3 - Enable Readout]
datatype: BOOLEAN
group: Readout 3
section: QA Result
label: Enable Readout
def_value: False
tooltip: <html><body><p>Enables the acquisition of readout results.</p><p><b>qachannels/2/readout/result/enable</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: nodetree.qachannels[2].readout.result.enable
get_cmd: nodetree.qachannels[2].readout.result.enable

[Readout 3 - Result Source]
datatype: COMBO
group: Readout 3
section: QA Result
label: Result Source
def_value: result_of_integration
tooltip: <html><body><p>Selects the signal source of the Result Logger.</p><p><b>qachannels/2/readout/result/source</b></p></body></html>
combo_def_1: result_of_integration
cmd_def_1: 1
combo_def_2: result_of_discrimination
cmd_def_2: 3
state_quant: Readout 3 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].readout.result_source
get_cmd: qachannels[2].readout.result_source

[Readout 3 - Length (Sample)]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Length (Sample)
def_value: 1
tooltip: <html><body><p>Number of data points to record. One data point corresponds to a single averaged result value of the selected source.</p><p><b>qachannels/2/readout/result/length</b></p></body></html>
state_quant: Readout 3 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].readout.result_length
get_cmd: qachannels[2].readout.result_length

[Readout 3 - Averages]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Averages
def_value: 1
tooltip: <html><body><p>Number of measurements that are averaged. Only powers of 2 are valid, other values are rounded down to the next power of 2. 1 means no averaging. The maximum setting is 32768.</p><p><b>qachannels/2/readout/result/averages</b></p></body></html>
state_quant: Readout 3 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].readout.num_averages
get_cmd: qachannels[2].readout.num_averages

[Readout 3 - Number of Integration Units]
datatype: COMBO
group: Readout 3
section: QA Result
label: Number of Integration Units
def_value: 1
combo_def_1: 1
cmd_def_1: 1
combo_def_2: 2
cmd_def_2: 2
combo_def_3: 3
cmd_def_3: 3
combo_def_4: 4
cmd_def_4: 4
combo_def_5: 5
cmd_def_5: 5
combo_def_6: 6
cmd_def_6: 6
combo_def_7: 7
cmd_def_7: 7
combo_def_8: 8
cmd_def_8: 8
combo_def_9: 9
cmd_def_9: 9
combo_def_10: 10
cmd_def_10: 10
combo_def_11: 11
cmd_def_11: 11
combo_def_12: 12
cmd_def_12: 12
combo_def_13: 13
cmd_def_13: 13
combo_def_14: 14
cmd_def_14: 14
combo_def_15: 15
cmd_def_15: 15
combo_def_16: 16
cmd_def_16: 16
state_quant: Readout 3 - Enable Readout
state_value_1: True
model_value_1: SHFQA4

[Readout 3 - Result Average - Integration 1]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 1
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 2]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 2
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 3]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 3
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 4]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 4
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 5]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 5
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 6]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 6
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 7]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 7
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 8]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 8
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 9]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 9
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 10]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 10
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 11]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 11
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 12]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 12
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 13]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 13
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 14]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 14
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 15]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 15
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Integration 16]
datatype: COMPLEX
group: Readout 3
section: QA Result
label: Result Average - Integration 16
def_value: 0j
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 1]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 1
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 2]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 2
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 3]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 3
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 4]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 4
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 5]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 5
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 6]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 6
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 7]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 7
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 8]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 8
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 9]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 9
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 10]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 10
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 11]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 11
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 12]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 12
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 13]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 13
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 14]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 14
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 15]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 15
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Average - Discrimination 16]
datatype: DOUBLE
group: Readout 3
section: QA Result
label: Result Average - Discrimination 16
def_value: 0
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 1]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 2]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 3]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 4]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 5]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 6]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 7]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 8]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 9]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 10]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 11]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 12]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 13]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 14]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 15]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Integration 16]
datatype: VECTOR_COMPLEX
group: Readout 3
section: QA Result
label: Result Vector - Integration 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 1]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 2]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 3]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 4]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 5]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 6]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 7]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 8]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 9]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 10]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 11]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 12]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 13]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 14]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 15]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 3 - Result Vector - Discrimination 16]
datatype: VECTOR
group: Readout 3
section: QA Result
label: Result Vector - Discrimination 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 3 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 3 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: QA Result
# GROUP: Readout 4

[Readout 4 - Enable Readout]
datatype: BOOLEAN
group: Readout 4
section: QA Result
label: Enable Readout
def_value: False
tooltip: <html><body><p>Enables the acquisition of readout results.</p><p><b>qachannels/3/readout/result/enable</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: nodetree.qachannels[3].readout.result.enable
get_cmd: nodetree.qachannels[3].readout.result.enable

[Readout 4 - Result Source]
datatype: COMBO
group: Readout 4
section: QA Result
label: Result Source
def_value: result_of_integration
tooltip: <html><body><p>Selects the signal source of the Result Logger.</p><p><b>qachannels/3/readout/result/source</b></p></body></html>
combo_def_1: result_of_integration
cmd_def_1: 1
combo_def_2: result_of_discrimination
cmd_def_2: 3
state_quant: Readout 4 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].readout.result_source
get_cmd: qachannels[3].readout.result_source

[Readout 4 - Length (Sample)]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Length (Sample)
def_value: 1
tooltip: <html><body><p>Number of data points to record. One data point corresponds to a single averaged result value of the selected source.</p><p><b>qachannels/3/readout/result/length</b></p></body></html>
state_quant: Readout 4 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].readout.result_length
get_cmd: qachannels[3].readout.result_length

[Readout 4 - Averages]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Averages
def_value: 1
tooltip: <html><body><p>Number of measurements that are averaged. Only powers of 2 are valid, other values are rounded down to the next power of 2. 1 means no averaging. The maximum setting is 32768.</p><p><b>qachannels/3/readout/result/averages</b></p></body></html>
state_quant: Readout 4 - Enable Readout
state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].readout.num_averages
get_cmd: qachannels[3].readout.num_averages

[Readout 4 - Number of Integration Units]
datatype: COMBO
group: Readout 4
section: QA Result
label: Number of Integration Units
def_value: 1
combo_def_1: 1
cmd_def_1: 1
combo_def_2: 2
cmd_def_2: 2
combo_def_3: 3
cmd_def_3: 3
combo_def_4: 4
cmd_def_4: 4
combo_def_5: 5
cmd_def_5: 5
combo_def_6: 6
cmd_def_6: 6
combo_def_7: 7
cmd_def_7: 7
combo_def_8: 8
cmd_def_8: 8
combo_def_9: 9
cmd_def_9: 9
combo_def_10: 10
cmd_def_10: 10
combo_def_11: 11
cmd_def_11: 11
combo_def_12: 12
cmd_def_12: 12
combo_def_13: 13
cmd_def_13: 13
combo_def_14: 14
cmd_def_14: 14
combo_def_15: 15
cmd_def_15: 15
combo_def_16: 16
cmd_def_16: 16
state_quant: Readout 4 - Enable Readout
state_value_1: True
model_value_1: SHFQA4

[Readout 4 - Result Average - Integration 1]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 1
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 2]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 2
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 3]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 3
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 4]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 4
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 5]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 5
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 6]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 6
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 7]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 7
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 8]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 8
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 9]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 9
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 10]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 10
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 11]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 11
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 12]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 12
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 13]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 13
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 14]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 14
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 15]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 15
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Integration 16]
datatype: COMPLEX
group: Readout 4
section: QA Result
label: Result Average - Integration 16
def_value: 0j
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 1]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 1
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 2]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 2
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 3]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 3
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 4]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 4
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 5]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 5
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 6]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 6
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 7]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 7
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 8]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 8
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 9]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 9
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 10]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 10
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 11]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 11
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 12]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 12
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 13]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 13
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 14]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 14
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 15]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 15
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Average - Discrimination 16]
datatype: DOUBLE
group: Readout 4
section: QA Result
label: Result Average - Discrimination 16
def_value: 0
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 1]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 2]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 3]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 4]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 5]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 6]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 7]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 8]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 9]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 10]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 11]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 12]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 13]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 14]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 15]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Integration 16]
datatype: VECTOR_COMPLEX
group: Readout 4
section: QA Result
label: Result Vector - Integration 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_integration
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 1]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 1
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 1
second_state_value_2: 2
second_state_value_3: 3
second_state_value_4: 4
second_state_value_5: 5
second_state_value_6: 6
second_state_value_7: 7
second_state_value_8: 8
second_state_value_9: 9
second_state_value_10: 10
second_state_value_11: 11
second_state_value_12: 12
second_state_value_13: 13
second_state_value_14: 14
second_state_value_15: 15
second_state_value_16: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 2]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 2
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 2
second_state_value_2: 3
second_state_value_3: 4
second_state_value_4: 5
second_state_value_5: 6
second_state_value_6: 7
second_state_value_7: 8
second_state_value_8: 9
second_state_value_9: 10
second_state_value_10: 11
second_state_value_11: 12
second_state_value_12: 13
second_state_value_13: 14
second_state_value_14: 15
second_state_value_15: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 3]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 3
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 3
second_state_value_2: 4
second_state_value_3: 5
second_state_value_4: 6
second_state_value_5: 7
second_state_value_6: 8
second_state_value_7: 9
second_state_value_8: 10
second_state_value_9: 11
second_state_value_10: 12
second_state_value_11: 13
second_state_value_12: 14
second_state_value_13: 15
second_state_value_14: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 4]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 4
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 4
second_state_value_2: 5
second_state_value_3: 6
second_state_value_4: 7
second_state_value_5: 8
second_state_value_6: 9
second_state_value_7: 10
second_state_value_8: 11
second_state_value_9: 12
second_state_value_10: 13
second_state_value_11: 14
second_state_value_12: 15
second_state_value_13: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 5]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 5
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 5
second_state_value_2: 6
second_state_value_3: 7
second_state_value_4: 8
second_state_value_5: 9
second_state_value_6: 10
second_state_value_7: 11
second_state_value_8: 12
second_state_value_9: 13
second_state_value_10: 14
second_state_value_11: 15
second_state_value_12: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 6]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 6
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 6
second_state_value_2: 7
second_state_value_3: 8
second_state_value_4: 9
second_state_value_5: 10
second_state_value_6: 11
second_state_value_7: 12
second_state_value_8: 13
second_state_value_9: 14
second_state_value_10: 15
second_state_value_11: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 7]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 7
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 7
second_state_value_2: 8
second_state_value_3: 9
second_state_value_4: 10
second_state_value_5: 11
second_state_value_6: 12
second_state_value_7: 13
second_state_value_8: 14
second_state_value_9: 15
second_state_value_10: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 8]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 8
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 8
second_state_value_2: 9
second_state_value_3: 10
second_state_value_4: 11
second_state_value_5: 12
second_state_value_6: 13
second_state_value_7: 14
second_state_value_8: 15
second_state_value_9: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 9]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 9
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 9
second_state_value_2: 10
second_state_value_3: 11
second_state_value_4: 12
second_state_value_5: 13
second_state_value_6: 14
second_state_value_7: 15
second_state_value_8: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 10]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 10
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 10
second_state_value_2: 11
second_state_value_3: 12
second_state_value_4: 13
second_state_value_5: 14
second_state_value_6: 15
second_state_value_7: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 11]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 11
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 11
second_state_value_2: 12
second_state_value_3: 13
second_state_value_4: 14
second_state_value_5: 15
second_state_value_6: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 12]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 12
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 12
second_state_value_2: 13
second_state_value_3: 14
second_state_value_4: 15
second_state_value_5: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 13]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 13
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 13
second_state_value_2: 14
second_state_value_3: 15
second_state_value_4: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 14]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 14
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 14
second_state_value_2: 15
second_state_value_3: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 15]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 15
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 15
second_state_value_2: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Readout 4 - Result Vector - Discrimination 16]
datatype: VECTOR
group: Readout 4
section: QA Result
label: Result Vector - Discrimination 16
def_value: []
x_name: Length
x_unit: Sample
state_quant: Readout 4 - Result Source
state_value_1: result_of_discrimination
second_state_quant: Readout 4 - Number of Integration Units
second_state_value_1: 16
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: Generator
# GROUP: Sequencer 1

[Sequencer 1 - Playback Delay]
datatype: DOUBLE
group: Sequencer 1
section: Generator
label: Playback Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the playback for all Waveform Memories. The resolution is 2 ns.</p><p><b>qachannels/0/generator/delay</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].generator.playback_delay
get_cmd: qachannels[0].generator.playback_delay

[Sequencer 1 - Single]
datatype: BOOLEAN
group: Sequencer 1
section: Generator
label: Single
def_value: True
tooltip: <html><body><p>Puts the Sequencer into single-shot mode.</p><p><b>qachannels/0/generator/single</b></p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[0].generator.single
get_cmd: qachannels[0].generator.single

[Sequencer 1 - Sequence Type]
datatype: COMBO
group: Sequencer 1
section: Generator
label: Sequence Type
def_value: None
combo_def_1: None
combo_def_2: Custom
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Program Path]
datatype: PATH
group: Sequencer 1
section: Generator
label: Program Path
def_value: 
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 1 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Custom Parameters]
datatype: STRING
group: Sequencer 1
section: Generator
label: Custom Parameters
def_value: 
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 1 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Waveform Source]
datatype: COMBO
group: Sequencer 1
section: Generator
label: Waveform Source
def_value: Vector Data
combo_def_1: File Path
combo_def_2: Vector Data
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 1 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Waveform Path]
datatype: PATH
group: Sequencer 1
section: Generator
label: Waveform Path
def_value: 
state_quant: Sequencer 1 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 1 - Waveform Source
second_state_value_1: File Path
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Waveform Vector]
datatype: VECTOR_COMPLEX
group: Sequencer 1
section: Generator
label: Waveform Vector
def_value: []
state_quant: Sequencer 1 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 1 - Waveform Source
second_state_value_1: Vector Data
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: WRITE
show_in_measurement_dlg: True

[Sequencer 1 - Trigger Mode]
datatype: COMBO
group: Sequencer 1
section: Generator
label: Trigger Mode
def_value: None
combo_def_1: None
combo_def_2: Receive Trigger
combo_def_3: ZSync Trigger
state_quant: QA Channel 1 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 1 - Run/Stop]
datatype: BUTTON
group: Sequencer 1
section: Generator
label: Run/Stop
tooltip: <html><body><p>Runs/stops the Generator</p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4


#########################################
# SECTION: Generator
# GROUP: Sequencer 2

[Sequencer 2 - Playback Delay]
datatype: DOUBLE
group: Sequencer 2
section: Generator
label: Playback Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the playback for all Waveform Memories. The resolution is 2 ns.</p><p><b>qachannels/1/generator/delay</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].generator.playback_delay
get_cmd: qachannels[1].generator.playback_delay

[Sequencer 2 - Single]
datatype: BOOLEAN
group: Sequencer 2
section: Generator
label: Single
def_value: True
tooltip: <html><body><p>Puts the Sequencer into single-shot mode.</p><p><b>qachannels/1/generator/single</b></p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: qachannels[1].generator.single
get_cmd: qachannels[1].generator.single

[Sequencer 2 - Sequence Type]
datatype: COMBO
group: Sequencer 2
section: Generator
label: Sequence Type
def_value: None
combo_def_1: None
combo_def_2: Custom
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Program Path]
datatype: PATH
group: Sequencer 2
section: Generator
label: Program Path
def_value: 
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 2 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Custom Parameters]
datatype: STRING
group: Sequencer 2
section: Generator
label: Custom Parameters
def_value: 
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 2 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Waveform Source]
datatype: COMBO
group: Sequencer 2
section: Generator
label: Waveform Source
def_value: Vector Data
combo_def_1: File Path
combo_def_2: Vector Data
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 2 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Waveform Path]
datatype: PATH
group: Sequencer 2
section: Generator
label: Waveform Path
def_value: 
state_quant: Sequencer 2 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 2 - Waveform Source
second_state_value_1: File Path
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Waveform Vector]
datatype: VECTOR_COMPLEX
group: Sequencer 2
section: Generator
label: Waveform Vector
def_value: []
state_quant: Sequencer 2 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 2 - Waveform Source
second_state_value_1: Vector Data
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: WRITE
show_in_measurement_dlg: True

[Sequencer 2 - Trigger Mode]
datatype: COMBO
group: Sequencer 2
section: Generator
label: Trigger Mode
def_value: None
combo_def_1: None
combo_def_2: Receive Trigger
combo_def_3: ZSync Trigger
state_quant: QA Channel 2 - Application Mode
state_value_1: readout
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sequencer 2 - Run/Stop]
datatype: BUTTON
group: Sequencer 2
section: Generator
label: Run/Stop
tooltip: <html><body><p>Runs/stops the Generator</p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4


#########################################
# SECTION: Generator
# GROUP: Sequencer 3

[Sequencer 3 - Playback Delay]
datatype: DOUBLE
group: Sequencer 3
section: Generator
label: Playback Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the playback for all Waveform Memories. The resolution is 2 ns.</p><p><b>qachannels/2/generator/delay</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].generator.playback_delay
get_cmd: qachannels[2].generator.playback_delay

[Sequencer 3 - Single]
datatype: BOOLEAN
group: Sequencer 3
section: Generator
label: Single
def_value: True
tooltip: <html><body><p>Puts the Sequencer into single-shot mode.</p><p><b>qachannels/2/generator/single</b></p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[2].generator.single
get_cmd: qachannels[2].generator.single

[Sequencer 3 - Sequence Type]
datatype: COMBO
group: Sequencer 3
section: Generator
label: Sequence Type
def_value: None
combo_def_1: None
combo_def_2: Custom
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[Sequencer 3 - Program Path]
datatype: PATH
group: Sequencer 3
section: Generator
label: Program Path
def_value: 
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 3 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 3 - Custom Parameters]
datatype: STRING
group: Sequencer 3
section: Generator
label: Custom Parameters
def_value: 
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 3 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 3 - Waveform Source]
datatype: COMBO
group: Sequencer 3
section: Generator
label: Waveform Source
def_value: Vector Data
combo_def_1: File Path
combo_def_2: Vector Data
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 3 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 3 - Waveform Path]
datatype: PATH
group: Sequencer 3
section: Generator
label: Waveform Path
def_value: 
state_quant: Sequencer 3 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 3 - Waveform Source
second_state_value_1: File Path
model_value_1: SHFQA4

[Sequencer 3 - Waveform Vector]
datatype: VECTOR_COMPLEX
group: Sequencer 3
section: Generator
label: Waveform Vector
def_value: []
state_quant: Sequencer 3 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 3 - Waveform Source
second_state_value_1: Vector Data
model_value_1: SHFQA4
permission: WRITE
show_in_measurement_dlg: True

[Sequencer 3 - Trigger Mode]
datatype: COMBO
group: Sequencer 3
section: Generator
label: Trigger Mode
def_value: None
combo_def_1: None
combo_def_2: Receive Trigger
combo_def_3: ZSync Trigger
state_quant: QA Channel 3 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[Sequencer 3 - Run/Stop]
datatype: BUTTON
group: Sequencer 3
section: Generator
label: Run/Stop
tooltip: <html><body><p>Runs/stops the Generator</p></body></html>
model_value_1: SHFQA4


#########################################
# SECTION: Generator
# GROUP: Sequencer 4

[Sequencer 4 - Playback Delay]
datatype: DOUBLE
group: Sequencer 4
section: Generator
label: Playback Delay
unit: s
def_value: 0
tooltip: <html><body><p>Sets a common delay for the start of the playback for all Waveform Memories. The resolution is 2 ns.</p><p><b>qachannels/3/generator/delay</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].generator.playback_delay
get_cmd: qachannels[3].generator.playback_delay

[Sequencer 4 - Single]
datatype: BOOLEAN
group: Sequencer 4
section: Generator
label: Single
def_value: True
tooltip: <html><body><p>Puts the Sequencer into single-shot mode.</p><p><b>qachannels/3/generator/single</b></p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4
permission: BOTH
set_cmd: qachannels[3].generator.single
get_cmd: qachannels[3].generator.single

[Sequencer 4 - Sequence Type]
datatype: COMBO
group: Sequencer 4
section: Generator
label: Sequence Type
def_value: None
combo_def_1: None
combo_def_2: Custom
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[Sequencer 4 - Program Path]
datatype: PATH
group: Sequencer 4
section: Generator
label: Program Path
def_value: 
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 4 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 4 - Custom Parameters]
datatype: STRING
group: Sequencer 4
section: Generator
label: Custom Parameters
def_value: 
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 4 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 4 - Waveform Source]
datatype: COMBO
group: Sequencer 4
section: Generator
label: Waveform Source
def_value: Vector Data
combo_def_1: File Path
combo_def_2: Vector Data
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
second_state_quant: Sequencer 4 - Sequence Type
second_state_value_1: Custom
model_value_1: SHFQA4

[Sequencer 4 - Waveform Path]
datatype: PATH
group: Sequencer 4
section: Generator
label: Waveform Path
def_value: 
state_quant: Sequencer 4 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 4 - Waveform Source
second_state_value_1: File Path
model_value_1: SHFQA4

[Sequencer 4 - Waveform Vector]
datatype: VECTOR_COMPLEX
group: Sequencer 4
section: Generator
label: Waveform Vector
def_value: []
state_quant: Sequencer 4 - Sequence Type
state_value_1: Custom
second_state_quant: Sequencer 4 - Waveform Source
second_state_value_1: Vector Data
model_value_1: SHFQA4
permission: WRITE
show_in_measurement_dlg: True

[Sequencer 4 - Trigger Mode]
datatype: COMBO
group: Sequencer 4
section: Generator
label: Trigger Mode
def_value: None
combo_def_1: None
combo_def_2: Receive Trigger
combo_def_3: ZSync Trigger
state_quant: QA Channel 4 - Application Mode
state_value_1: readout
model_value_1: SHFQA4

[Sequencer 4 - Run/Stop]
datatype: BUTTON
group: Sequencer 4
section: Generator
label: Run/Stop
tooltip: <html><body><p>Runs/stops the Generator</p></body></html>
model_value_1: SHFQA4


#########################################
# SECTION: Sweeper
# GROUP: Sweeper 1

[Sweeper 1 - Enable Sweeper]
datatype: BOOLEAN
group: Sweeper 1
section: Sweeper
label: Enable Sweeper
def_value: False
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Start Frequency]
datatype: DOUBLE
group: Sweeper 1
section: Sweeper
label: Start Frequency
def_value: -300000000.0
tooltip: <html><body><p>Set or get the start frequency for the sweeper.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Stop Frequency]
datatype: DOUBLE
group: Sweeper 1
section: Sweeper
label: Stop Frequency
def_value: 300000000.0
tooltip: <html><body><p>Set or get the stop frequency for the sweeper.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Number of Points]
datatype: DOUBLE
group: Sweeper 1
section: Sweeper
label: Number of Points
def_value: 100
tooltip: <html><body><p>Set or get the number of points for the sweeper.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Mapping]
datatype: COMBO
group: Sweeper 1
section: Sweeper
label: Mapping
def_value: linear
tooltip: <html><body><p>Set or get the mapping configuration for the sweeper.</p></body></html>
combo_def_1: linear
combo_def_2: log
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Number of Averages]
datatype: DOUBLE
group: Sweeper 1
section: Sweeper
label: Number of Averages
def_value: 1
tooltip: <html><body><p>'Set or get the number of averages for the sweeper.</p></body></html>
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Averaging Mode]
datatype: COMBO
group: Sweeper 1
section: Sweeper
label: Averaging Mode
def_value: cyclic
tooltip: <html><body><p>Set or get the averaging mode for the sweeper.</p></body></html>
combo_def_1: sequential
combo_def_2: cyclic
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 1 - Result Vector]
datatype: VECTOR_COMPLEX
group: Sweeper 1
section: Sweeper
label: Result Vector
unit: Voltage
def_value: []
x_name: Frequency
x_unit: Hz
state_quant: QA Channel 1 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 1 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Sweeper 1 - Run]
datatype: BUTTON
group: Sweeper 1
section: Sweeper
label: Run
tooltip: <html><body><p>Run the Sweeper</p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4


#########################################
# SECTION: Sweeper
# GROUP: Sweeper 2

[Sweeper 2 - Enable Sweeper]
datatype: BOOLEAN
group: Sweeper 2
section: Sweeper
label: Enable Sweeper
def_value: False
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Start Frequency]
datatype: DOUBLE
group: Sweeper 2
section: Sweeper
label: Start Frequency
def_value: -300000000.0
tooltip: <html><body><p>Set or get the start frequency for the sweeper.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Stop Frequency]
datatype: DOUBLE
group: Sweeper 2
section: Sweeper
label: Stop Frequency
def_value: 300000000.0
tooltip: <html><body><p>Set or get the stop frequency for the sweeper.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Number of Points]
datatype: DOUBLE
group: Sweeper 2
section: Sweeper
label: Number of Points
def_value: 100
tooltip: <html><body><p>Set or get the number of points for the sweeper.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Mapping]
datatype: COMBO
group: Sweeper 2
section: Sweeper
label: Mapping
def_value: linear
tooltip: <html><body><p>Set or get the mapping configuration for the sweeper.</p></body></html>
combo_def_1: linear
combo_def_2: log
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Number of Averages]
datatype: DOUBLE
group: Sweeper 2
section: Sweeper
label: Number of Averages
def_value: 1
tooltip: <html><body><p>'Set or get the number of averages for the sweeper.</p></body></html>
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Averaging Mode]
datatype: COMBO
group: Sweeper 2
section: Sweeper
label: Averaging Mode
def_value: cyclic
tooltip: <html><body><p>Set or get the averaging mode for the sweeper.</p></body></html>
combo_def_1: sequential
combo_def_2: cyclic
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Sweeper 2 - Result Vector]
datatype: VECTOR_COMPLEX
group: Sweeper 2
section: Sweeper
label: Result Vector
unit: Voltage
def_value: []
x_name: Frequency
x_unit: Hz
state_quant: QA Channel 2 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 2 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Sweeper 2 - Run]
datatype: BUTTON
group: Sweeper 2
section: Sweeper
label: Run
tooltip: <html><body><p>Run the Sweeper</p></body></html>
model_value_1: SHFQA2
model_value_2: SHFQA4


#########################################
# SECTION: Sweeper
# GROUP: Sweeper 3

[Sweeper 3 - Enable Sweeper]
datatype: BOOLEAN
group: Sweeper 3
section: Sweeper
label: Enable Sweeper
def_value: False
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[Sweeper 3 - Start Frequency]
datatype: DOUBLE
group: Sweeper 3
section: Sweeper
label: Start Frequency
def_value: -300000000.0
tooltip: <html><body><p>Set or get the start frequency for the sweeper.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Stop Frequency]
datatype: DOUBLE
group: Sweeper 3
section: Sweeper
label: Stop Frequency
def_value: 300000000.0
tooltip: <html><body><p>Set or get the stop frequency for the sweeper.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Number of Points]
datatype: DOUBLE
group: Sweeper 3
section: Sweeper
label: Number of Points
def_value: 100
tooltip: <html><body><p>Set or get the number of points for the sweeper.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Mapping]
datatype: COMBO
group: Sweeper 3
section: Sweeper
label: Mapping
def_value: linear
tooltip: <html><body><p>Set or get the mapping configuration for the sweeper.</p></body></html>
combo_def_1: linear
combo_def_2: log
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Number of Averages]
datatype: DOUBLE
group: Sweeper 3
section: Sweeper
label: Number of Averages
def_value: 1
tooltip: <html><body><p>'Set or get the number of averages for the sweeper.</p></body></html>
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Averaging Mode]
datatype: COMBO
group: Sweeper 3
section: Sweeper
label: Averaging Mode
def_value: cyclic
tooltip: <html><body><p>Set or get the averaging mode for the sweeper.</p></body></html>
combo_def_1: sequential
combo_def_2: cyclic
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 3 - Result Vector]
datatype: VECTOR_COMPLEX
group: Sweeper 3
section: Sweeper
label: Result Vector
unit: Voltage
def_value: []
x_name: Frequency
x_unit: Hz
state_quant: QA Channel 3 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 3 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Sweeper 3 - Run]
datatype: BUTTON
group: Sweeper 3
section: Sweeper
label: Run
tooltip: <html><body><p>Run the Sweeper</p></body></html>
model_value_1: SHFQA4


#########################################
# SECTION: Sweeper
# GROUP: Sweeper 4

[Sweeper 4 - Enable Sweeper]
datatype: BOOLEAN
group: Sweeper 4
section: Sweeper
label: Enable Sweeper
def_value: False
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
model_value_1: SHFQA4

[Sweeper 4 - Start Frequency]
datatype: DOUBLE
group: Sweeper 4
section: Sweeper
label: Start Frequency
def_value: -300000000.0
tooltip: <html><body><p>Set or get the start frequency for the sweeper.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Stop Frequency]
datatype: DOUBLE
group: Sweeper 4
section: Sweeper
label: Stop Frequency
def_value: 300000000.0
tooltip: <html><body><p>Set or get the stop frequency for the sweeper.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Number of Points]
datatype: DOUBLE
group: Sweeper 4
section: Sweeper
label: Number of Points
def_value: 100
tooltip: <html><body><p>Set or get the number of points for the sweeper.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Mapping]
datatype: COMBO
group: Sweeper 4
section: Sweeper
label: Mapping
def_value: linear
tooltip: <html><body><p>Set or get the mapping configuration for the sweeper.</p></body></html>
combo_def_1: linear
combo_def_2: log
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Number of Averages]
datatype: DOUBLE
group: Sweeper 4
section: Sweeper
label: Number of Averages
def_value: 1
tooltip: <html><body><p>'Set or get the number of averages for the sweeper.</p></body></html>
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Averaging Mode]
datatype: COMBO
group: Sweeper 4
section: Sweeper
label: Averaging Mode
def_value: cyclic
tooltip: <html><body><p>Set or get the averaging mode for the sweeper.</p></body></html>
combo_def_1: sequential
combo_def_2: cyclic
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4

[Sweeper 4 - Result Vector]
datatype: VECTOR_COMPLEX
group: Sweeper 4
section: Sweeper
label: Result Vector
unit: Voltage
def_value: []
x_name: Frequency
x_unit: Hz
state_quant: QA Channel 4 - Application Mode
state_value_1: spectroscopy
second_state_quant: Sweeper 4 - Enable Sweeper
second_state_value_1: True
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True

[Sweeper 4 - Run]
datatype: BUTTON
group: Sweeper 4
section: Sweeper
label: Run
tooltip: <html><body><p>Run the Sweeper</p></body></html>
model_value_1: SHFQA4


#########################################
# SECTION: Scope
# GROUP: Recording

[Recording - Enable Scope]
datatype: BOOLEAN
group: Recording
section: Scope
label: Enable Scope
def_value: False
tooltip: <html><body><p>Enables the acquisition of Scope shots. Goes back to 0 (disabled) after the scope shot has been acquired.</p><p><b>scopes/0/enable</b></p></body></html>
permission: BOTH
set_cmd: nodetree.scope.enable
get_cmd: nodetree.scope.enable

[Recording - Length]
datatype: DOUBLE
group: Recording
section: Scope
label: Length
def_value: 32
tooltip: <html><body><p>Defines the length of the recorded Scope shot in number of samples.</p><p><b>scopes/0/length</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: scope.length
get_cmd: scope.length

[Recording - Sampling Rate]
datatype: COMBO
group: Recording
section: Scope
label: Sampling Rate
def_value: 2 GHz
tooltip: <html><body><p>Defines the time base of the Scope.</p><p><b>scopes/0/time</b></p></body></html>
combo_def_1: 2 GHz
cmd_def_1: 0
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: scope.time
get_cmd: scope.time


#########################################
# SECTION: Scope
# GROUP: Scope Channel 1

[Scope Channel 1 - Enable]
datatype: BOOLEAN
group: Scope Channel 1
section: Scope
label: Enable
def_value: False
state_quant: Recording - Enable Scope
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Scope Channel 1 - Signal Source]
datatype: COMBO
group: Scope Channel 1
section: Scope
label: Signal Source
def_value: Signal Input Channel 1
tooltip: <html><body><p>Selects the scope input signal.</p><p><b>scopes/0/channels/0/inputselect</b></p></body></html>
combo_def_1: Signal Input Channel 1
cmd_def_1: chan0sigin
combo_def_2: Signal Input Channel 2
cmd_def_2: chan1sigin
combo_def_3: Signal Input Channel 3
cmd_def_3: chan2sigin
combo_def_4: Signal Input Channel 4
cmd_def_4: chan3sigin
combo_def_5: Auxiliary Input Channel 1
cmd_def_5: chan0auxin
combo_def_6: Auxiliary Input Channel 2
cmd_def_6: chan1auxin
combo_def_7: Auxiliary Input Channel 3
cmd_def_7: chan2auxin
combo_def_8: Auxiliary Input Channel 4
cmd_def_8: chan3auxin
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 1 - Enable
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: scope.input_select1
get_cmd: scope.input_select1

[Scope Channel 1 - Result Vector]
datatype: VECTOR_COMPLEX
group: Scope Channel 1
section: Scope
label: Result Vector
unit: Voltage
def_value: []
x_name: Time
x_unit: s
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 1 - Enable
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: Scope
# GROUP: Scope Channel 2

[Scope Channel 2 - Enable]
datatype: BOOLEAN
group: Scope Channel 2
section: Scope
label: Enable
def_value: False
state_quant: Recording - Enable Scope
state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4

[Scope Channel 2 - Signal Source]
datatype: COMBO
group: Scope Channel 2
section: Scope
label: Signal Source
def_value: Signal Input Channel 2
tooltip: <html><body><p>Selects the scope input signal.</p><p><b>scopes/0/channels/1/inputselect</b></p></body></html>
combo_def_1: Signal Input Channel 1
cmd_def_1: chan0sigin
combo_def_2: Signal Input Channel 2
cmd_def_2: chan1sigin
combo_def_3: Signal Input Channel 3
cmd_def_3: chan2sigin
combo_def_4: Signal Input Channel 4
cmd_def_4: chan3sigin
combo_def_5: Auxiliary Input Channel 1
cmd_def_5: chan0auxin
combo_def_6: Auxiliary Input Channel 2
cmd_def_6: chan1auxin
combo_def_7: Auxiliary Input Channel 3
cmd_def_7: chan2auxin
combo_def_8: Auxiliary Input Channel 4
cmd_def_8: chan3auxin
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 2 - Enable
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: BOTH
set_cmd: scope.input_select2
get_cmd: scope.input_select2

[Scope Channel 2 - Result Vector]
datatype: VECTOR_COMPLEX
group: Scope Channel 2
section: Scope
label: Result Vector
unit: Voltage
def_value: []
x_name: Time
x_unit: s
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 2 - Enable
second_state_value_1: True
model_value_1: SHFQA2
model_value_2: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: Scope
# GROUP: Scope Channel 3

[Scope Channel 3 - Enable]
datatype: BOOLEAN
group: Scope Channel 3
section: Scope
label: Enable
def_value: False
state_quant: Recording - Enable Scope
state_value_1: True
model_value_1: SHFQA4

[Scope Channel 3 - Signal Source]
datatype: COMBO
group: Scope Channel 3
section: Scope
label: Signal Source
def_value: Signal Input Channel 3
tooltip: <html><body><p>Selects the scope input signal.</p><p><b>scopes/0/channels/2/inputselect</b></p></body></html>
combo_def_1: Signal Input Channel 1
cmd_def_1: chan0sigin
combo_def_2: Signal Input Channel 2
cmd_def_2: chan1sigin
combo_def_3: Signal Input Channel 3
cmd_def_3: chan2sigin
combo_def_4: Signal Input Channel 4
cmd_def_4: chan3sigin
combo_def_5: Auxiliary Input Channel 1
cmd_def_5: chan0auxin
combo_def_6: Auxiliary Input Channel 2
cmd_def_6: chan1auxin
combo_def_7: Auxiliary Input Channel 3
cmd_def_7: chan2auxin
combo_def_8: Auxiliary Input Channel 4
cmd_def_8: chan3auxin
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 3 - Enable
second_state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: scope.input_select3
get_cmd: scope.input_select3

[Scope Channel 3 - Result Vector]
datatype: VECTOR_COMPLEX
group: Scope Channel 3
section: Scope
label: Result Vector
unit: Voltage
def_value: []
x_name: Time
x_unit: s
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 3 - Enable
second_state_value_1: True
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: Scope
# GROUP: Scope Channel 4

[Scope Channel 4 - Enable]
datatype: BOOLEAN
group: Scope Channel 4
section: Scope
label: Enable
def_value: False
state_quant: Recording - Enable Scope
state_value_1: True
model_value_1: SHFQA4

[Scope Channel 4 - Signal Source]
datatype: COMBO
group: Scope Channel 4
section: Scope
label: Signal Source
def_value: Signal Input Channel 4
tooltip: <html><body><p>Selects the scope input signal.</p><p><b>scopes/0/channels/3/inputselect</b></p></body></html>
combo_def_1: Signal Input Channel 1
cmd_def_1: chan0sigin
combo_def_2: Signal Input Channel 2
cmd_def_2: chan1sigin
combo_def_3: Signal Input Channel 3
cmd_def_3: chan2sigin
combo_def_4: Signal Input Channel 4
cmd_def_4: chan3sigin
combo_def_5: Auxiliary Input Channel 1
cmd_def_5: chan0auxin
combo_def_6: Auxiliary Input Channel 2
cmd_def_6: chan1auxin
combo_def_7: Auxiliary Input Channel 3
cmd_def_7: chan2auxin
combo_def_8: Auxiliary Input Channel 4
cmd_def_8: chan3auxin
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 4 - Enable
second_state_value_1: True
model_value_1: SHFQA4
permission: BOTH
set_cmd: scope.input_select4
get_cmd: scope.input_select4

[Scope Channel 4 - Result Vector]
datatype: VECTOR_COMPLEX
group: Scope Channel 4
section: Scope
label: Result Vector
unit: Voltage
def_value: []
x_name: Time
x_unit: s
state_quant: Recording - Enable Scope
state_value_1: True
second_state_quant: Scope Channel 4 - Enable
second_state_value_1: True
model_value_1: SHFQA4
permission: READ
show_in_measurement_dlg: True


#########################################
# SECTION: Scope
# GROUP: Trigger

[Trigger - Source]
datatype: COMBO
group: Trigger
section: Scope
label: Source
def_value: Channel 1, Trigger Input A
tooltip: <html><body><p>Selects the trigger source signal.</p><p><b>scopes/0/trigger/channel</b></p></body></html>
combo_def_1: Channel 1, Trigger Input A
cmd_def_1: chan0trigin0
combo_def_2: Channel 1, Trigger Input B
cmd_def_2: chan0trigin1
combo_def_3: Channel 2, Trigger Input A
cmd_def_3: chan1trigin0
combo_def_4: Channel 2, Trigger Input B
cmd_def_4: chan1trigin1
combo_def_5: Channel 3, Trigger Input A
cmd_def_5: chan2trigin0
combo_def_6: Channel 3, Trigger Input B
cmd_def_6: chan2trigin1
combo_def_7: Channel 4, Trigger Input A
cmd_def_7: chan3trigin0
combo_def_8: Channel 4, Trigger Input B
cmd_def_8: chan3trigin1
combo_def_9: Channel 1, Sequencer Trigger Output
cmd_def_9: chan0seqtrig0
combo_def_10: Channel 2, Sequencer Trigger Output
cmd_def_10: chan1seqtrig0
combo_def_11: Channel 3, Sequencer Trigger Output
cmd_def_11: chan2seqtrig0
combo_def_12: Channel 4, Sequencer Trigger Output
cmd_def_12: chan3seqtrig0
combo_def_13: Channel 1, Sequencer Monitor Trigger
cmd_def_13: chan0seqmon0
combo_def_14: Channel 2, Sequencer Monitor Trigger
cmd_def_14: chan1seqmon0
combo_def_15: Channel 3, Sequencer Monitor Trigger
cmd_def_15: chan2seqmon0
combo_def_16: Channel 4, Sequencer Monitor Trigger
cmd_def_16: chan3seqmon0
combo_def_17: Software Trigger 0
cmd_def_17: swtrig0
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: scope.trigger_source
get_cmd: scope.trigger_source

[Trigger - Delay]
datatype: DOUBLE
group: Trigger
section: Scope
label: Delay
unit: s
def_value: 0
tooltip: <html><body><p>The delay of a Scope measurement. A negative delay results in data being acquired before the trigger point. The resolution is 2 ns.</p><p><b>scopes/0/trigger/delay</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: scope.trigger_delay
get_cmd: scope.trigger_delay


#########################################
# SECTION: Scope
# GROUP: Segments

[Segments - Enable]
datatype: BOOLEAN
group: Segments
section: Scope
label: Enable
def_value: False
tooltip: <html><body><p>Enable segmented Scope recording. This allows for full bandwidth recording of Scope shots with a minimum dead time between individual shots.</p><p><b>scopes/0/segments/enable</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: nodetree.scope.segments.enable
get_cmd: nodetree.scope.segments.enable

[Segments - Segments]
datatype: DOUBLE
group: Segments
section: Scope
label: Segments
def_value: 1
tooltip: <html><body><p>Specifies the number of segments to be recorded in device memory. The maximum Scope shot size is given by the available memory divided by the number of segments.</p><p><b>scopes/0/segments/count</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: nodetree.scope.segments.count
get_cmd: nodetree.scope.segments.count


#########################################
# SECTION: Scope
# GROUP: Averaging

[Averaging - Enable]
datatype: BOOLEAN
group: Averaging
section: Scope
label: Enable
def_value: False
tooltip: <html><body><p>Enables averaging of Scope measurements.</p><p><b>scopes/0/averaging/enable</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: nodetree.scope.averaging.enable
get_cmd: nodetree.scope.averaging.enable

[Averaging - Averages]
datatype: DOUBLE
group: Averaging
section: Scope
label: Averages
def_value: 1
tooltip: <html><body><p>Configures the number of Scope measurements to average.</p><p><b>scopes/0/averaging/count</b></p></body></html>
state_quant: Recording - Enable Scope
state_value_1: True
permission: BOTH
set_cmd: nodetree.scope.averaging.count
get_cmd: nodetree.scope.averaging.count

