# Instrument driver configuration file.

[General settings]
# The General settings-section define name and version of the driver.
# Note that it is the name property in this section that sets the
# driver name, not the name of the driver definition INI file.

# The name is shown in all the configuration windows
name: Zurich Instruments SHFSG
# The version string should be updated whenever changes are made to
# this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: Zurich_Instruments_SHFSG

# Pre-defined communication interface for instrument, default is  GPIB.
interface: Other

# Pre-defined startup option for instrument, default is Set config.
startup: Do nothing

# Set to True if driver supports hardware looping. Default is False
support_hardware_loop: False

# Set to True if driver supports hardware arming. Default is False
support_arm: True

[Model and options]
# The Model and options-section provides a way to enable/disable
# certain features of a driver depending on the instrument
# model/installed options.

# List of models supported by this driver
model_str_1: SHFSG4
model_str_2: SHFSG8


# All quantities are defined in separate sections, with the name of the
# quantity given by the section header. The properties of a quantity
# are defined by a number of keywords, see below for a list the
# possible options. Only the datatype  keyword is mandatory, the other
# ones are optional.
#
# datatype:                 The data type should be one of DOUBLE,
#                           BOOLEAN, COMBO, STRING, COMPLEX, VECTOR,
#                           VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE,
#                           BOOLEAN and COMBO datatypes can be stepped
#                           in a measurement. The BUTTON datatype does
#                           not have an associated value, and can
#                           therefore not be controlled from the
#                           Measurement program. It is typically used to
#                           manually force an instrument to perform a
#                           certain task.
# label:                    Label shown next to control in user
#                           interface. If not specified, the label
#                           defaults to the name of the quantity.
# unit:                     Unit for the quantity.
# def_value:                Default value.
# tooltip:                  Tool tip shown when hovering the mouse over
#                           the control in the driver GUI.
# low_lim:                  Lowest allowable value. Defaults to -INF.
# high_lim:                 Highest allowable values. Defaults to  +INF.
# x_name:                   X-axis label for a vector data. Only valid
#                           if datatype  is VECTOR or VECTOR_COMPLEX.
# x_unit:                   X-axis unit for a vector data. Only valid if
#                           datatype is VECTOR or VECTOR_COMPLEX.
# combo_def_1,              Options for a pull-down combo box. Only used
# combo_def_2,              when datatype is COMBO.
# ...:
# group:                    Name of the group where the control belongs.
# section:                  Name of the section where the control
#                           belongs.
# state_quant:              Quantity that determines this control’s
#                           visibility.
# second_state_quant:       A second quantity that determines this
#                           control’s visibility. This is an ‘AND’
#                           operation: if a control has a state_quant
#                           and a second_state_quant, both need to be
#                           True for it to appear
# state_value_1,            Values of  "state_quant"  for which the
# state_value_2,            control is visible.
# ...:
# second_state_value_1,     Values of "second_state_quant" for which the
# second_state_value_2,     control is visible, if "state_quant" is also
# ...:                      True.
# model_value_1,            Values of  "model"  for which the control is
# model_value_2,            visible. The value must match one of the
# ...:                      models defined in the Model and
#                           Options-section described above.
# option_value_1,           Values of  "option"  for which the control
# option_value_2,           is visible. The value must match one of the
# ...:                      options defined in the Model and
#                           Options-section described above.
# permission:               Sets read/writability, options are BOTH,
#                           READ, WRITE or NONE. Default is BOTH.
# show_in_measurement_dlg:  This setting is optional. If True, the
#                           the quantity will be automatically shown
#                           when adding the instrument to a Measurement
#                           configuration. This is useful for instrument
#                           that contain a lot of quantities, but where
#                           most are not likely to be stepped in a
#                           measurement
# set_cmd:                  Command used to send data to the instrument.
#                           Put "<*>" where the value should appear. If
#                           "<*>" does not occur in the string, the
#                           value will be added after the command.
# get_cmd:                  Command used to get the data from the
#                           instrument. Default is set_cmd?.
# cmd_def_1,                List of strings that define what is sent
# cmd_def_2,                to/read from an instrument for a quantity
# ...:                      that is defined as a a list of multiple
#                           options. Only used when datatype is COMBO.


#########################################
# SECTION: Device
# GROUP: Revisions

[Revisions - Data Server]
datatype: STRING
group: Revisions
section: Device
label: Data Server
def_value: 
tooltip: <html><body><p>Contains the revision number of the Zurich Instruments Data Server.</p><p><b>zi/about/revision</b></p></body></html>
permission: READ
get_cmd: data_server_version

[Revisions - Firmware]
datatype: STRING
group: Revisions
section: Device
label: Firmware
def_value: 
tooltip: <html><body><p>Revision of the device-internal controller software.</p><p><b>system/fwrevision</b></p></body></html>
permission: READ
get_cmd: firmware_version

[Revisions - FPGA]
datatype: STRING
group: Revisions
section: Device
label: FPGA
def_value: 
tooltip: <html><body><p>HDL firmware revision.</p><p><b>system/fpgarevision</b></p></body></html>
permission: READ
get_cmd: fpga_version


#########################################
# SECTION: Device
# GROUP: Preset

[Device - Factory Reset]
datatype: BUTTON
group: Preset
section: Device
label: Factory Reset
tooltip: <html><body><p>Load the factory default settings.</p></body></html>


#########################################
# SECTION: Device
# GROUP: Input Reference Clock

[Input Reference Clock - Set Source]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Set Source
def_value: internal
tooltip: <html><body><p>The intended reference clock source. When the source is changed, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.</p><p><b>system/clocks/referenceclock/in/source</b></p></body></html>
combo_def_1: internal
cmd_def_1: 0
combo_def_2: external
cmd_def_2: 1
combo_def_3: zsync
cmd_def_3: 2
permission: BOTH
set_cmd: ref_clock
get_cmd: ref_clock

[Input Reference Clock - Status]
datatype: COMBO
group: Input Reference Clock
section: Device
label: Status
def_value: locked
tooltip: <html><body><p>Status of the reference clock.</p><p><b>system/clocks/referenceclock/in/status</b></p></body></html>
combo_def_1: locked
cmd_def_1: 0
combo_def_2: error
cmd_def_2: 1
combo_def_3: busy
cmd_def_3: 2
permission: READ
get_cmd: ref_clock_status


#########################################
# SECTION: Device
# GROUP: Output Reference Clock

[Output Reference Clock - Enable]
datatype: BOOLEAN
group: Output Reference Clock
section: Device
label: Enable
def_value: False
tooltip: <html><body><p>Enable clock signal on the reference clock output. When the clock output is turned on or off, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.</p><p><b>system/clocks/referenceclock/out/enable</b></p></body></html>
permission: BOTH
set_cmd: ref_clock_out
get_cmd: ref_clock_out

[Output Reference Clock - Center Frequency]
datatype: COMBO
group: Output Reference Clock
section: Device
label: Center Frequency
unit: Hz
def_value: 100 MHz
tooltip: <html><body><p>Select the frequency of the output reference clock. Only 10 MHz and 100 MHz are allowed. When the frequency is changed, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.</p><p><b>system/clocks/referenceclock/out/freq</b></p></body></html>
combo_def_1: 10 MHz
cmd_def_1: 10000000.0
combo_def_2: 100 MHz
cmd_def_2: 100000000.0
permission: BOTH
set_cmd: ref_clock_out_freq
get_cmd: ref_clock_out_freq


#########################################
# SECTION: Output
# GROUP: SGChannel 1

[SGChannel 1 - Output]
datatype: COMBO
group: SGChannel 1
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/0/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].output
get_cmd: sgchannels[0].output

[SGChannel 1 - Range]
datatype: COMBO
group: SGChannel 1
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/0/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].output_range
get_cmd: sgchannels[0].output_range

[SGChannel 1 - Path]
datatype: COMBO
group: SGChannel 1
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 1 - Center Frequency]
datatype: DOUBLE
group: SGChannel 1
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/0/centerfreq</b></p></body></html>
state_quant: SGChannel 1 - Path
state_value_1: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].rf_center_freq
get_cmd: sgchannels[0].rf_center_freq

[SGChannel 1 - Marker Source]
datatype: COMBO
group: SGChannel 1
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/0/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].marker_source
get_cmd: sgchannels[0].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 2

[SGChannel 2 - Output]
datatype: COMBO
group: SGChannel 2
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/1/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].output
get_cmd: sgchannels[1].output

[SGChannel 2 - Range]
datatype: COMBO
group: SGChannel 2
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/1/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].output_range
get_cmd: sgchannels[1].output_range

[SGChannel 2 - Path]
datatype: COMBO
group: SGChannel 2
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 2 - Center Frequency]
datatype: DOUBLE
group: SGChannel 2
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/0/centerfreq</b></p></body></html>
state_quant: SGChannel 2 - Path
state_value_1: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].rf_center_freq
get_cmd: sgchannels[1].rf_center_freq

[SGChannel 2 - Marker Source]
datatype: COMBO
group: SGChannel 2
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/1/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].marker_source
get_cmd: sgchannels[1].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 3

[SGChannel 3 - Output]
datatype: COMBO
group: SGChannel 3
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/2/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].output
get_cmd: sgchannels[2].output

[SGChannel 3 - Range]
datatype: COMBO
group: SGChannel 3
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/2/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].output_range
get_cmd: sgchannels[2].output_range

[SGChannel 3 - Path]
datatype: COMBO
group: SGChannel 3
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 3 - Center Frequency]
datatype: DOUBLE
group: SGChannel 3
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/1/centerfreq</b></p></body></html>
state_quant: SGChannel 3 - Path
state_value_1: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].rf_center_freq
get_cmd: sgchannels[2].rf_center_freq

[SGChannel 3 - Marker Source]
datatype: COMBO
group: SGChannel 3
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/2/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].marker_source
get_cmd: sgchannels[2].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 4

[SGChannel 4 - Output]
datatype: COMBO
group: SGChannel 4
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/3/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].output
get_cmd: sgchannels[3].output

[SGChannel 4 - Range]
datatype: COMBO
group: SGChannel 4
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/3/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].output_range
get_cmd: sgchannels[3].output_range

[SGChannel 4 - Path]
datatype: COMBO
group: SGChannel 4
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 4 - Center Frequency]
datatype: DOUBLE
group: SGChannel 4
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/1/centerfreq</b></p></body></html>
state_quant: SGChannel 4 - Path
state_value_1: rf
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].rf_center_freq
get_cmd: sgchannels[3].rf_center_freq

[SGChannel 4 - Marker Source]
datatype: COMBO
group: SGChannel 4
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/3/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].marker_source
get_cmd: sgchannels[3].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 5

[SGChannel 5 - Output]
datatype: COMBO
group: SGChannel 5
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/4/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].output
get_cmd: sgchannels[4].output

[SGChannel 5 - Range]
datatype: COMBO
group: SGChannel 5
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/4/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].output_range
get_cmd: sgchannels[4].output_range

[SGChannel 5 - Path]
datatype: COMBO
group: SGChannel 5
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 5 - Center Frequency]
datatype: DOUBLE
group: SGChannel 5
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/2/centerfreq</b></p></body></html>
state_quant: SGChannel 5 - Path
state_value_1: rf
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].rf_center_freq
get_cmd: sgchannels[4].rf_center_freq

[SGChannel 5 - Marker Source]
datatype: COMBO
group: SGChannel 5
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/4/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].marker_source
get_cmd: sgchannels[4].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 6

[SGChannel 6 - Output]
datatype: COMBO
group: SGChannel 6
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/5/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].output
get_cmd: sgchannels[5].output

[SGChannel 6 - Range]
datatype: COMBO
group: SGChannel 6
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/5/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].output_range
get_cmd: sgchannels[5].output_range

[SGChannel 6 - Path]
datatype: COMBO
group: SGChannel 6
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 6 - Center Frequency]
datatype: DOUBLE
group: SGChannel 6
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/2/centerfreq</b></p></body></html>
state_quant: SGChannel 6 - Path
state_value_1: rf
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].rf_center_freq
get_cmd: sgchannels[5].rf_center_freq

[SGChannel 6 - Marker Source]
datatype: COMBO
group: SGChannel 6
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/5/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].marker_source
get_cmd: sgchannels[5].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 7

[SGChannel 7 - Output]
datatype: COMBO
group: SGChannel 7
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/6/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].output
get_cmd: sgchannels[6].output

[SGChannel 7 - Range]
datatype: COMBO
group: SGChannel 7
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/6/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].output_range
get_cmd: sgchannels[6].output_range

[SGChannel 7 - Path]
datatype: COMBO
group: SGChannel 7
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 7 - Center Frequency]
datatype: DOUBLE
group: SGChannel 7
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/3/centerfreq</b></p></body></html>
state_quant: SGChannel 7 - Path
state_value_1: rf
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].rf_center_freq
get_cmd: sgchannels[6].rf_center_freq

[SGChannel 7 - Marker Source]
datatype: COMBO
group: SGChannel 7
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/6/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].marker_source
get_cmd: sgchannels[6].marker_source


#########################################
# SECTION: Output
# GROUP: SGChannel 8

[SGChannel 8 - Output]
datatype: COMBO
group: SGChannel 8
section: Output
label: Output
def_value: on
tooltip: <html><body><p>Enables the Signal Output.</p><p><b>sgchannels/7/output/on</b></p></body></html>
combo_def_1: on
combo_def_2: off
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].output
get_cmd: sgchannels[7].output

[SGChannel 8 - Range]
datatype: COMBO
group: SGChannel 8
section: Output
label: Range
unit: dBm
def_value: -30
tooltip: <html><body><p>Sets the maximal Range of the Signal Output power. The instrument selects the closest available Range with a resolution of 5 dBm.</p><p><b>sgchannels/7/output/range</b></p></body></html>
combo_def_1: -30
combo_def_2: -25
combo_def_3: -20
combo_def_4: -15
combo_def_5: -10
combo_def_6: -5
combo_def_7: 0
combo_def_8: 5
combo_def_9: 10
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].output_range
get_cmd: sgchannels[7].output_range

[SGChannel 8 - Path]
datatype: COMBO
group: SGChannel 8
section: Output
label: Path
def_value: lf
combo_def_1: lf
combo_def_2: rf
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 8 - Center Frequency]
datatype: DOUBLE
group: SGChannel 8
section: Output
label: Center Frequency
unit: Hz
def_value: 600000000.0
tooltip: <html><body><p>The Center Frequency of the synthesizer.</p><p><b>synthesizers/3/centerfreq</b></p></body></html>
state_quant: SGChannel 8 - Path
state_value_1: rf
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].rf_center_freq
get_cmd: sgchannels[7].rf_center_freq

[SGChannel 8 - Marker Source]
datatype: COMBO
group: SGChannel 8
section: Output
label: Marker Source
def_value: AWG Trigger 1
tooltip: <html><body><p>Assign a signal to a marker.</p><p><b>sgchannels/7/marker/source</b></p></body></html>
combo_def_1: AWG Trigger 1
cmd_def_1: 0
combo_def_2: AWG Trigger 2
cmd_def_2: 1
combo_def_3: AWG Trigger 3
cmd_def_3: 2
combo_def_4: Output 1 Marker 1
cmd_def_4: 3
combo_def_5: Output 1 Marker 2
cmd_def_5: 4
combo_def_6: Output 2 Marker 1
cmd_def_6: 5
combo_def_7: Output 2 Marker 2
cmd_def_7: 6
combo_def_8: Trigger Input 0
cmd_def_8: 7
combo_def_9: Trigger Input 1
cmd_def_9: 8
combo_def_10: Trigger Input 2
cmd_def_10: 9
combo_def_11: Trigger Input 3
cmd_def_11: 10
combo_def_12: Trigger Input 4
cmd_def_12: 11
combo_def_13: Trigger Input 5
cmd_def_13: 12
combo_def_14: Trigger Input 6
cmd_def_14: 13
combo_def_15: Trigger Input 7
cmd_def_15: 14
combo_def_16: Trigger Input 8
cmd_def_16: 15
combo_def_17: Low
cmd_def_17: 16
combo_def_18: High
cmd_def_18: 17
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].marker_source
get_cmd: sgchannels[7].marker_source


#########################################
# SECTION: Sequencer 1
# GROUP: Control

[Sequencer 1 - Run]
datatype: BUTTON
group: Control
section: Sequencer 1
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 1
# GROUP: IQ Modulation

[Sequencer 1 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/0/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.gain00
get_cmd: sgchannels[0].awg.gain00

[Sequencer 1 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/0/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.gain01
get_cmd: sgchannels[0].awg.gain01

[Sequencer 1 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/0/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.gain10
get_cmd: sgchannels[0].awg.gain10

[Sequencer 1 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/0/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.gain11
get_cmd: sgchannels[0].awg.gain11

[Sequencer 1 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.modulation_freq
get_cmd: sgchannels[0].awg.modulation_freq

[Sequencer 1 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 1
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/0/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.modulation_phase_shift
get_cmd: sgchannels[0].awg.modulation_phase_shift

[Sequencer 1 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 1
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/0/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.osc_select
get_cmd: sgchannels[0].sine.osc_select


#########################################
# SECTION: Sequencer 1
# GROUP: Sequencer Program

[Sequencer 1 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 1
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 1
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 1
label: Waveform Path
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 1
label: Command Table Path
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 1
label: Sequence Path
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 1
label: Custom Params
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 1 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 1
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 1
# GROUP: Advance

[Sequencer 1 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 1
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 1
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 1
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 1
# GROUP: Error

[Sequencer 1 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 1
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 1
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 1
# GROUP: Sequencer Code Manual

[Sequencer 1 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 1
label: Sequencer Code Output
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 1
label: Command Table Output
state_quant: Sequencer 1 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 1
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 1 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 1
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 1 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 1
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 1 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 1
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 1
# GROUP: Trigger

[Sequencer 1 - Trigger - Digital Trigger 1 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 1 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/0/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger1_source
get_cmd: sgchannels[0].awg.digital_trigger1_source

[Sequencer 1 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/0/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger1_source
get_cmd: sgchannels[0].awg.digital_trigger1_source

[Sequencer 1 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/0/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger1_slope
get_cmd: sgchannels[0].awg.digital_trigger1_slope

[Sequencer 1 - Trigger - Digital Trigger 2 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 2 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/0/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger2_source
get_cmd: sgchannels[0].awg.digital_trigger2_source

[Sequencer 1 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/0/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger2_source
get_cmd: sgchannels[0].awg.digital_trigger2_source

[Sequencer 1 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 1
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/0/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].awg.digital_trigger2_slope
get_cmd: sgchannels[0].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 2
# GROUP: Control

[Sequencer 2 - Run]
datatype: BUTTON
group: Control
section: Sequencer 2
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 2
# GROUP: IQ Modulation

[Sequencer 2 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/1/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.gain00
get_cmd: sgchannels[1].awg.gain00

[Sequencer 2 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/1/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.gain01
get_cmd: sgchannels[1].awg.gain01

[Sequencer 2 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/1/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.gain10
get_cmd: sgchannels[1].awg.gain10

[Sequencer 2 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/1/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.gain11
get_cmd: sgchannels[1].awg.gain11

[Sequencer 2 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.modulation_freq
get_cmd: sgchannels[1].awg.modulation_freq

[Sequencer 2 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 2
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/1/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.modulation_phase_shift
get_cmd: sgchannels[1].awg.modulation_phase_shift

[Sequencer 2 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 2
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/1/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.osc_select
get_cmd: sgchannels[1].sine.osc_select


#########################################
# SECTION: Sequencer 2
# GROUP: Sequencer Program

[Sequencer 2 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 2
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 2
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 2
label: Waveform Path
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 2
label: Command Table Path
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 2
label: Sequence Path
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 2
label: Custom Params
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 2 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 2
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 2
# GROUP: Advance

[Sequencer 2 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 2
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 2
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 2
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 2
# GROUP: Error

[Sequencer 2 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 2
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 2
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 2
# GROUP: Sequencer Code Manual

[Sequencer 2 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 2
label: Sequencer Code Output
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 2
label: Command Table Output
state_quant: Sequencer 2 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 2
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 2 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 2
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 2 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 2
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 2 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 2
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 2
# GROUP: Trigger

[Sequencer 2 - Trigger - Digital Trigger 1 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 1 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/1/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger1_source
get_cmd: sgchannels[1].awg.digital_trigger1_source

[Sequencer 2 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/1/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger1_source
get_cmd: sgchannels[1].awg.digital_trigger1_source

[Sequencer 2 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/1/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger1_slope
get_cmd: sgchannels[1].awg.digital_trigger1_slope

[Sequencer 2 - Trigger - Digital Trigger 2 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 2 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/1/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger2_source
get_cmd: sgchannels[1].awg.digital_trigger2_source

[Sequencer 2 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/1/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger2_source
get_cmd: sgchannels[1].awg.digital_trigger2_source

[Sequencer 2 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 2
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/1/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].awg.digital_trigger2_slope
get_cmd: sgchannels[1].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 3
# GROUP: Control

[Sequencer 3 - Run]
datatype: BUTTON
group: Control
section: Sequencer 3
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 3
# GROUP: IQ Modulation

[Sequencer 3 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/2/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.gain00
get_cmd: sgchannels[2].awg.gain00

[Sequencer 3 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/2/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.gain01
get_cmd: sgchannels[2].awg.gain01

[Sequencer 3 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/2/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.gain10
get_cmd: sgchannels[2].awg.gain10

[Sequencer 3 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/2/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.gain11
get_cmd: sgchannels[2].awg.gain11

[Sequencer 3 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.modulation_freq
get_cmd: sgchannels[2].awg.modulation_freq

[Sequencer 3 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 3
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/2/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.modulation_phase_shift
get_cmd: sgchannels[2].awg.modulation_phase_shift

[Sequencer 3 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 3
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/2/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.osc_select
get_cmd: sgchannels[2].sine.osc_select


#########################################
# SECTION: Sequencer 3
# GROUP: Sequencer Program

[Sequencer 3 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 3
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 3
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 3
label: Waveform Path
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 3
label: Command Table Path
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 3
label: Sequence Path
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 3
label: Custom Params
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 3 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 3
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 3
# GROUP: Advance

[Sequencer 3 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 3
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 3
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 3
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 3
# GROUP: Error

[Sequencer 3 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 3
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 3
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 3
# GROUP: Sequencer Code Manual

[Sequencer 3 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 3
label: Sequencer Code Output
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 3
label: Command Table Output
state_quant: Sequencer 3 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 3
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 3 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 3
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 3 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 3
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 3 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 3
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 3
# GROUP: Trigger

[Sequencer 3 - Trigger - Digital Trigger 1 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 1 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/2/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger1_source
get_cmd: sgchannels[2].awg.digital_trigger1_source

[Sequencer 3 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/2/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger1_source
get_cmd: sgchannels[2].awg.digital_trigger1_source

[Sequencer 3 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/2/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger1_slope
get_cmd: sgchannels[2].awg.digital_trigger1_slope

[Sequencer 3 - Trigger - Digital Trigger 2 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 2 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/2/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger2_source
get_cmd: sgchannels[2].awg.digital_trigger2_source

[Sequencer 3 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/2/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger2_source
get_cmd: sgchannels[2].awg.digital_trigger2_source

[Sequencer 3 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 3
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/2/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].awg.digital_trigger2_slope
get_cmd: sgchannels[2].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 4
# GROUP: Control

[Sequencer 4 - Run]
datatype: BUTTON
group: Control
section: Sequencer 4
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 4
# GROUP: IQ Modulation

[Sequencer 4 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/3/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.gain00
get_cmd: sgchannels[3].awg.gain00

[Sequencer 4 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/3/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.gain01
get_cmd: sgchannels[3].awg.gain01

[Sequencer 4 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/3/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.gain10
get_cmd: sgchannels[3].awg.gain10

[Sequencer 4 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/3/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.gain11
get_cmd: sgchannels[3].awg.gain11

[Sequencer 4 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.modulation_freq
get_cmd: sgchannels[3].awg.modulation_freq

[Sequencer 4 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 4
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/3/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.modulation_phase_shift
get_cmd: sgchannels[3].awg.modulation_phase_shift

[Sequencer 4 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 4
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/3/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.osc_select
get_cmd: sgchannels[3].sine.osc_select


#########################################
# SECTION: Sequencer 4
# GROUP: Sequencer Program

[Sequencer 4 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 4
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 4
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 4
label: Waveform Path
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 4
label: Command Table Path
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 4
label: Sequence Path
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 4
label: Custom Params
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: True

[Sequencer 4 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 4
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 4
# GROUP: Advance

[Sequencer 4 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 4
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 4
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 4
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 4
# GROUP: Error

[Sequencer 4 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 4
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 4
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 4
# GROUP: Sequencer Code Manual

[Sequencer 4 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 4
label: Sequencer Code Output
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 4
label: Command Table Output
state_quant: Sequencer 4 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 4
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 4 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 4
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 4 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 4
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[Sequencer 4 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 4
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 4
# GROUP: Trigger

[Sequencer 4 - Trigger - Digital Trigger 1 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 1 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/3/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger1_source
get_cmd: sgchannels[3].awg.digital_trigger1_source

[Sequencer 4 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/3/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger1_source
get_cmd: sgchannels[3].awg.digital_trigger1_source

[Sequencer 4 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/3/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger1_slope
get_cmd: sgchannels[3].awg.digital_trigger1_slope

[Sequencer 4 - Trigger - Digital Trigger 2 (SHFSG4)]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 2 (SHFSG4)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/3/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
model_value_1: SHFSG4
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger2_source
get_cmd: sgchannels[3].awg.digital_trigger2_source

[Sequencer 4 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/3/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger2_source
get_cmd: sgchannels[3].awg.digital_trigger2_source

[Sequencer 4 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 4
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/3/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].awg.digital_trigger2_slope
get_cmd: sgchannels[3].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 5
# GROUP: Control

[Sequencer 5 - Run]
datatype: BUTTON
group: Control
section: Sequencer 5
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 5
# GROUP: IQ Modulation

[Sequencer 5 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/4/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.gain00
get_cmd: sgchannels[4].awg.gain00

[Sequencer 5 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/4/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.gain01
get_cmd: sgchannels[4].awg.gain01

[Sequencer 5 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/4/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.gain10
get_cmd: sgchannels[4].awg.gain10

[Sequencer 5 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/4/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.gain11
get_cmd: sgchannels[4].awg.gain11

[Sequencer 5 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.modulation_freq
get_cmd: sgchannels[4].awg.modulation_freq

[Sequencer 5 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 5
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/4/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.modulation_phase_shift
get_cmd: sgchannels[4].awg.modulation_phase_shift

[Sequencer 5 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 5
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/4/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.osc_select
get_cmd: sgchannels[4].sine.osc_select


#########################################
# SECTION: Sequencer 5
# GROUP: Sequencer Program

[Sequencer 5 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 5
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 5
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 5
label: Waveform Path
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 5
label: Command Table Path
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 5
label: Sequence Path
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 5
label: Custom Params
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 5 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 5
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 5
# GROUP: Advance

[Sequencer 5 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 5
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 5
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 5
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 5
# GROUP: Error

[Sequencer 5 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 5
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 5
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 5
# GROUP: Sequencer Code Manual

[Sequencer 5 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 5
label: Sequencer Code Output
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 5
label: Command Table Output
state_quant: Sequencer 5 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 5
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 5 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 5
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 5 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 5
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 5 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 5
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 5
# GROUP: Trigger

[Sequencer 5 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 5
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/4/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.digital_trigger1_source
get_cmd: sgchannels[4].awg.digital_trigger1_source

[Sequencer 5 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 5
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/4/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.digital_trigger1_slope
get_cmd: sgchannels[4].awg.digital_trigger1_slope

[Sequencer 5 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 5
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/4/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.digital_trigger2_source
get_cmd: sgchannels[4].awg.digital_trigger2_source

[Sequencer 5 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 5
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/4/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].awg.digital_trigger2_slope
get_cmd: sgchannels[4].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 6
# GROUP: Control

[Sequencer 6 - Run]
datatype: BUTTON
group: Control
section: Sequencer 6
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 6
# GROUP: IQ Modulation

[Sequencer 6 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/5/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.gain00
get_cmd: sgchannels[5].awg.gain00

[Sequencer 6 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/5/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.gain01
get_cmd: sgchannels[5].awg.gain01

[Sequencer 6 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/5/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.gain10
get_cmd: sgchannels[5].awg.gain10

[Sequencer 6 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/5/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.gain11
get_cmd: sgchannels[5].awg.gain11

[Sequencer 6 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.modulation_freq
get_cmd: sgchannels[5].awg.modulation_freq

[Sequencer 6 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 6
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/5/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.modulation_phase_shift
get_cmd: sgchannels[5].awg.modulation_phase_shift

[Sequencer 6 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 6
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/5/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.osc_select
get_cmd: sgchannels[5].sine.osc_select


#########################################
# SECTION: Sequencer 6
# GROUP: Sequencer Program

[Sequencer 6 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 6
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 6
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 6
label: Waveform Path
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 6
label: Command Table Path
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 6
label: Sequence Path
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 6
label: Custom Params
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 6 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 6
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 6
# GROUP: Advance

[Sequencer 6 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 6
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 6
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 6
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 6
# GROUP: Error

[Sequencer 6 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 6
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 6
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 6
# GROUP: Sequencer Code Manual

[Sequencer 6 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 6
label: Sequencer Code Output
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 6
label: Command Table Output
state_quant: Sequencer 6 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 6
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 6 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 6
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 6 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 6
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 6 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 6
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 6
# GROUP: Trigger

[Sequencer 6 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 6
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/5/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.digital_trigger1_source
get_cmd: sgchannels[5].awg.digital_trigger1_source

[Sequencer 6 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 6
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/5/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.digital_trigger1_slope
get_cmd: sgchannels[5].awg.digital_trigger1_slope

[Sequencer 6 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 6
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/5/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.digital_trigger2_source
get_cmd: sgchannels[5].awg.digital_trigger2_source

[Sequencer 6 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 6
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/5/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].awg.digital_trigger2_slope
get_cmd: sgchannels[5].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 7
# GROUP: Control

[Sequencer 7 - Run]
datatype: BUTTON
group: Control
section: Sequencer 7
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 7
# GROUP: IQ Modulation

[Sequencer 7 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/6/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.gain00
get_cmd: sgchannels[6].awg.gain00

[Sequencer 7 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/6/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.gain01
get_cmd: sgchannels[6].awg.gain01

[Sequencer 7 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/6/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.gain10
get_cmd: sgchannels[6].awg.gain10

[Sequencer 7 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/6/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.gain11
get_cmd: sgchannels[6].awg.gain11

[Sequencer 7 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.modulation_freq
get_cmd: sgchannels[6].awg.modulation_freq

[Sequencer 7 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 7
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/6/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.modulation_phase_shift
get_cmd: sgchannels[6].awg.modulation_phase_shift

[Sequencer 7 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 7
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/6/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.osc_select
get_cmd: sgchannels[6].sine.osc_select


#########################################
# SECTION: Sequencer 7
# GROUP: Sequencer Program

[Sequencer 7 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 7
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 7
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 7
label: Waveform Path
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 7
label: Command Table Path
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 7
label: Sequence Path
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 7
label: Custom Params
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 7 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 7
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 7
# GROUP: Advance

[Sequencer 7 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 7
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 7
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 7
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 7
# GROUP: Error

[Sequencer 7 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 7
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 7
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 7
# GROUP: Sequencer Code Manual

[Sequencer 7 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 7
label: Sequencer Code Output
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 7
label: Command Table Output
state_quant: Sequencer 7 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 7
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 7 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 7
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 7 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 7
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 7 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 7
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 7
# GROUP: Trigger

[Sequencer 7 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 7
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/6/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.digital_trigger1_source
get_cmd: sgchannels[6].awg.digital_trigger1_source

[Sequencer 7 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 7
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/6/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.digital_trigger1_slope
get_cmd: sgchannels[6].awg.digital_trigger1_slope

[Sequencer 7 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 7
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/6/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.digital_trigger2_source
get_cmd: sgchannels[6].awg.digital_trigger2_source

[Sequencer 7 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 7
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/6/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].awg.digital_trigger2_slope
get_cmd: sgchannels[6].awg.digital_trigger2_slope


#########################################
# SECTION: Sequencer 8
# GROUP: Control

[Sequencer 8 - Run]
datatype: BUTTON
group: Control
section: Sequencer 8
label: Run
tooltip: <html><body><p>Activates the AWG</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: True


#########################################
# SECTION: Sequencer 8
# GROUP: IQ Modulation

[Sequencer 8 - IQ Modulation - Gain 00]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Gain 00
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/7/awg/outputs/0/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.gain00
get_cmd: sgchannels[7].awg.gain00

[Sequencer 8 - IQ Modulation - Gain 01]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Gain 01
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/7/awg/outputs/0/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.gain01
get_cmd: sgchannels[7].awg.gain01

[Sequencer 8 - IQ Modulation - Gain 10]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Gain 10
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/7/awg/outputs/1/gains/0</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.gain10
get_cmd: sgchannels[7].awg.gain10

[Sequencer 8 - IQ Modulation - Gain 11]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Gain 11
def_value: 1.0
tooltip: <html><body><p>Gain factor applied to the AWG Output at the given output multiplier stage. The final signal amplitude is proportional to the Range voltage setting of the Wave signal outputs.</p><p><b>sgchannels/7/awg/outputs/1/gains/1</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.gain11
get_cmd: sgchannels[7].awg.gain11

[Sequencer 8 - IQ Modulation - Modulation Frequency]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Modulation Frequency
def_value: 9999999.99999801
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/0/freq</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.modulation_freq
get_cmd: sgchannels[7].awg.modulation_freq

[Sequencer 8 - IQ Modulation - Modulation Phase]
datatype: DOUBLE
group: IQ Modulation
section: Sequencer 8
label: Modulation Phase
unit: deg
def_value: 0.0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/7/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.modulation_phase_shift
get_cmd: sgchannels[7].awg.modulation_phase_shift

[Sequencer 8 - IQ Modulation - Oscillator]
datatype: COMBO
group: IQ Modulation
section: Sequencer 8
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/7/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.osc_select
get_cmd: sgchannels[7].sine.osc_select


#########################################
# SECTION: Sequencer 8
# GROUP: Sequencer Program

[Sequencer 8 - Sequencer Program - Sequence]
datatype: COMBO
group: Sequencer Program
section: Sequencer 8
label: Sequence
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Simple
cmd_def_2: 1
combo_def_3: Rabi
cmd_def_3: 2
combo_def_4: T1
cmd_def_4: 3
combo_def_5: T2*
cmd_def_5: 4
combo_def_6: Custom
cmd_def_6: 5
combo_def_7: Trigger
cmd_def_7: 6
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Trigger Mode]
datatype: COMBO
group: Sequencer Program
section: Sequencer 8
label: Trigger Mode
def_value: None
combo_def_1: None
cmd_def_1: 0
combo_def_2: Send Trigger
cmd_def_2: 1
combo_def_3: Receive Trigger
cmd_def_3: 2
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Waveform Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 8
label: Waveform Path
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Custom
state_value_2: Simple
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Command Table Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 8
label: Command Table Path
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Sequence Path]
datatype: PATH
group: Sequencer Program
section: Sequencer 8
label: Sequence Path
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Custom Params]
datatype: STRING
group: Sequencer Program
section: Sequencer 8
label: Custom Params
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: True

[Sequencer 8 - Sequencer Program - Pulse Amplitude Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Pulse Amplitude Start
def_value: 0.0
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Pulse Amplitude Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Pulse Amplitude Stop
def_value: 1.0
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Pulse Amplitude Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Pulse Amplitude Number
def_value: 1
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Rabi
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Pulse Amplitude]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Pulse Amplitude
def_value: 1.0
low_lim: 0
high_lim: 1
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Pulse Width]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Pulse Width
unit: s
def_value: 50e-9
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: T1
state_value_3: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Delay Time Start]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Delay Time Start
unit: s
def_value: 0.1e-6
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Delay Time Stop]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Delay Time Stop
unit: s
def_value: 10e-6
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Program - Delay Time Number]
datatype: DOUBLE
group: Sequencer Program
section: Sequencer 8
label: Delay Time Number
unit: s
def_value: 1
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: T1
state_value_2: T2*
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 8
# GROUP: Advance

[Sequencer 8 - Advance - Trigger Delay]
datatype: DOUBLE
group: Advance
section: Sequencer 8
label: Trigger Delay
unit: s
def_value: 0
tooltip: <html><body><p>addittional delay in seconds that shifts the time origin `t=0` with respect to the trigger signal.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Advance - Repetitions]
datatype: DOUBLE
group: Advance
section: Sequencer 8
label: Repetitions
def_value: 100
tooltip: <html><body><p>The number of repetitions of the experiment.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Advance - Period]
datatype: DOUBLE
group: Advance
section: Sequencer 8
label: Period
unit: s
def_value: 100e-6
tooltip: <html><body><p>Period in seconds at which the experiment is repeated.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 8
# GROUP: Error

[Sequencer 8 - Error - Sequence Error]
datatype: STRING
group: Error
section: Sequencer 8
label: Sequence Error
def_value: 
tooltip: <html><body><p>Error of automated sequencer Code generator</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Reset Default]
datatype: BUTTON
group: Error
section: Sequencer 8
label: Reset Default
tooltip: <html><body><p>Reset custom sequencer settings to default.</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 8
# GROUP: Sequencer Code Manual

[Sequencer 8 - Sequencer Code Manual - Sequencer Code Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 8
label: Sequencer Code Output
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Code Manual - Command Table Output]
datatype: PATH
group: Sequencer Code Manual
section: Sequencer 8
label: Command Table Output
state_quant: Sequencer 8 - Sequencer Program - Sequence
state_value_1: Rabi
state_value_2: Custom
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Waveform Channel 1]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 8
label: Waveform Channel 1
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 8 - Waveform Channel 2]
datatype: VECTOR
group: Sequencer Code Manual
section: Sequencer 8
label: Waveform Channel 2
x_name: Length
x_unit: Sample
model_value_1: SHFSG8
permission: READ
show_in_measurement_dlg: False

[Sequencer 8 - Sequencer Code Manual - Waveform to View]
datatype: DOUBLE
group: Sequencer Code Manual
section: Sequencer 8
label: Waveform to View
def_value: 0
low_lim: 0
model_value_1: SHFSG8
show_in_measurement_dlg: False

[Sequencer 8 - Download]
datatype: BUTTON
group: Sequencer Code Manual
section: Sequencer 8
label: Download
tooltip: <html><body><p>Downloads the sequencer code from the device</p></body></html>
model_value_1: SHFSG8
show_in_measurement_dlg: False


#########################################
# SECTION: Sequencer 8
# GROUP: Trigger

[Sequencer 8 - Trigger - Digital Trigger 1 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 8
label: Digital Trigger 1 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/7/awg/auxtriggers/0/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.digital_trigger1_source
get_cmd: sgchannels[7].awg.digital_trigger1_source

[Sequencer 8 - Trigger - Digital Trigger 1 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 8
label: Digital Trigger 1 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/7/awg/auxtriggers/0/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.digital_trigger1_slope
get_cmd: sgchannels[7].awg.digital_trigger1_slope

[Sequencer 8 - Trigger - Digital Trigger 2 (SHFSG8)]
datatype: COMBO
group: Trigger
section: Sequencer 8
label: Digital Trigger 2 (SHFSG8)
def_value: Trigger In 1
tooltip: <html><body><p>Selects the digital trigger source signal.</p><p><b>sgchannels/7/awg/auxtriggers/1/channel</b></p></body></html>
combo_def_1: Trigger In 1
cmd_def_1: 0
combo_def_2: Trigger In 2
cmd_def_2: 1
combo_def_3: Trigger In 3
cmd_def_3: 2
combo_def_4: Trigger In 4
cmd_def_4: 3
combo_def_5: Trigger In 5
cmd_def_5: 4
combo_def_6: Trigger In 6
cmd_def_6: 5
combo_def_7: Trigger In 7
cmd_def_7: 6
combo_def_8: Trigger In 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.digital_trigger2_source
get_cmd: sgchannels[7].awg.digital_trigger2_source

[Sequencer 8 - Trigger - Digital Trigger 2 Slope]
datatype: COMBO
group: Trigger
section: Sequencer 8
label: Digital Trigger 2 Slope
def_value: level_sensitive
tooltip: <html><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.</p><p><b>sgchannels/7/awg/auxtriggers/1/slope</b></p></body></html>
combo_def_1: level_sensitive
cmd_def_1: 0
combo_def_2: rising_edge
cmd_def_2: 1
combo_def_3: falling_edge
cmd_def_3: 2
combo_def_4: both_edges
cmd_def_4: 3
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].awg.digital_trigger2_slope
get_cmd: sgchannels[7].awg.digital_trigger2_slope


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 1

[SGChannel 1 - SHOW]
datatype: COMBO
group: SGChannel 1
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 1 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[0].freq
get_cmd: nodetree.sgchannels[0].oscs[0].freq

[SGChannel 1 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[1].freq
get_cmd: nodetree.sgchannels[0].oscs[1].freq

[SGChannel 1 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[2].freq
get_cmd: nodetree.sgchannels[0].oscs[2].freq

[SGChannel 1 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[3].freq
get_cmd: nodetree.sgchannels[0].oscs[3].freq

[SGChannel 1 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[4].freq
get_cmd: nodetree.sgchannels[0].oscs[4].freq

[SGChannel 1 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[5].freq
get_cmd: nodetree.sgchannels[0].oscs[5].freq

[SGChannel 1 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[6].freq
get_cmd: nodetree.sgchannels[0].oscs[6].freq

[SGChannel 1 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 1
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 1 - SHOW
state_value_1: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[0].oscs[7].freq
get_cmd: nodetree.sgchannels[0].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 2

[SGChannel 2 - SHOW]
datatype: COMBO
group: SGChannel 2
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 2 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[0].freq
get_cmd: nodetree.sgchannels[1].oscs[0].freq

[SGChannel 2 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[1].freq
get_cmd: nodetree.sgchannels[1].oscs[1].freq

[SGChannel 2 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[2].freq
get_cmd: nodetree.sgchannels[1].oscs[2].freq

[SGChannel 2 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[3].freq
get_cmd: nodetree.sgchannels[1].oscs[3].freq

[SGChannel 2 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[4].freq
get_cmd: nodetree.sgchannels[1].oscs[4].freq

[SGChannel 2 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[5].freq
get_cmd: nodetree.sgchannels[1].oscs[5].freq

[SGChannel 2 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[6].freq
get_cmd: nodetree.sgchannels[1].oscs[6].freq

[SGChannel 2 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 2
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 2 - SHOW
state_value_1: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[1].oscs[7].freq
get_cmd: nodetree.sgchannels[1].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 3

[SGChannel 3 - SHOW]
datatype: COMBO
group: SGChannel 3
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 3 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[0].freq
get_cmd: nodetree.sgchannels[2].oscs[0].freq

[SGChannel 3 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[1].freq
get_cmd: nodetree.sgchannels[2].oscs[1].freq

[SGChannel 3 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[2].freq
get_cmd: nodetree.sgchannels[2].oscs[2].freq

[SGChannel 3 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[3].freq
get_cmd: nodetree.sgchannels[2].oscs[3].freq

[SGChannel 3 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[4].freq
get_cmd: nodetree.sgchannels[2].oscs[4].freq

[SGChannel 3 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[5].freq
get_cmd: nodetree.sgchannels[2].oscs[5].freq

[SGChannel 3 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[6].freq
get_cmd: nodetree.sgchannels[2].oscs[6].freq

[SGChannel 3 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 3
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 3 - SHOW
state_value_1: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[2].oscs[7].freq
get_cmd: nodetree.sgchannels[2].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 4

[SGChannel 4 - SHOW]
datatype: COMBO
group: SGChannel 4
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
show_in_measurement_dlg: False

[SGChannel 4 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[0].freq
get_cmd: nodetree.sgchannels[3].oscs[0].freq

[SGChannel 4 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[1].freq
get_cmd: nodetree.sgchannels[3].oscs[1].freq

[SGChannel 4 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[2].freq
get_cmd: nodetree.sgchannels[3].oscs[2].freq

[SGChannel 4 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[3].freq
get_cmd: nodetree.sgchannels[3].oscs[3].freq

[SGChannel 4 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[4].freq
get_cmd: nodetree.sgchannels[3].oscs[4].freq

[SGChannel 4 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[5].freq
get_cmd: nodetree.sgchannels[3].oscs[5].freq

[SGChannel 4 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[6].freq
get_cmd: nodetree.sgchannels[3].oscs[6].freq

[SGChannel 4 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 4
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 4 - SHOW
state_value_1: 8
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[3].oscs[7].freq
get_cmd: nodetree.sgchannels[3].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 5

[SGChannel 5 - SHOW]
datatype: COMBO
group: SGChannel 5
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 5 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[0].freq
get_cmd: nodetree.sgchannels[4].oscs[0].freq

[SGChannel 5 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[1].freq
get_cmd: nodetree.sgchannels[4].oscs[1].freq

[SGChannel 5 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[2].freq
get_cmd: nodetree.sgchannels[4].oscs[2].freq

[SGChannel 5 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[3].freq
get_cmd: nodetree.sgchannels[4].oscs[3].freq

[SGChannel 5 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[4].freq
get_cmd: nodetree.sgchannels[4].oscs[4].freq

[SGChannel 5 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[5].freq
get_cmd: nodetree.sgchannels[4].oscs[5].freq

[SGChannel 5 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[6].freq
get_cmd: nodetree.sgchannels[4].oscs[6].freq

[SGChannel 5 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 5
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 5 - SHOW
state_value_1: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[4].oscs[7].freq
get_cmd: nodetree.sgchannels[4].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 6

[SGChannel 6 - SHOW]
datatype: COMBO
group: SGChannel 6
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 6 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[0].freq
get_cmd: nodetree.sgchannels[5].oscs[0].freq

[SGChannel 6 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[1].freq
get_cmd: nodetree.sgchannels[5].oscs[1].freq

[SGChannel 6 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[2].freq
get_cmd: nodetree.sgchannels[5].oscs[2].freq

[SGChannel 6 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[3].freq
get_cmd: nodetree.sgchannels[5].oscs[3].freq

[SGChannel 6 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[4].freq
get_cmd: nodetree.sgchannels[5].oscs[4].freq

[SGChannel 6 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[5].freq
get_cmd: nodetree.sgchannels[5].oscs[5].freq

[SGChannel 6 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[6].freq
get_cmd: nodetree.sgchannels[5].oscs[6].freq

[SGChannel 6 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 6
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 6 - SHOW
state_value_1: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[5].oscs[7].freq
get_cmd: nodetree.sgchannels[5].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 7

[SGChannel 7 - SHOW]
datatype: COMBO
group: SGChannel 7
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 7 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[0].freq
get_cmd: nodetree.sgchannels[6].oscs[0].freq

[SGChannel 7 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[1].freq
get_cmd: nodetree.sgchannels[6].oscs[1].freq

[SGChannel 7 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[2].freq
get_cmd: nodetree.sgchannels[6].oscs[2].freq

[SGChannel 7 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[3].freq
get_cmd: nodetree.sgchannels[6].oscs[3].freq

[SGChannel 7 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[4].freq
get_cmd: nodetree.sgchannels[6].oscs[4].freq

[SGChannel 7 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[5].freq
get_cmd: nodetree.sgchannels[6].oscs[5].freq

[SGChannel 7 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[6].freq
get_cmd: nodetree.sgchannels[6].oscs[6].freq

[SGChannel 7 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 7
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 7 - SHOW
state_value_1: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[6].oscs[7].freq
get_cmd: nodetree.sgchannels[6].oscs[7].freq


#########################################
# SECTION: Oscillators
# GROUP: SGChannel 8

[SGChannel 8 - SHOW]
datatype: COMBO
group: SGChannel 8
section: Oscillators
label: SHOW
def_value: 1
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
show_in_measurement_dlg: False

[SGChannel 8 - Oscillator 1]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 1
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/0/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[0].freq
get_cmd: nodetree.sgchannels[7].oscs[0].freq

[SGChannel 8 - Oscillator 2]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 2
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/1/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[1].freq
get_cmd: nodetree.sgchannels[7].oscs[1].freq

[SGChannel 8 - Oscillator 3]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 3
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/2/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[2].freq
get_cmd: nodetree.sgchannels[7].oscs[2].freq

[SGChannel 8 - Oscillator 4]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 4
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/3/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[3].freq
get_cmd: nodetree.sgchannels[7].oscs[3].freq

[SGChannel 8 - Oscillator 5]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 5
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/4/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[4].freq
get_cmd: nodetree.sgchannels[7].oscs[4].freq

[SGChannel 8 - Oscillator 6]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 6
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/5/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[5].freq
get_cmd: nodetree.sgchannels[7].oscs[5].freq

[SGChannel 8 - Oscillator 7]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 7
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/6/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 7
state_value_2: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[6].freq
get_cmd: nodetree.sgchannels[7].oscs[6].freq

[SGChannel 8 - Oscillator 8]
datatype: DOUBLE
group: SGChannel 8
section: Oscillators
label: Oscillator 8
unit: Hz
def_value: 10000000.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/oscs/7/freq</b></p></body></html>
state_quant: SGChannel 8 - SHOW
state_value_1: 8
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: nodetree.sgchannels[7].oscs[7].freq
get_cmd: nodetree.sgchannels[7].oscs[7].freq


#########################################
# SECTION: Sines
# GROUP: SGChannel 1

[SGChannel 1 - Oscillator]
datatype: COMBO
group: SGChannel 1
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/0/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.osc_select
get_cmd: sgchannels[0].sine.osc_select

[SGChannel 1 - Phase]
datatype: DOUBLE
group: SGChannel 1
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/0/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.phase_shift
get_cmd: sgchannels[0].sine.phase_shift

[SGChannel 1 - I Enable]
datatype: BOOLEAN
group: SGChannel 1
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.i_enable
get_cmd: sgchannels[0].sine.i_enable

[SGChannel 1 - I SIN]
datatype: Double
group: SGChannel 1
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.i_sin
get_cmd: sgchannels[0].sine.i_sin

[SGChannel 1 - I COS]
datatype: Double
group: SGChannel 1
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.i_cos
get_cmd: sgchannels[0].sine.i_cos

[SGChannel 1 - Q Enable]
datatype: BOOLEAN
group: SGChannel 1
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.q_enable
get_cmd: sgchannels[0].sine.q_enable

[SGChannel 1 - Q SIN]
datatype: Double
group: SGChannel 1
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.q_sin
get_cmd: sgchannels[0].sine.q_sin

[SGChannel 1 - Q COS]
datatype: Double
group: SGChannel 1
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/0/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[0].sine.q_cos
get_cmd: sgchannels[0].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 2

[SGChannel 2 - Oscillator]
datatype: COMBO
group: SGChannel 2
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/1/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.osc_select
get_cmd: sgchannels[1].sine.osc_select

[SGChannel 2 - Phase]
datatype: DOUBLE
group: SGChannel 2
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/1/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.phase_shift
get_cmd: sgchannels[1].sine.phase_shift

[SGChannel 2 - I Enable]
datatype: BOOLEAN
group: SGChannel 2
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.i_enable
get_cmd: sgchannels[1].sine.i_enable

[SGChannel 2 - I SIN]
datatype: Double
group: SGChannel 2
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.i_sin
get_cmd: sgchannels[1].sine.i_sin

[SGChannel 2 - I COS]
datatype: Double
group: SGChannel 2
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.i_cos
get_cmd: sgchannels[1].sine.i_cos

[SGChannel 2 - Q Enable]
datatype: BOOLEAN
group: SGChannel 2
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.q_enable
get_cmd: sgchannels[1].sine.q_enable

[SGChannel 2 - Q SIN]
datatype: Double
group: SGChannel 2
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.q_sin
get_cmd: sgchannels[1].sine.q_sin

[SGChannel 2 - Q COS]
datatype: Double
group: SGChannel 2
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/1/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[1].sine.q_cos
get_cmd: sgchannels[1].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 3

[SGChannel 3 - Oscillator]
datatype: COMBO
group: SGChannel 3
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/2/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.osc_select
get_cmd: sgchannels[2].sine.osc_select

[SGChannel 3 - Phase]
datatype: DOUBLE
group: SGChannel 3
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/2/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.phase_shift
get_cmd: sgchannels[2].sine.phase_shift

[SGChannel 3 - I Enable]
datatype: BOOLEAN
group: SGChannel 3
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.i_enable
get_cmd: sgchannels[2].sine.i_enable

[SGChannel 3 - I SIN]
datatype: Double
group: SGChannel 3
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.i_sin
get_cmd: sgchannels[2].sine.i_sin

[SGChannel 3 - I COS]
datatype: Double
group: SGChannel 3
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.i_cos
get_cmd: sgchannels[2].sine.i_cos

[SGChannel 3 - Q Enable]
datatype: BOOLEAN
group: SGChannel 3
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.q_enable
get_cmd: sgchannels[2].sine.q_enable

[SGChannel 3 - Q SIN]
datatype: Double
group: SGChannel 3
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.q_sin
get_cmd: sgchannels[2].sine.q_sin

[SGChannel 3 - Q COS]
datatype: Double
group: SGChannel 3
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/2/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[2].sine.q_cos
get_cmd: sgchannels[2].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 4

[SGChannel 4 - Oscillator]
datatype: COMBO
group: SGChannel 4
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/3/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.osc_select
get_cmd: sgchannels[3].sine.osc_select

[SGChannel 4 - Phase]
datatype: DOUBLE
group: SGChannel 4
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/3/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.phase_shift
get_cmd: sgchannels[3].sine.phase_shift

[SGChannel 4 - I Enable]
datatype: BOOLEAN
group: SGChannel 4
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.i_enable
get_cmd: sgchannels[3].sine.i_enable

[SGChannel 4 - I SIN]
datatype: Double
group: SGChannel 4
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.i_sin
get_cmd: sgchannels[3].sine.i_sin

[SGChannel 4 - I COS]
datatype: Double
group: SGChannel 4
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.i_cos
get_cmd: sgchannels[3].sine.i_cos

[SGChannel 4 - Q Enable]
datatype: BOOLEAN
group: SGChannel 4
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.q_enable
get_cmd: sgchannels[3].sine.q_enable

[SGChannel 4 - Q SIN]
datatype: Double
group: SGChannel 4
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.q_sin
get_cmd: sgchannels[3].sine.q_sin

[SGChannel 4 - Q COS]
datatype: Double
group: SGChannel 4
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/3/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG4
model_value_2: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[3].sine.q_cos
get_cmd: sgchannels[3].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 5

[SGChannel 5 - Oscillator]
datatype: COMBO
group: SGChannel 5
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/4/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.osc_select
get_cmd: sgchannels[4].sine.osc_select

[SGChannel 5 - Phase]
datatype: DOUBLE
group: SGChannel 5
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/4/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.phase_shift
get_cmd: sgchannels[4].sine.phase_shift

[SGChannel 5 - I Enable]
datatype: BOOLEAN
group: SGChannel 5
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.i_enable
get_cmd: sgchannels[4].sine.i_enable

[SGChannel 5 - I SIN]
datatype: Double
group: SGChannel 5
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.i_sin
get_cmd: sgchannels[4].sine.i_sin

[SGChannel 5 - I COS]
datatype: Double
group: SGChannel 5
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.i_cos
get_cmd: sgchannels[4].sine.i_cos

[SGChannel 5 - Q Enable]
datatype: BOOLEAN
group: SGChannel 5
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.q_enable
get_cmd: sgchannels[4].sine.q_enable

[SGChannel 5 - Q SIN]
datatype: Double
group: SGChannel 5
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.q_sin
get_cmd: sgchannels[4].sine.q_sin

[SGChannel 5 - Q COS]
datatype: Double
group: SGChannel 5
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/4/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[4].sine.q_cos
get_cmd: sgchannels[4].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 6

[SGChannel 6 - Oscillator]
datatype: COMBO
group: SGChannel 6
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/5/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.osc_select
get_cmd: sgchannels[5].sine.osc_select

[SGChannel 6 - Phase]
datatype: DOUBLE
group: SGChannel 6
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/5/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.phase_shift
get_cmd: sgchannels[5].sine.phase_shift

[SGChannel 6 - I Enable]
datatype: BOOLEAN
group: SGChannel 6
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.i_enable
get_cmd: sgchannels[5].sine.i_enable

[SGChannel 6 - I SIN]
datatype: Double
group: SGChannel 6
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.i_sin
get_cmd: sgchannels[5].sine.i_sin

[SGChannel 6 - I COS]
datatype: Double
group: SGChannel 6
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.i_cos
get_cmd: sgchannels[5].sine.i_cos

[SGChannel 6 - Q Enable]
datatype: BOOLEAN
group: SGChannel 6
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.q_enable
get_cmd: sgchannels[5].sine.q_enable

[SGChannel 6 - Q SIN]
datatype: Double
group: SGChannel 6
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.q_sin
get_cmd: sgchannels[5].sine.q_sin

[SGChannel 6 - Q COS]
datatype: Double
group: SGChannel 6
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/5/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[5].sine.q_cos
get_cmd: sgchannels[5].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 7

[SGChannel 7 - Oscillator]
datatype: COMBO
group: SGChannel 7
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/6/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.osc_select
get_cmd: sgchannels[6].sine.osc_select

[SGChannel 7 - Phase]
datatype: DOUBLE
group: SGChannel 7
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/6/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.phase_shift
get_cmd: sgchannels[6].sine.phase_shift

[SGChannel 7 - I Enable]
datatype: BOOLEAN
group: SGChannel 7
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.i_enable
get_cmd: sgchannels[6].sine.i_enable

[SGChannel 7 - I SIN]
datatype: Double
group: SGChannel 7
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.i_sin
get_cmd: sgchannels[6].sine.i_sin

[SGChannel 7 - I COS]
datatype: Double
group: SGChannel 7
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.i_cos
get_cmd: sgchannels[6].sine.i_cos

[SGChannel 7 - Q Enable]
datatype: BOOLEAN
group: SGChannel 7
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.q_enable
get_cmd: sgchannels[6].sine.q_enable

[SGChannel 7 - Q SIN]
datatype: Double
group: SGChannel 7
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.q_sin
get_cmd: sgchannels[6].sine.q_sin

[SGChannel 7 - Q COS]
datatype: Double
group: SGChannel 7
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/6/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[6].sine.q_cos
get_cmd: sgchannels[6].sine.q_cos


#########################################
# SECTION: Sines
# GROUP: SGChannel 8

[SGChannel 8 - Oscillator]
datatype: COMBO
group: SGChannel 8
section: Sines
label: Oscillator
def_value: 1
tooltip: <html><body><p>Select oscillator for generation of this sine signal.</p><p><b>sgchannels/7/sines/0/oscselect</b></p></body></html>
combo_def_1: 1
cmd_def_1: 0
combo_def_2: 2
cmd_def_2: 1
combo_def_3: 3
cmd_def_3: 2
combo_def_4: 4
cmd_def_4: 3
combo_def_5: 5
cmd_def_5: 4
combo_def_6: 6
cmd_def_6: 5
combo_def_7: 7
cmd_def_7: 6
combo_def_8: 8
cmd_def_8: 7
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.osc_select
get_cmd: sgchannels[7].sine.osc_select

[SGChannel 8 - Phase]
datatype: DOUBLE
group: SGChannel 8
section: Sines
label: Phase
unit: deg
def_value: 0
tooltip: <html><body><p>Phase shift applied to sine signal.</p><p><b>sgchannels/7/sines/0/phaseshift</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.phase_shift
get_cmd: sgchannels[7].sine.phase_shift

[SGChannel 8 - I Enable]
datatype: BOOLEAN
group: SGChannel 8
section: Sines
label: I Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/i/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.i_enable
get_cmd: sgchannels[7].sine.i_enable

[SGChannel 8 - I SIN]
datatype: Double
group: SGChannel 8
section: Sines
label: I SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/i/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.i_sin
get_cmd: sgchannels[7].sine.i_sin

[SGChannel 8 - I COS]
datatype: Double
group: SGChannel 8
section: Sines
label: I COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/i/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.i_cos
get_cmd: sgchannels[7].sine.i_cos

[SGChannel 8 - Q Enable]
datatype: BOOLEAN
group: SGChannel 8
section: Sines
label: Q Enable
def_value: False
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/q/enable</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.q_enable
get_cmd: sgchannels[7].sine.q_enable

[SGChannel 8 - Q SIN]
datatype: Double
group: SGChannel 8
section: Sines
label: Q SIN
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/q/sin/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.q_sin
get_cmd: sgchannels[7].sine.q_sin

[SGChannel 8 - Q COS]
datatype: Double
group: SGChannel 8
section: Sines
label: Q COS
def_value: 0.0
tooltip: <html><body><p>[empty]</p><p><b>sgchannels/7/sines/0/q/cos/amplitude</b></p></body></html>
model_value_1: SHFSG8
permission: BOTH
show_in_measurement_dlg: False
set_cmd: sgchannels[7].sine.q_cos
get_cmd: sgchannels[7].sine.q_cos


#########################################
# SECTION: DIO
# GROUP: Digital I/O

[Digital I/O - Mode]
datatype: COMBO
group: Digital I/O
section: DIO
label: Mode
def_value: Manual
combo_def_1: Manual
cmd_def_1: 0
show_in_measurement_dlg: False
set_cmd: /dios/0/mode
get_cmd: /dios/0/mode

[Digital I/O - Output]
datatype: DOUBLE
group: Digital I/O
section: DIO
label: Output
def_value: 0
show_in_measurement_dlg: False
set_cmd: /dios/0/output
get_cmd: /dios/0/output

[Digital I/O - Drive]
datatype: DOUBLE
group: Digital I/O
section: DIO
label: Drive
def_value: 0
show_in_measurement_dlg: False
set_cmd: /dios/0/drive
get_cmd: /dios/0/drive

[Digital I/O - Interface]
datatype: COMBO
group: Digital I/O
section: DIO
label: Interface
def_value: LVCMOS
combo_def_1: LVCMOS
cmd_def_1: 0
combo_def_2: LVDS
cmd_def_2: 1
show_in_measurement_dlg: False
set_cmd: /dios/0/interface
get_cmd: /dios/0/interface

