
# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments UHFLI

# The version string should be updated whenever changes are made to this config file
version: 0.8

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_UHFLI
support_arm: True
support_hardware_loop: True
startup : Do nothing

interface: Other
# address: <autodetect>
[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: UHFLI

option_str_1: MF
option_str_2: DIG
option_str_3: AWG
option_str_4: PID
option_str_5: MOD
option_str_6: BOX



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#    datatype:           The data type should be one of DOUBLE, BOOLEAN, COMBO, STRING,
#                        COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE, BOOLEAN and COMBO
#                        datatypes can be stepped in a measurement. The BUTTON datatype does not have an
#                        associated value, and can therefore not be controlled from the Measurement
#                        program. It is typically used to manually force an instrument to perform a
#                        certain task. 
#    label:              Label shown next to control in user interface. If not
#                        specified, the label defaults to the name of the quantity.
#    unit:               Unit for the quantity.
#    def_value:          Default value.
#    tooltip:            Tool tip shown when hovering the mouse over the control
#                        in the driver GUI. HTML tags are used to ensure that
#                        tootips are wrapped in the UI.
#    low_lim:            Lowest allowable value. Defaults to -INF.
#    high_lim:           Highest allowable values. Defaults to +INF.
#    x_name:             X-axis label for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    x_unit:             X-axis unit for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    combo_def_1, combo_def_2, ...:      Options for a pull-down combo box. Only used when datatype is COMBO.
#    group:              Name of the group where the control belongs.
#    section:            Name of the section where the control belongs.
#    state_quant:        Quantity that determines this control's visibility.
#    state_value_1,state_value_2, ...:            Values of state_quant for which the control is visible.
#    model_value_1, model_value_2, ...:           Values of model for which the control is
#                        visible. The value must match one of the models defined in the Model and
#                        Options-section described above.
#    option_value_1, option_value_2, ...: Values of option for which the control is visible. 
#    permission:         Sets read/writability, options are BOTH, READ, WRITE or NONE.
#                        Default is BOTH. 
#    show_in_measurement_dlg:            This setting is optional. If True, the
#                        quantity will be automatically shown when adding the instrument to a Measurement
#                        configuration. This is useful for instrument that contain a lot of quantities,
#                        but where most are not likely to be stepped in a measurement.
#    set_cmd:            Command used to send data to the instrument. Put "<*>" where the value
#                        should appear. If "<*>" does not occur in the string, the value will be added
#                        after the command. 
#    get_cmd:            Command used to get the data from the instrument. Default is set_cmd?.
#    cmd_def_1, cmd_def_2, ...:       List of strings that define what is sent to/read from
#                        an instrument for a quantity that is defined as a a list of multiple options.
#                        Only used when datatype is COMBO.

# System

[System - Clock Source]
label: Clock Source
datatype: COMBO
group: System
section: Device
tooltip: <html><head/><body><p>10 MHz reference clock source.<br/><b>/system/extclk</b></p></body></html>
set_cmd: /system/extclk
get_cmd: /system/extclk
cmd_def_1: 0
combo_def_1: Internal
cmd_def_2: 1
combo_def_2: Ext 10 MHz


# Inputs - Voltage Input 1


[Voltage Input 1 - Range]
label: Range
datatype: DOUBLE
group: Voltage Input 1
section: Inputs
def_value: 1.0
unit: V
tooltip: <html><head/><body><p>Defines the gain of the analog input amplifier. The range should exceed the incoming signal by roughly a factor two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.<br/><b>/sigins/0/range</b></p></body></html>
set_cmd: /sigins/0/range
get_cmd: /sigins/0/range


[Voltage Input 1 - Scaling]
label: Scaling
datatype: DOUBLE
group: Voltage Input 1
section: Inputs
def_value: 1.0
tooltip: <html><head/><body><p>Applies the given scaling factor to the input signal.<br/><b>/sigins/0/scaling</b></p></body></html>
set_cmd: /sigins/0/scaling
get_cmd: /sigins/0/scaling


[Voltage Input 1 - AC]
label: AC
datatype: BOOLEAN
group: Voltage Input 1
section: Inputs
tooltip: <html><head/><body><p>Defines the input coupling for the Signal Inputs. AC coupling inserts a high-pass filter.<br/><b>/sigins/0/ac</b></p></body></html>
set_cmd: /sigins/0/ac
get_cmd: /sigins/0/ac


[Voltage Input 1 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
group: Voltage Input 1
section: Inputs
tooltip: <html><head/><body><p>Switches between 50 Ohm (ON) and 1 M Ohm (OFF).<br/><b>/sigins/0/imp50</b></p></body></html>
set_cmd: /sigins/0/imp50
get_cmd: /sigins/0/imp50


[Voltage Input 1 - Diff]
label: Diff
datatype: COMBO
group: Voltage Input 1
section: Inputs
tooltip: <html><head/><body><p>Switch input mode between normal (OFF), inverted, and differential. The differential modes are implemented digitally and are not suited for analog common-mode rejection.<br/><b>/sigins/0/diff</b></p></body></html>
set_cmd: /sigins/0/diff
get_cmd: /sigins/0/diff
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Inverted
cmd_def_3: 2
combo_def_3: Input 1 - Input 2
cmd_def_4: 3
combo_def_4: Input 2 - Input 1


# Inputs - Voltage Input 2


[Voltage Input 2 - Range]
label: Range
datatype: DOUBLE
group: Voltage Input 2
section: Inputs
def_value: 1.0
unit: V
tooltip: <html><head/><body><p>Defines the gain of the analog input amplifier. The range should exceed the incoming signal by roughly a factor two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.<br/><b>/sigins/1/range</b></p></body></html>
set_cmd: /sigins/1/range
get_cmd: /sigins/1/range


[Voltage Input 2 - Scaling]
label: Scaling
datatype: DOUBLE
group: Voltage Input 2
section: Inputs
def_value: 1.0
tooltip: <html><head/><body><p>Applies the given scaling factor to the input signal.<br/><b>/sigins/1/scaling</b></p></body></html>
set_cmd: /sigins/1/scaling
get_cmd: /sigins/1/scaling


[Voltage Input 2 - AC]
label: AC
datatype: BOOLEAN
group: Voltage Input 2
section: Inputs
tooltip: <html><head/><body><p>Defines the input coupling for the Signal Inputs. AC coupling inserts a high-pass filter.<br/><b>/sigins/1/ac</b></p></body></html>
set_cmd: /sigins/1/ac
get_cmd: /sigins/1/ac


[Voltage Input 2 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
group: Voltage Input 2
section: Inputs
tooltip: <html><head/><body><p>Switches between 50 Ohm (ON) and 1 M Ohm (OFF).<br/><b>/sigins/1/imp50</b></p></body></html>
set_cmd: /sigins/1/imp50
get_cmd: /sigins/1/imp50


[Voltage Input 2 - Diff]
label: Diff
datatype: COMBO
group: Voltage Input 2
section: Inputs
tooltip: <html><head/><body><p>Switch input mode between normal (OFF), inverted, and differential. The differential modes are implemented digitally and are not suited for analog common-mode rejection.<br/><b>/sigins/1/diff</b></p></body></html>
set_cmd: /sigins/1/diff
get_cmd: /sigins/1/diff
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Inverted
cmd_def_3: 2
combo_def_3: Input 2 - Input 1
cmd_def_4: 3
combo_def_4: Input 1 - Input 2


# Outputs - Output 1


[Output 1 - On]
label: On
datatype: BOOLEAN
group: Output 1
section: Outputs
tooltip: <html><head/><body><p>Enabling/Disabling the Signal Output. Corresponds to the blue LED indicator on the instrument front panel.<br/><b>/sigouts/0/on</b></p></body></html>
set_cmd: /sigouts/0/on
get_cmd: /sigouts/0/on


[Output 1 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
group: Output 1
section: Outputs
tooltip: <html><head/><body><p>Select the load impedance between 50 Ohm and HiZ. The impedance of the output is always 50 Ohm. For a load impedance of 50 Ohm the displayed voltage is half the output voltage to reflect the voltage seen at the load.<br/><b>/sigouts/0/imp50</b></p></body></html>
set_cmd: /sigouts/0/imp50
get_cmd: /sigouts/0/imp50


[Output 1 - Range]
label: Range
datatype: DOUBLE
group: Output 1
section: Outputs
def_value: 1.5
unit: V
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>/sigouts/0/range</b></p></body></html>
set_cmd: /sigouts/0/range
get_cmd: /sigouts/0/range


[Output 1 - Offset]
label: Offset
datatype: DOUBLE
group: Output 1
section: Outputs
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>/sigouts/0/offset</b></p></body></html>
set_cmd: /sigouts/0/offset
get_cmd: /sigouts/0/offset


# Outputs - Output 2


[Output 2 - On]
label: On
datatype: BOOLEAN
group: Output 2
section: Outputs
tooltip: <html><head/><body><p>Enabling/Disabling the Signal Output. Corresponds to the blue LED indicator on the instrument front panel.<br/><b>/sigouts/1/on</b></p></body></html>
set_cmd: /sigouts/1/on
get_cmd: /sigouts/1/on


[Output 2 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
group: Output 2
section: Outputs
tooltip: <html><head/><body><p>Select the load impedance between 50 Ohm and HiZ. The impedance of the output is always 50 Ohm. For a load impedance of 50 Ohm the displayed voltage is half the output voltage to reflect the voltage seen at the load.<br/><b>/sigouts/1/imp50</b></p></body></html>
set_cmd: /sigouts/1/imp50
get_cmd: /sigouts/1/imp50


[Output 2 - Range]
label: Range
datatype: DOUBLE
group: Output 2
section: Outputs
def_value: 1.5
unit: V
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>/sigouts/1/range</b></p></body></html>
set_cmd: /sigouts/1/range
get_cmd: /sigouts/1/range


[Output 2 - Offset]
label: Offset
datatype: DOUBLE
group: Output 2
section: Outputs
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>/sigouts/1/offset</b></p></body></html>
set_cmd: /sigouts/1/offset
get_cmd: /sigouts/1/offset


; [Output 1 Amplitudes - Amplitude 1]
; label: Amplitude 1
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/0</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/0
; get_cmd: /sigouts/0/amplitudes/0


; [Output 1 Amplitudes - On 1]
; label: On 1
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/0</b></p></body></html>
; set_cmd: /sigouts/0/enables/0
; get_cmd: /sigouts/0/enables/0


; [Output 1 Amplitudes - Amplitude 2]
; label: Amplitude 2
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/1</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/1
; get_cmd: /sigouts/0/amplitudes/1


; [Output 1 Amplitudes - On 2]
; label: On 2
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/1</b></p></body></html>
; set_cmd: /sigouts/0/enables/1
; get_cmd: /sigouts/0/enables/1


; [Output 1 Amplitudes - Amplitude 3]
; label: Amplitude 3
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/2</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/2
; get_cmd: /sigouts/0/amplitudes/2


; [Output 1 Amplitudes - On 3]
; label: On 3
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/2</b></p></body></html>
; set_cmd: /sigouts/0/enables/2
; get_cmd: /sigouts/0/enables/2


[Output 1 Amplitudes - Amplitude 4]
label: Amplitude 4
datatype: DOUBLE
group: Output 1 Amplitudes
section: Outputs
def_value: 0.15001
unit: V
tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/3</b></p></body></html>
set_cmd: /sigouts/0/amplitudes/3
get_cmd: /sigouts/0/amplitudes/3


[Output 1 Amplitudes - On 4]
label: On 4
datatype: BOOLEAN
group: Output 1 Amplitudes
section: Outputs
unit: V
tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/3</b></p></body></html>
set_cmd: /sigouts/0/enables/3
get_cmd: /sigouts/0/enables/3


; [Output 1 Amplitudes - Amplitude 5]
; label: Amplitude 5
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/4</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/4
; get_cmd: /sigouts/0/amplitudes/4


; [Output 1 Amplitudes - On 5]
; label: On 5
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/4</b></p></body></html>
; set_cmd: /sigouts/0/enables/4
; get_cmd: /sigouts/0/enables/4


; [Output 1 Amplitudes - Amplitude 6]
; label: Amplitude 6
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/5</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/5
; get_cmd: /sigouts/0/amplitudes/5


; [Output 1 Amplitudes - On 6]
; label: On 6
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/5</b></p></body></html>
; set_cmd: /sigouts/0/enables/5
; get_cmd: /sigouts/0/enables/5


; [Output 1 Amplitudes - Amplitude 7]
; label: Amplitude 7
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/6</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/6
; get_cmd: /sigouts/0/amplitudes/6


; [Output 1 Amplitudes - On 7]
; label: On 7
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/6</b></p></body></html>
; set_cmd: /sigouts/0/enables/6
; get_cmd: /sigouts/0/enables/6


; [Output 1 Amplitudes - Amplitude 8]
; label: Amplitude 8
; datatype: DOUBLE
; group: Output 1 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/0/amplitudes/7</b></p></body></html>
; set_cmd: /sigouts/0/amplitudes/7
; get_cmd: /sigouts/0/amplitudes/7


; [Output 1 Amplitudes - On 8]
; label: On 8
; datatype: BOOLEAN
; group: Output 1 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/0/enables/7</b></p></body></html>
; set_cmd: /sigouts/0/enables/7
; get_cmd: /sigouts/0/enables/7


; [Output 2 Amplitudes - Amplitude 1]
; label: Amplitude 1
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/0</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/0
; get_cmd: /sigouts/1/amplitudes/0


; [Output 2 Amplitudes - On 1]
; label: On 1
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/0</b></p></body></html>
; set_cmd: /sigouts/1/enables/0
; get_cmd: /sigouts/1/enables/0


; [Output 2 Amplitudes - Amplitude 2]
; label: Amplitude 2
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/1</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/1
; get_cmd: /sigouts/1/amplitudes/1


; [Output 2 Amplitudes - On 2]
; label: On 2
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/1</b></p></body></html>
; set_cmd: /sigouts/1/enables/1
; get_cmd: /sigouts/1/enables/1


; [Output 2 Amplitudes - Amplitude 3]
; label: Amplitude 3
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/2</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/2
; get_cmd: /sigouts/1/amplitudes/2


; [Output 2 Amplitudes - On 3]
; label: On 3
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/2</b></p></body></html>
; set_cmd: /sigouts/1/enables/2
; get_cmd: /sigouts/1/enables/2


; [Output 2 Amplitudes - Amplitude 4]
; label: Amplitude 4
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/3</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/3
; get_cmd: /sigouts/1/amplitudes/3


; [Output 2 Amplitudes - On 4]
; label: On 4
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/3</b></p></body></html>
; set_cmd: /sigouts/1/enables/3
; get_cmd: /sigouts/1/enables/3


; [Output 2 Amplitudes - Amplitude 5]
; label: Amplitude 5
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/4</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/4
; get_cmd: /sigouts/1/amplitudes/4


; [Output 2 Amplitudes - On 5]
; label: On 5
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/4</b></p></body></html>
; set_cmd: /sigouts/1/enables/4
; get_cmd: /sigouts/1/enables/4


; [Output 2 Amplitudes - Amplitude 6]
; label: Amplitude 6
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/5</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/5
; get_cmd: /sigouts/1/amplitudes/5


; [Output 2 Amplitudes - On 6]
; label: On 6
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/5</b></p></body></html>
; set_cmd: /sigouts/1/enables/5
; get_cmd: /sigouts/1/enables/5


; [Output 2 Amplitudes - Amplitude 7]
; label: Amplitude 7
; datatype: DOUBLE
; group: Output 2 Amplitudes
; section: Outputs
; def_value: 0.1
; unit: V
; tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/6</b></p></body></html>
; set_cmd: /sigouts/1/amplitudes/6
; get_cmd: /sigouts/1/amplitudes/6


; [Output 2 Amplitudes - On 7]
; label: On 7
; datatype: BOOLEAN
; group: Output 2 Amplitudes
; section: Outputs
; unit: V
; tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/6</b></p></body></html>
; set_cmd: /sigouts/1/enables/6
; get_cmd: /sigouts/1/enables/6


[Output 2 Amplitudes - Amplitude 8]
label: Amplitude 8
datatype: DOUBLE
group: Output 2 Amplitudes
section: Outputs
def_value: 0.1
unit: V
tooltip: <html><head/><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.<br/><b>/sigouts/1/amplitudes/7</b></p></body></html>
set_cmd: /sigouts/1/amplitudes/7
get_cmd: /sigouts/1/amplitudes/7


[Output 2 Amplitudes - On 8]
label: On 8
datatype: BOOLEAN
group: Output 2 Amplitudes
section: Outputs
unit: V
tooltip: <html><head/><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.<br/><b>/sigouts/1/enables/7</b></p></body></html>
set_cmd: /sigouts/1/enables/7
get_cmd: /sigouts/1/enables/7




# Aux - Aux Input 

[Aux Input - Value 1]
label: Value 1
datatype: DOUBLE
group: Aux Input
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage measured at the Auxiliary Input after averaging. The value of this node is updated at a low rate (50 Hz); the streaming node auxins/n/sample is updated at a high rate defined by the averaging.<br/><b>/auxins/0/values/0</b></p></body></html>
set_cmd: /auxins/0/values/0
get_cmd: /auxins/0/values/0
permission: READ


[Aux Input - Value 2]
label: Value 2
datatype: DOUBLE
group: Aux Input
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage measured at the Auxiliary Input after averaging. The value of this node is updated at a low rate (50 Hz); the streaming node auxins/n/sample is updated at a high rate defined by the averaging.<br/><b>/auxins/0/values/1</b></p></body></html>
set_cmd: /auxins/0/values/1
get_cmd: /auxins/0/values/1
permission: READ



# Aux - Aux Output 1 

[Aux Output 1 - Signal]
label: Signal
datatype: COMBO
group: Aux Output 1
section: Aux
def_value: Demod X
tooltip: <html><head/><body><p>Select the signal source to be represented on the Auxiliary Output.<br/><b>/auxouts/0/outputselect</b></p></body></html>
set_cmd: /auxouts/0/outputselect
get_cmd: /auxouts/0/outputselect
cmd_def_1: -1
combo_def_1: Manual
cmd_def_2: 0
combo_def_2: Demod X
cmd_def_3: 1
combo_def_3: Demod Y
cmd_def_4: 2
combo_def_4: Demod R
cmd_def_5: 3
combo_def_5: Demod Theta
cmd_def_6: 4
combo_def_6: AWG
cmd_def_7: 5
combo_def_7: PID Out
cmd_def_8: 6
combo_def_8: Boxcar
cmd_def_9: 7
combo_def_9: AU Cartesian
cmd_def_10: 8
combo_def_10: AU Polar
cmd_def_11: 9
combo_def_11: PID Shift
cmd_def_12: 10
combo_def_12: PID Error
cmd_def_13: 12
combo_def_13: CNT Out


[Aux Output 1 - Channel]
label: Channel
datatype: COMBO
group: Aux Output 1
section: Aux
def_value: 1
tooltip: <html><head/><body><p>Select the channel number of the selected signal source.<br/><b>/auxouts/0/demodselect</b></p></body></html>
set_cmd: /auxouts/0/demodselect
get_cmd: /auxouts/0/demodselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4


[Aux Output 1 - Preoffset]
label: Preoffset
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: 0.0
unit: Dependent
tooltip: <html><head/><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/0/preoffset</b></p></body></html>
set_cmd: /auxouts/0/preoffset
get_cmd: /auxouts/0/preoffset


[Aux Output 1 - Scale]
label: Scale
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: 10.0
tooltip: <html><head/><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/0/scale</b></p></body></html>
set_cmd: /auxouts/0/scale
get_cmd: /auxouts/0/scale


[Aux Output 1 - Offset]
label: Offset
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/0/offset</b></p></body></html>
set_cmd: /auxouts/0/offset
get_cmd: /auxouts/0/offset


[Aux Output 1 - Limit Lower]
label: Limit Lower
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: -10.0
unit: V
tooltip: <html><head/><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.<br/><b>/auxouts/0/limitlower</b></p></body></html>
set_cmd: /auxouts/0/limitlower
get_cmd: /auxouts/0/limitlower


[Aux Output 1 - Limit Upper]
label: Limit Upper
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: 10.0
unit: V
tooltip: <html><head/><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.<br/><b>/auxouts/0/limitupper</b></p></body></html>
set_cmd: /auxouts/0/limitupper
get_cmd: /auxouts/0/limitupper


[Aux Output 1 - Value]
label: Value
datatype: DOUBLE
group: Aux Output 1
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/0/value</b></p></body></html>
set_cmd: /auxouts/0/value
get_cmd: /auxouts/0/value
permission: READ

# Aux - Aux Output 2 

[Aux Output 2 - Signal]
label: Signal
datatype: COMBO
group: Aux Output 2
section: Aux
def_value: Demod X
tooltip: <html><head/><body><p>Select the signal source to be represented on the Auxiliary Output.<br/><b>/auxouts/1/outputselect</b></p></body></html>
set_cmd: /auxouts/1/outputselect
get_cmd: /auxouts/1/outputselect
cmd_def_1: -1
combo_def_1: Manual
cmd_def_2: 0
combo_def_2: Demod X
cmd_def_3: 1
combo_def_3: Demod Y
cmd_def_4: 2
combo_def_4: Demod R
cmd_def_5: 3
combo_def_5: Demod Theta
cmd_def_6: 4
combo_def_6: AWG
cmd_def_7: 5
combo_def_7: PID Out
cmd_def_8: 6
combo_def_8: Boxcar
cmd_def_9: 7
combo_def_9: AU Cartesian
cmd_def_10: 8
combo_def_10: AU Polar
cmd_def_11: 9
combo_def_11: PID Shift
cmd_def_12: 10
combo_def_12: PID Error
cmd_def_13: 12
combo_def_13: CNT Out


[Aux Output 2 - Channel]
label: Channel
datatype: COMBO
group: Aux Output 2
section: Aux
def_value: 1
tooltip: <html><head/><body><p>Select the channel number of the selected signal source.<br/><b>/auxouts/1/demodselect</b></p></body></html>
set_cmd: /auxouts/1/demodselect
get_cmd: /auxouts/1/demodselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4


[Aux Output 2 - Preoffset]
label: Preoffset
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: 0.0
unit: Dependent
tooltip: <html><head/><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/1/preoffset</b></p></body></html>
set_cmd: /auxouts/1/preoffset
get_cmd: /auxouts/1/preoffset


[Aux Output 2 - Scale]
label: Scale
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: 0.99998
tooltip: <html><head/><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/1/scale</b></p></body></html>
set_cmd: /auxouts/1/scale
get_cmd: /auxouts/1/scale


[Aux Output 2 - Offset]
label: Offset
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/1/offset</b></p></body></html>
set_cmd: /auxouts/1/offset
get_cmd: /auxouts/1/offset


[Aux Output 2 - Limit Lower]
label: Limit Lower
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: -10.0
unit: V
tooltip: <html><head/><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.<br/><b>/auxouts/1/limitlower</b></p></body></html>
set_cmd: /auxouts/1/limitlower
get_cmd: /auxouts/1/limitlower


[Aux Output 2 - Limit Upper]
label: Limit Upper
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: 10.0
unit: V
tooltip: <html><head/><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.<br/><b>/auxouts/1/limitupper</b></p></body></html>
set_cmd: /auxouts/1/limitupper
get_cmd: /auxouts/1/limitupper


[Aux Output 2 - Value]
label: Value
datatype: DOUBLE
group: Aux Output 2
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/1/value</b></p></body></html>
set_cmd: /auxouts/1/value
get_cmd: /auxouts/1/value
permission: READ

# Aux - Aux Output 3 

[Aux Output 3 - Signal]
label: Signal
datatype: COMBO
group: Aux Output 3
section: Aux
def_value: Demod X
tooltip: <html><head/><body><p>Select the signal source to be represented on the Auxiliary Output.<br/><b>/auxouts/2/outputselect</b></p></body></html>
set_cmd: /auxouts/2/outputselect
get_cmd: /auxouts/2/outputselect
cmd_def_1: -1
combo_def_1: Manual
cmd_def_2: 0
combo_def_2: Demod X
cmd_def_3: 1
combo_def_3: Demod Y
cmd_def_4: 2
combo_def_4: Demod R
cmd_def_5: 3
combo_def_5: Demod Theta
cmd_def_6: 4
combo_def_6: AWG
cmd_def_7: 5
combo_def_7: PID Out
cmd_def_8: 6
combo_def_8: Boxcar
cmd_def_9: 7
combo_def_9: AU Cartesian
cmd_def_10: 8
combo_def_10: AU Polar
cmd_def_11: 9
combo_def_11: PID Shift
cmd_def_12: 10
combo_def_12: PID Error
cmd_def_13: 12
combo_def_13: CNT Out


[Aux Output 3 - Channel]
label: Channel
datatype: COMBO
group: Aux Output 3
section: Aux
def_value: 2
tooltip: <html><head/><body><p>Select the channel number of the selected signal source.<br/><b>/auxouts/2/demodselect</b></p></body></html>
set_cmd: /auxouts/2/demodselect
get_cmd: /auxouts/2/demodselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4


[Aux Output 3 - Preoffset]
label: Preoffset
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: 0.0
unit: Dependent
tooltip: <html><head/><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/2/preoffset</b></p></body></html>
set_cmd: /auxouts/2/preoffset
get_cmd: /auxouts/2/preoffset


[Aux Output 3 - Scale]
label: Scale
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: 0.99998
tooltip: <html><head/><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/2/scale</b></p></body></html>
set_cmd: /auxouts/2/scale
get_cmd: /auxouts/2/scale


[Aux Output 3 - Offset]
label: Offset
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/2/offset</b></p></body></html>
set_cmd: /auxouts/2/offset
get_cmd: /auxouts/2/offset


[Aux Output 3 - Limit Lower]
label: Limit Lower
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: -10.0
unit: V
tooltip: <html><head/><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.<br/><b>/auxouts/2/limitlower</b></p></body></html>
set_cmd: /auxouts/2/limitlower
get_cmd: /auxouts/2/limitlower


[Aux Output 3 - Limit Upper]
label: Limit Upper
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: 10.0
unit: V
tooltip: <html><head/><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.<br/><b>/auxouts/2/limitupper</b></p></body></html>
set_cmd: /auxouts/2/limitupper
get_cmd: /auxouts/2/limitupper


[Aux Output 3 - Value]
label: Value
datatype: DOUBLE
group: Aux Output 3
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/2/value</b></p></body></html>
set_cmd: /auxouts/2/value
get_cmd: /auxouts/2/value
permission: READ

# Aux - Aux Output 4 

[Aux Output 4 - Signal]
label: Signal
datatype: COMBO
group: Aux Output 4
section: Aux
def_value: Demod X
tooltip: <html><head/><body><p>Select the signal source to be represented on the Auxiliary Output.<br/><b>/auxouts/3/outputselect</b></p></body></html>
set_cmd: /auxouts/3/outputselect
get_cmd: /auxouts/3/outputselect
cmd_def_1: -1
combo_def_1: Manual
cmd_def_2: 0
combo_def_2: Demod X
cmd_def_3: 1
combo_def_3: Demod Y
cmd_def_4: 2
combo_def_4: Demod R
cmd_def_5: 3
combo_def_5: Demod Theta
cmd_def_6: 4
combo_def_6: AWG
cmd_def_7: 5
combo_def_7: PID Out
cmd_def_8: 6
combo_def_8: Boxcar
cmd_def_9: 7
combo_def_9: AU Cartesian
cmd_def_10: 8
combo_def_10: AU Polar
cmd_def_11: 9
combo_def_11: PID Shift
cmd_def_12: 10
combo_def_12: PID Error
cmd_def_13: 12
combo_def_13: CNT Out


[Aux Output 4 - Channel]
label: Channel
datatype: COMBO
group: Aux Output 4
section: Aux
def_value: 2
tooltip: <html><head/><body><p>Select the channel number of the selected signal source.<br/><b>/auxouts/3/demodselect</b></p></body></html>
set_cmd: /auxouts/3/demodselect
get_cmd: /auxouts/3/demodselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4


[Aux Output 4 - Preoffset]
label: Preoffset
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: 0.0
unit: Dependent
tooltip: <html><head/><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/3/preoffset</b></p></body></html>
set_cmd: /auxouts/3/preoffset
get_cmd: /auxouts/3/preoffset


[Aux Output 4 - Scale]
label: Scale
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: 0.99998
tooltip: <html><head/><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/3/scale</b></p></body></html>
set_cmd: /auxouts/3/scale
get_cmd: /auxouts/3/scale


[Aux Output 4 - Offset]
label: Offset
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/3/offset</b></p></body></html>
set_cmd: /auxouts/3/offset
get_cmd: /auxouts/3/offset


[Aux Output 4 - Limit Lower]
label: Limit Lower
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: -10.0
unit: V
tooltip: <html><head/><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.<br/><b>/auxouts/3/limitlower</b></p></body></html>
set_cmd: /auxouts/3/limitlower
get_cmd: /auxouts/3/limitlower


[Aux Output 4 - Limit Upper]
label: Limit Upper
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: 10.0
unit: V
tooltip: <html><head/><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.<br/><b>/auxouts/3/limitupper</b></p></body></html>
set_cmd: /auxouts/3/limitupper
get_cmd: /auxouts/3/limitupper


[Aux Output 4 - Value]
label: Value
datatype: DOUBLE
group: Aux Output 4
section: Aux
def_value: 0.0
unit: V
tooltip: <html><head/><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset<br/><b>/auxouts/3/value</b></p></body></html>
set_cmd: /auxouts/3/value
get_cmd: /auxouts/3/value
permission: READ


# Oscillators


[Oscillators - Frequency 1]
label: Frequency 1
datatype: DOUBLE
group: Oscillators
section: Oscillators
def_value: 12123451.53432
unit: Hz
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/0/freq</b></p></body></html>
set_cmd: /oscs/0/freq
get_cmd: /oscs/0/freq


[Oscillators - Frequency 2]
label: Frequency 2
datatype: DOUBLE
group: Oscillators
section: Oscillators
def_value: 10000000.0
unit: Hz
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/1/freq</b></p></body></html>
set_cmd: /oscs/1/freq
get_cmd: /oscs/1/freq


; [Oscillators - Freqency 3]
; label: Freqency 3
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/2/freq</b></p></body></html>
; set_cmd: /oscs/2/freq
; get_cmd: /oscs/2/freq


; [Oscillators - Freqency 4]
; label: Freqency 4
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/3/freq</b></p></body></html>
; set_cmd: /oscs/3/freq
; get_cmd: /oscs/3/freq


; [Oscillators - Freqency 5]
; label: Freqency 5
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/4/freq</b></p></body></html>
; set_cmd: /oscs/4/freq
; get_cmd: /oscs/4/freq


; [Oscillators - Freqency 6]
; label: Freqency 6
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/5/freq</b></p></body></html>
; set_cmd: /oscs/5/freq
; get_cmd: /oscs/5/freq


; [Oscillators - Freqency 7]
; label: Freqency 7
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/6/freq</b></p></body></html>
; set_cmd: /oscs/6/freq
; get_cmd: /oscs/6/freq


; [Oscillators - Freqency 8]
; label: Freqency 8
; datatype: DOUBLE
; group: Oscillators
; section: Oscillators
; def_value: 10000000.0
; unit: Hz
; tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>/oscs/7/freq</b></p></body></html>
; set_cmd: /oscs/7/freq
; get_cmd: /oscs/7/freq


# Demodulator 1 - Frequency

[Demodulator 1 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 1
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/0/oscselect</b></p></body></html>
set_cmd: /demods/0/oscselect
get_cmd: /demods/0/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8


[Demodulator 1 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 1
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/0/harmonic</b></p></body></html>
set_cmd: /demods/0/harmonic
get_cmd: /demods/0/harmonic


[Demodulator 1 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 1
def_value: 2.00003
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/0/phaseshift</b></p></body></html>
set_cmd: /demods/0/phaseshift
get_cmd: /demods/0/phaseshift


[Demodulator 1 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 1
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/0/adcselect</b></p></body></html>
set_cmd: /demods/0/adcselect
get_cmd: /demods/0/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8


[Demodulator 1 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 1
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/0/order</b></p></body></html>
set_cmd: /demods/0/order
get_cmd: /demods/0/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7


[Demodulator 1 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 1
def_value: 1.00467
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/0/timeconstant</b></p></body></html>
set_cmd: /demods/0/timeconstant
get_cmd: /demods/0/timeconstant


[Demodulator 1 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 1
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/0/sinc</b></p></body></html>
set_cmd: /demods/0/sinc
get_cmd: /demods/0/sinc


[Demodulator 1 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 1
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/0/enable</b></p></body></html>
set_cmd: /demods/0/enable
get_cmd: /demods/0/enable
def_value: false


[Demodulator 1 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 1
def_value: 858.30688
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/0/rate</b></p></body></html>
set_cmd: /demods/0/rate
get_cmd: /demods/0/rate


[Demodulator 1 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 1
def_value: 0
unit: V
get_cmd: /demods/0/sample

# Demodulator 2 - Frequency

[Demodulator 2 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 2
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/1/oscselect</b></p></body></html>
set_cmd: /demods/1/oscselect
get_cmd: /demods/1/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8


[Demodulator 2 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 2
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/1/harmonic</b></p></body></html>
set_cmd: /demods/1/harmonic
get_cmd: /demods/1/harmonic


[Demodulator 2 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 2
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/1/phaseshift</b></p></body></html>
set_cmd: /demods/1/phaseshift
get_cmd: /demods/1/phaseshift


[Demodulator 2 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 2
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/1/adcselect</b></p></body></html>
set_cmd: /demods/1/adcselect
get_cmd: /demods/1/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8


[Demodulator 2 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 2
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/1/order</b></p></body></html>
set_cmd: /demods/1/order
get_cmd: /demods/1/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7


[Demodulator 2 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 2
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/1/timeconstant</b></p></body></html>
set_cmd: /demods/1/timeconstant
get_cmd: /demods/1/timeconstant


[Demodulator 2 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 2
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/1/sinc</b></p></body></html>
set_cmd: /demods/1/sinc
get_cmd: /demods/1/sinc


[Demodulator 2 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 2
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/1/enable</b></p></body></html>
set_cmd: /demods/1/enable
get_cmd: /demods/1/enable


[Demodulator 2 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 2
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/1/rate</b></p></body></html>
set_cmd: /demods/1/rate
get_cmd: /demods/1/rate

[Demodulator 2 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 2
def_value: 0
unit: V
get_cmd: /demods/1/sample


# Demodulator 3 - Frequency

[Demodulator 3 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 3
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/2/oscselect</b></p></body></html>
set_cmd: /demods/2/oscselect
get_cmd: /demods/2/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 3 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 3
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/2/harmonic</b></p></body></html>
set_cmd: /demods/2/harmonic
get_cmd: /demods/2/harmonic
option_value_1: MF


[Demodulator 3 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 3
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/2/phaseshift</b></p></body></html>
set_cmd: /demods/2/phaseshift
get_cmd: /demods/2/phaseshift
option_value_1: MF


[Demodulator 3 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 3
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/2/adcselect</b></p></body></html>
set_cmd: /demods/2/adcselect
get_cmd: /demods/2/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 3 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 3
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/2/order</b></p></body></html>
set_cmd: /demods/2/order
get_cmd: /demods/2/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 3 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 3
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/2/timeconstant</b></p></body></html>
set_cmd: /demods/2/timeconstant
get_cmd: /demods/2/timeconstant
option_value_1: MF


[Demodulator 3 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 3
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/2/sinc</b></p></body></html>
set_cmd: /demods/2/sinc
get_cmd: /demods/2/sinc
option_value_1: MF


[Demodulator 3 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 3
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/2/enable</b></p></body></html>
set_cmd: /demods/2/enable
get_cmd: /demods/2/enable
option_value_1: MF


[Demodulator 3 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 3
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/2/rate</b></p></body></html>
set_cmd: /demods/2/rate
get_cmd: /demods/2/rate
option_value_1: MF


[Demodulator 3 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 3
def_value: 0
unit: V
get_cmd: /demods/2/sample
option_value_1: MF


# Demodulator 4 - Frequency

[Demodulator 4 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 4
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/3/oscselect</b></p></body></html>
set_cmd: /demods/3/oscselect
get_cmd: /demods/3/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 4 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 4
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/3/harmonic</b></p></body></html>
set_cmd: /demods/3/harmonic
get_cmd: /demods/3/harmonic
option_value_1: MF


[Demodulator 4 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 4
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/3/phaseshift</b></p></body></html>
set_cmd: /demods/3/phaseshift
get_cmd: /demods/3/phaseshift
option_value_1: MF


[Demodulator 4 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 4
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/3/adcselect</b></p></body></html>
set_cmd: /demods/3/adcselect
get_cmd: /demods/3/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 4 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 4
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/3/order</b></p></body></html>
set_cmd: /demods/3/order
get_cmd: /demods/3/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 4 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 4
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/3/timeconstant</b></p></body></html>
set_cmd: /demods/3/timeconstant
get_cmd: /demods/3/timeconstant
option_value_1: MF


[Demodulator 4 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 4
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/3/sinc</b></p></body></html>
set_cmd: /demods/3/sinc
get_cmd: /demods/3/sinc
option_value_1: MF


[Demodulator 4 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 4
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/3/enable</b></p></body></html>
set_cmd: /demods/3/enable
get_cmd: /demods/3/enable
option_value_1: MF


[Demodulator 4 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 4
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/3/rate</b></p></body></html>
set_cmd: /demods/3/rate
get_cmd: /demods/3/rate
option_value_1: MF


[Demodulator 4 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 4
def_value: 0
unit: V
get_cmd: /demods/3/sample
option_value_1: MF


# Demodulator 5 - Frequency

[Demodulator 5 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 5
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/4/oscselect</b></p></body></html>
set_cmd: /demods/4/oscselect
get_cmd: /demods/4/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 5 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 5
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/4/harmonic</b></p></body></html>
set_cmd: /demods/4/harmonic
get_cmd: /demods/4/harmonic
option_value_1: MF


[Demodulator 5 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 5
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/4/phaseshift</b></p></body></html>
set_cmd: /demods/4/phaseshift
get_cmd: /demods/4/phaseshift
option_value_1: MF


[Demodulator 5 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 5
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/4/adcselect</b></p></body></html>
set_cmd: /demods/4/adcselect
get_cmd: /demods/4/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 5 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 5
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/4/order</b></p></body></html>
set_cmd: /demods/4/order
get_cmd: /demods/4/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 5 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 5
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/4/timeconstant</b></p></body></html>
set_cmd: /demods/4/timeconstant
get_cmd: /demods/4/timeconstant
option_value_1: MF


[Demodulator 5 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 5
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/4/sinc</b></p></body></html>
set_cmd: /demods/4/sinc
get_cmd: /demods/4/sinc
option_value_1: MF


[Demodulator 5 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 5
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/4/enable</b></p></body></html>
set_cmd: /demods/4/enable
get_cmd: /demods/4/enable
def_value: false
option_value_1: MF


[Demodulator 5 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 5
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/4/rate</b></p></body></html>
set_cmd: /demods/4/rate
get_cmd: /demods/4/rate
option_value_1: MF


[Demodulator 5 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 5
def_value: 0
unit: V
get_cmd: /demods/4/sample
option_value_1: MF


# Demodulator 6 - Frequency

[Demodulator 6 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 6
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/5/oscselect</b></p></body></html>
set_cmd: /demods/5/oscselect
get_cmd: /demods/5/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 6 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 6
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/5/harmonic</b></p></body></html>
set_cmd: /demods/5/harmonic
get_cmd: /demods/5/harmonic
option_value_1: MF


[Demodulator 6 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 6
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/5/phaseshift</b></p></body></html>
set_cmd: /demods/5/phaseshift
get_cmd: /demods/5/phaseshift
option_value_1: MF


[Demodulator 6 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 6
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/5/adcselect</b></p></body></html>
set_cmd: /demods/5/adcselect
get_cmd: /demods/5/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 6 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 6
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/5/order</b></p></body></html>
set_cmd: /demods/5/order
get_cmd: /demods/5/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 6 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 6
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/5/timeconstant</b></p></body></html>
set_cmd: /demods/5/timeconstant
get_cmd: /demods/5/timeconstant
option_value_1: MF


[Demodulator 6 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 6
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/5/sinc</b></p></body></html>
set_cmd: /demods/5/sinc
get_cmd: /demods/5/sinc
option_value_1: MF


[Demodulator 6 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 6
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/5/enable</b></p></body></html>
set_cmd: /demods/5/enable
get_cmd: /demods/5/enable
option_value_1: MF


[Demodulator 6 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 6
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/5/rate</b></p></body></html>
set_cmd: /demods/5/rate
get_cmd: /demods/5/rate
option_value_1: MF


[Demodulator 6 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 6
def_value: 0
unit: V
get_cmd: /demods/5/sample
option_value_1: MF


# Demodulator 7 - Frequency

[Demodulator 7 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 7
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/6/oscselect</b></p></body></html>
set_cmd: /demods/6/oscselect
get_cmd: /demods/6/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 7 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 7
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/6/harmonic</b></p></body></html>
set_cmd: /demods/6/harmonic
get_cmd: /demods/6/harmonic
option_value_1: MF


[Demodulator 7 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 7
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/6/phaseshift</b></p></body></html>
set_cmd: /demods/6/phaseshift
get_cmd: /demods/6/phaseshift
option_value_1: MF


[Demodulator 7 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 7
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/6/adcselect</b></p></body></html>
set_cmd: /demods/6/adcselect
get_cmd: /demods/6/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 7 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 7
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/6/order</b></p></body></html>
set_cmd: /demods/6/order
get_cmd: /demods/6/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 7 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 7
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/6/timeconstant</b></p></body></html>
set_cmd: /demods/6/timeconstant
get_cmd: /demods/6/timeconstant
option_value_1: MF


[Demodulator 7 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 7
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/6/sinc</b></p></body></html>
set_cmd: /demods/6/sinc
get_cmd: /demods/6/sinc
option_value_1: MF


[Demodulator 7 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 7
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/6/enable</b></p></body></html>
set_cmd: /demods/6/enable
get_cmd: /demods/6/enable
option_value_1: MF


[Demodulator 7 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 7
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/6/rate</b></p></body></html>
set_cmd: /demods/6/rate
get_cmd: /demods/6/rate
option_value_1: MF


[Demodulator 7 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 7
def_value: 0
unit: V
get_cmd: /demods/6/sample
option_value_1: MF

# Demodulator 8 - Frequency

[Demodulator 8 - Oscillator]
label: Oscillator
datatype: COMBO
group: Frequency
section: Demodulator 8
def_value: 1
tooltip: <html><head/><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.<br/><b>/demods/7/oscselect</b></p></body></html>
set_cmd: /demods/7/oscselect
get_cmd: /demods/7/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
option_value_1: MF


[Demodulator 8 - Harmonic]
label: Harmonic
datatype: DOUBLE
group: Frequency
section: Demodulator 8
def_value: 1
tooltip: <html><head/><body><p>Multiplies the demodulator's reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.<br/><b>/demods/7/harmonic</b></p></body></html>
set_cmd: /demods/7/harmonic
get_cmd: /demods/7/harmonic
option_value_1: MF


[Demodulator 8 - Phase Shift]
label: Phase Shift
datatype: DOUBLE
group: Frequency
section: Demodulator 8
def_value: 0.0
unit: deg
tooltip: <html><head/><body><p>Phase shift applied to the reference input of the demodulator.<br/><b>/demods/7/phaseshift</b></p></body></html>
set_cmd: /demods/7/phaseshift
get_cmd: /demods/7/phaseshift
option_value_1: MF


[Demodulator 8 - Signal]
label: Signal
datatype: COMBO
group: Input
section: Demodulator 8
def_value: Sig In 1
tooltip: <html><head/><body><p>Selects the input signal for the demodulator.<br/><b>/demods/7/adcselect</b></p></body></html>
set_cmd: /demods/7/adcselect
get_cmd: /demods/7/adcselect
cmd_def_1: 0
combo_def_1: Sig In 1
cmd_def_2: 1
combo_def_2: Sig In 2
cmd_def_3: 2
combo_def_3: Trigger 1
cmd_def_4: 3
combo_def_4: Trigger 2
cmd_def_5: 4
combo_def_5: Aux Out 1
cmd_def_6: 5
combo_def_6: Aux Out 2
cmd_def_7: 6
combo_def_7: Aux Out 3
cmd_def_8: 7
combo_def_8: Aux Out 4
cmd_def_9: 8
combo_def_9: Aux In 1
cmd_def_10: 9
combo_def_10: Aux In 2
cmd_def_11: 10
combo_def_11: Phase Demod 4
cmd_def_12: 11
combo_def_12: Phase Demod 8
option_value_1: MF


[Demodulator 8 - Filter Order]
label: Filter Order
datatype: COMBO
group: Low-Pass Filter
section: Demodulator 8
def_value: 3
tooltip: <html><head/><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.<br/><b>/demods/7/order</b></p></body></html>
set_cmd: /demods/7/order
get_cmd: /demods/7/order
cmd_def_1: 1
combo_def_1: 1
cmd_def_2: 2
combo_def_2: 2
cmd_def_3: 3
combo_def_3: 3
cmd_def_4: 4
combo_def_4: 4
cmd_def_5: 5
combo_def_5: 5
cmd_def_6: 6
combo_def_6: 6
cmd_def_7: 7
combo_def_7: 7
option_value_1: MF


[Demodulator 8 - Time Constant]
label: Time Constant
datatype: DOUBLE
group: Low-Pass Filter
section: Demodulator 8
def_value: 0.00081
unit: s
tooltip: <html><head/><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.<br/><b>/demods/7/timeconstant</b></p></body></html>
set_cmd: /demods/7/timeconstant
get_cmd: /demods/7/timeconstant
option_value_1: MF


[Demodulator 8 - Sinc]
label: Sinc
datatype: BOOLEAN
group: Low-Pass Filter
section: Demodulator 8
tooltip: <html><head/><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.<br/><b>/demods/7/sinc</b></p></body></html>
set_cmd: /demods/7/sinc
get_cmd: /demods/7/sinc
option_value_1: MF


[Demodulator 8 - Enable]
label: Enable
datatype: BOOLEAN
group: Data Transfer
section: Demodulator 8
tooltip: <html><head/><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.<br/><b>/demods/7/enable</b></p></body></html>
set_cmd: /demods/7/enable
get_cmd: /demods/7/enable
option_value_1: MF


[Demodulator 8 - Rate]
label: Rate
datatype: DOUBLE
group: Data Transfer
section: Demodulator 8
def_value: 1716.61377
unit: 1/s
tooltip: <html><head/><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.<br/><b>/demods/7/rate</b></p></body></html>
set_cmd: /demods/7/rate
get_cmd: /demods/7/rate
option_value_1: MF


[Demodulator 8 - Value]
label: Value
datatype: COMPLEX
group: Sample
section: Demodulator 8
def_value: 0
unit: V
get_cmd: /demods/7/sample
option_value_1: MF




#########################################
# SECTION: AWG Sequencer
# GROUP: AWG

[AWG - Run]
label: Run
datatype: BUTTON
section: Sequencer
group: Control
def_value: false
show_in_measurement_dlg: True
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>
set_cmd: /awgs/0/enable
get_cmd: /awgs/0/enable
option_value_1: AWG

[Control - Output 1]
label: Output 1
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: false
option_value_1: AWG

[Control - Output 2]
label: Output 2
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: false
option_value_1: AWG

[Control - Gain 1]
label: Gain 1
datatype: DOUBLE
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: 1.0
option_value_1: AWG

[Control - Gain 2]
label: Gain 2
datatype: DOUBLE
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: 1.0
option_value_1: AWG

[Waveform 1]
datatype: VECTOR
section: Sequencer
group: Sequencer
show_in_measurement_dlg: False
permission : WRITE
option_value_1: AWG

[Waveform 2]
datatype: VECTOR
section: Sequencer
group: Sequencer
show_in_measurement_dlg: False
permission : WRITE
option_value_1: AWG


#########################################
# SECTION: AWG Sequencer
# GROUP: AWG

[Sequencer - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer
group: Sequence
def_value: None
show_in_measurement_dlg: True
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Pulse Train
cmd_def_3: 2
combo_def_3: Custom
option_value_1: AWG

[Sequencer - Repetitions]
label: Repetitions
datatype: DOUBLE
section: Sequencer
group: Sequence
def_value: 100
show_in_measurement_dlg: True
state_quant: Sequencer - Sequence
state_value_1: Pulse Train
option_value_1: AWG

[Sequencer - Custom Path]
label: Path
datatype: PATH
section: Sequencer
group: Sequence
state_quant: Sequencer - Sequence
state_value_1: Custom
option_value_1: AWG


# DAQ Control - Measure


[DAQ - Measure]
label: Measure
datatype: BUTTON
group: DAQ Control
section: DAQ
option_value_1: DIG


[DAQ - Timeout]
label: Timeout
datatype: DOUBLE
group: DAQ Control
section: DAQ
unit: s
def_value: 20
option_value_1: DIG


[DAQ - Status]
label: Status
datatype: STRING
group: DAQ Control
section: DAQ
def_value: Ready for Measurement
permission: READ
option_value_1: DIG


[DAQ Signals - Number of Signals]
label: Number of Signals
datatype: COMBO
group: DAQ Control
section: DAQ
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
option_value_1: DIG


# DAQ Control - DAQ Signal 1


[DAQ Signal 1 - Source]
label: Source
datatype: COMBO
group: DAQ Signal 1
section: DAQ
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: DAQ Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[DAQ Signal 1 - Type Demod]
label: Type Demod
datatype: COMBO
group: DAQ Signal 1
section: DAQ
combo_def_1: x
combo_def_2: y
combo_def_3: r
combo_def_4: xiy
combo_def_5: theta
combo_def_6: frequency
combo_def_7: auxin0
combo_def_8: auxin1
combo_def_9: dio
state_quant: DAQ Signal 1 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
state_value_5: demod4
state_value_6: demod5
state_value_7: demod6
state_value_8: demod7
option_value_1: DIG


[DAQ Signal 1 - Type Imp]
label: Type Imp
datatype: COMBO
group: DAQ Signal 1
section: DAQ
combo_def_1: real
combo_def_2: imag
combo_def_3: abs
combo_def_4: theta
combo_def_5: frequency
combo_def_6: param0
combo_def_7: param1
state_quant: DAQ Signal 1 - Source
state_value_1: imp0
state_value_2: imp1
option_value_1: DIG


[DAQ Signal 1 - Operation]
label: Operation
datatype: COMBO
group: DAQ Signal 1
section: DAQ
def_value: avg
combo_def_1: avg
combo_def_2: std
combo_def_3: replace
state_quant: DAQ Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[DAQ Signal 1 - FFT]
label: FFT
datatype: BOOLEAN
group: DAQ Signal 1
section: DAQ
def_value: false
state_quant: DAQ Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[DAQ Signal 1 - Complex Selector]
label: Complex Selector
datatype: COMBO
group: DAQ Signal 1
section: DAQ
def_value: abs
combo_def_1: abs
combo_def_2: phase
combo_def_3: real
combo_def_4: imag
state_quant: DAQ Signal 1 - FFT
state_value_1: true
option_value_1: DIG


[DAQ Signal 1 - Trace]
label: Trace
datatype: VECTOR
group: DAQ Signal 1
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[DAQ Signal 1 - Trace FFT]
label: Trace
datatype: VECTOR
group: DAQ Signal 1
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
x_name: Frequency
x_unit: Hz
option_value_1: DIG


# DAQ Control - DAQ Signal 2


[DAQ Signal 2 - Source]
label: Source
datatype: COMBO
group: DAQ Signal 2
section: DAQ
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: DAQ Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[DAQ Signal 2 - Type Demod]
label: Type Demod
datatype: COMBO
group: DAQ Signal 2
section: DAQ
combo_def_1: x
combo_def_2: y
combo_def_3: r
combo_def_4: xiy
combo_def_5: theta
combo_def_6: frequency
combo_def_7: auxin0
combo_def_8: auxin1
combo_def_9: dio
state_quant: DAQ Signal 2 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
state_value_5: demod4
state_value_6: demod5
state_value_7: demod6
state_value_8: demod7
option_value_1: DIG


[DAQ Signal 2 - Type Imp]
label: Type Imp
datatype: COMBO
group: DAQ Signal 2
section: DAQ
combo_def_1: real
combo_def_2: imag
combo_def_3: abs
combo_def_4: theta
combo_def_5: frequency
combo_def_6: param0
combo_def_7: param1
state_quant: DAQ Signal 2 - Source
state_value_1: imp0
state_value_2: imp1
option_value_1: DIG


[DAQ Signal 2 - Operation]
label: Operation
datatype: COMBO
group: DAQ Signal 2
section: DAQ
def_value: avg
combo_def_1: avg
combo_def_2: std
combo_def_3: replace
state_quant: DAQ Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[DAQ Signal 2 - FFT]
label: FFT
datatype: BOOLEAN
group: DAQ Signal 2
section: DAQ
def_value: false
state_quant: DAQ Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[DAQ Signal 2 - Complex Selector]
label: Complex Selector
datatype: COMBO
group: DAQ Signal 2
section: DAQ
def_value: abs
combo_def_1: abs
combo_def_2: phase
combo_def_3: real
combo_def_4: imag
state_quant: DAQ Signal 2 - FFT
state_value_1: true
option_value_1: DIG


[DAQ Signal 2 - Trace]
label: Trace
datatype: VECTOR
group: DAQ Signal 2
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[DAQ Signal 2 - Trace FFT]
label: Trace
datatype: VECTOR
group: DAQ Signal 2
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
x_name: Frequency
x_unit: Hz
option_value_1: DIG


# DAQ Control - DAQ Signal 3


[DAQ Signal 3 - Source]
label: Source
datatype: COMBO
group: DAQ Signal 3
section: DAQ
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: DAQ Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[DAQ Signal 3 - Type Demod]
label: Type Demod
datatype: COMBO
group: DAQ Signal 3
section: DAQ
combo_def_1: x
combo_def_2: y
combo_def_3: r
combo_def_4: xiy
combo_def_5: theta
combo_def_6: frequency
combo_def_7: auxin0
combo_def_8: auxin1
combo_def_9: dio
state_quant: DAQ Signal 3 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
state_value_5: demod4
state_value_6: demod5
state_value_7: demod6
state_value_8: demod7
option_value_1: DIG


[DAQ Signal 3 - Type Imp]
label: Type Imp
datatype: COMBO
group: DAQ Signal 3
section: DAQ
combo_def_1: real
combo_def_2: imag
combo_def_3: abs
combo_def_4: theta
combo_def_5: frequency
combo_def_6: param0
combo_def_7: param1
state_quant: DAQ Signal 3 - Source
state_value_1: imp0
state_value_2: imp1
option_value_1: DIG


[DAQ Signal 3 - Operation]
label: Operation
datatype: COMBO
group: DAQ Signal 3
section: DAQ
def_value: avg
combo_def_1: avg
combo_def_2: std
combo_def_3: replace
state_quant: DAQ Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[DAQ Signal 3 - FFT]
label: FFT
datatype: BOOLEAN
group: DAQ Signal 3
section: DAQ
def_value: false
state_quant: DAQ Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[DAQ Signal 3 - Complex Selector]
label: Complex Selector
datatype: COMBO
group: DAQ Signal 3
section: DAQ
def_value: abs
combo_def_1: abs
combo_def_2: phase
combo_def_3: real
combo_def_4: imag
state_quant: DAQ Signal 3 - FFT
state_value_1: true
option_value_1: DIG


[DAQ Signal 3 - Trace]
label: Trace
datatype: VECTOR
group: DAQ Signal 3
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[DAQ Signal 3 - Trace FFT]
label: Trace
datatype: VECTOR
group: DAQ Signal 3
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 3
state_value_2: 4
x_name: Frequency
x_unit: Hz
option_value_1: DIG


# DAQ Control - DAQ Signal 4


[DAQ Signal 4 - Source]
label: Source
datatype: COMBO
group: DAQ Signal 4
section: DAQ
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: DAQ Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[DAQ Signal 4 - Type Demod]
label: Type Demod
datatype: COMBO
group: DAQ Signal 4
section: DAQ
combo_def_1: x
combo_def_2: y
combo_def_3: r
combo_def_4: xiy
combo_def_5: theta
combo_def_6: frequency
combo_def_7: auxin0
combo_def_8: auxin1
combo_def_9: dio
state_quant: DAQ Signal 4 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
state_value_5: demod4
state_value_6: demod5
state_value_7: demod6
state_value_8: demod7
option_value_1: DIG


[DAQ Signal 4 - Type Imp]
label: Type Imp
datatype: COMBO
group: DAQ Signal 4
section: DAQ
combo_def_1: real
combo_def_2: imag
combo_def_3: abs
combo_def_4: theta
combo_def_5: frequency
combo_def_6: param0
combo_def_7: param1
state_quant: DAQ Signal 4 - Source
state_value_1: imp0
state_value_2: imp1
option_value_1: DIG


[DAQ Signal 4 - Operation]
label: Operation
datatype: COMBO
group: DAQ Signal 4
section: DAQ
def_value: avg
combo_def_1: avg
combo_def_2: std
combo_def_3: replace
state_quant: DAQ Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[DAQ Signal 4 - FFT]
label: FFT
datatype: BOOLEAN
group: DAQ Signal 4
section: DAQ
def_value: false
state_quant: DAQ Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[DAQ Signal 4 - Complex Selector]
label: Complex Selector
datatype: COMBO
group: DAQ Signal 4
section: DAQ
def_value: abs
combo_def_1: abs
combo_def_2: phase
combo_def_3: real
combo_def_4: imag
state_quant: DAQ Signal 4 - FFT
state_value_1: true
option_value_1: DIG


[DAQ Signal 4 - Trace]
label: Trace
datatype: VECTOR
group: DAQ Signal 4
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[DAQ Signal 4 - Trace FFT]
label: Trace
datatype: VECTOR
group: DAQ Signal 4
section: DAQ
state_quant: DAQ Signals - Number of Signals
state_value_1: 4
x_name: Frequency
x_unit: Hz
option_value_1: DIG


# DAQ Trigger - DAQ Trigger


[DAQ Trigger - Trigger Source]
label: Trigger Source
datatype: COMBO
group: DAQ Trigger
section: DAQ
def_value: demod0
combo_def_1: auxin0
combo_def_2: demod0
combo_def_3: demod1
combo_def_4: demod2
combo_def_5: demod3
combo_def_6: demod4
combo_def_7: demod5
combo_def_8: demod6
combo_def_9: demod7
combo_def_10: cnt0
combo_def_11: cnt1
combo_def_12: cnt2
combo_def_13: cnt3
option_value_1: DIG


[DAQ Trigger - Trigger Type Demod]
label: Trigger Type Demod
datatype: COMBO
group: DAQ Trigger
section: DAQ
combo_def_1: x
combo_def_2: y
combo_def_3: r
combo_def_4: xiy
combo_def_5: theta
combo_def_6: frequency
combo_def_7: auxin0
combo_def_8: auxin1
combo_def_9: dio
combo_def_10: demod4phase
combo_def_11: demod8phase
combo_def_12: awgtrigger1
combo_def_13: awgtrigger2
combo_def_14: awgtrigger3
combo_def_15: awgtrigger4
combo_def_16: trigin1
combo_def_17: trigin2
combo_def_18: trigin3
combo_def_19: trigin4
combo_def_20: trigout1
combo_def_21: trigout2
combo_def_22: trigout3
combo_def_23: trigout4
state_quant: DAQ Trigger - Trigger Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
option_value_1: DIG


[DAQ Trigger - Trigger Type Aux]
label: Trigger Type Aux
datatype: COMBO
group: DAQ Trigger
section: DAQ
combo_def_1: auxin1
combo_def_2: auxin2
state_quant: DAQ Trigger - Trigger Source
state_value_1: auxin0
option_value_1: DIG


[DAQ Trigger - Trigger Type Imp]
label: Trigger Type Imp
datatype: COMBO
group: DAQ Trigger
section: DAQ
combo_def_1: auxin0
combo_def_2: demod0
combo_def_3: demod1
combo_def_4: demod2
combo_def_5: demod3
combo_def_6: demod4
combo_def_7: demod5
combo_def_8: demod6
combo_def_9: demod7
combo_def_10: cnt0
combo_def_11: cnt1
combo_def_12: cnt2
combo_def_13: cnt3
state_quant: DAQ Trigger - Trigger Source
state_value_1: imp0
state_value_2: imp1
option_value_1: DIG


[DAQ Trigger - Type]
label: Type
datatype: COMBO
group: DAQ Trigger
section: DAQ
def_value: edge
tooltip: <html><head/><body><p>Specifies when the module should acquire data.<br/><b>type</b></p></body></html>
set_cmd: type
get_cmd: type
combo_def_1: continuous
combo_def_2: edge
combo_def_3: dio
combo_def_4: pulse
combo_def_5: tracking
combo_def_6: change
combo_def_7: hardware
combo_def_8: tracking_pulse
combo_def_9: eventcount
option_value_1: DIG


[DAQ Trigger - Edge]
label: Edge
datatype: COMBO
group: DAQ Trigger
section: DAQ
def_value: rising
tooltip: <html><head/><body><p>The trigger edge to trigger upon when running an triggered acquisition mode.<br/><b>edge</b></p></body></html>
set_cmd: edge
get_cmd: edge
combo_def_1: rising
combo_def_2: falling
combo_def_3: both
option_value_1: DIG


[DAQ Trigger - Level]
label: Level
datatype: DOUBLE
group: DAQ Trigger
section: DAQ
def_value: 0.1
unit: Many
tooltip: <html><head/><body><p>The trigger level value.<br/><b>level</b></p></body></html>
set_cmd: level
get_cmd: level
option_value_1: DIG


[DAQ Trigger - Hysteresis]
label: Hysteresis
datatype: DOUBLE
group: DAQ Trigger
section: DAQ
def_value: 0.01
unit: Many
tooltip: <html><head/><body><p>If non-zero, hysteresis specifies an additional trigger criteria to level in the trigger condition. The trigger signal must first go higher, respectively lower, than the hysteresis value and then the trigger level for positive, respectively negative edge triggers. The hysteresis value is applied below the trigger level for positive trigger edge selection. It is applied above for negative trigger edge selection, and on both sides for triggering on both edges. A non-zero hysteresis value is helpful to trigger on the correct edge in the presence of noise to avoid false positives.<br/><b>hysteresis</b></p></body></html>
set_cmd: hysteresis
get_cmd: hysteresis
option_value_1: DIG


[DAQ Trigger - Count]
label: Count
datatype: DOUBLE
group: DAQ Trigger
section: DAQ
def_value: 1
tooltip: <html><head/><body><p>The number of trigger events to acquire in single-shot mode (when endless is set to 0).<br/><b>count</b></p></body></html>
set_cmd: count
get_cmd: count
option_value_1: DIG


[DAQ Trigger - Bandwidth]
label: Bandwidth
datatype: DOUBLE
group: DAQ Trigger
section: DAQ
def_value: 0.0
unit: Hz
tooltip: <html><head/><body><p>Set to a value other than 0 in order to apply a low-pass filter with the specified bandwidth to the triggernode signal before applying the trigger criteria. For edge and pulse trigger use a bandwidth larger than the trigger signal's sampling rate divided by 20 to keep the phase delay. For tracking filter use a bandwidth smaller than the trigger signal's sampling rate divided by 100 to track slow signal components like drifts. The value of the filtered signal is returned by read() under the path /DEV..../TRIGGER/LOWPASS.<br/><b>bandwidth</b></p></body></html>
set_cmd: bandwidth
get_cmd: bandwidth
option_value_1: DIG


# DAQ - DAQ Horizontal

[DAQ Horizontal - Holdoff Time]
label: Holdoff Time
datatype: DOUBLE
group: DAQ Horizontal
section: DAQ
def_value: 0.2
unit: Seconds
tooltip: <html><head/><body><p>The hold-off time before trigger acquisition is re-armed again. A hold-off time smaller than the duration will produce overlapped trigger frames.<br/><b>holdoff_time</b></p></body></html>
set_cmd: holdoff_time
get_cmd: holdoff_time
option_value_1: DIG


[DAQ Horizontal - Holdoff Count]
label: Holdoff Count
datatype: DOUBLE
group: DAQ Horizontal
section: DAQ
def_value: 0
tooltip: <html><head/><body><p>The number of skipped trigger events until the next trigger event is acquired.<br/><b>holdoff_count</b></p></body></html>
set_cmd: holdoff_count
get_cmd: holdoff_count
option_value_1: DIG


[DAQ Horizontal - Delay]
label: Delay
datatype: DOUBLE
group: DAQ Horizontal
section: DAQ
def_value: -0.001
unit: Seconds
tooltip: <html><head/><body><p>Time delay of trigger frame position (left side) relative to the trigger edge. delay=0: Trigger edge at left border; delay<0: trigger edge inside trigger frame (pretrigger); delay>0: trigger edge before trigger frame (posttrigger)<br/><b>delay</b></p></body></html>
set_cmd: delay
get_cmd: delay
option_value_1: DIG


[DAQ Horizontal - Refresh Rate]
label: Refresh Rate
datatype: DOUBLE
group: DAQ Horizontal
section: DAQ
def_value: 5.0
unit: Hz
tooltip: <html><head/><body><p>Set the maximum refresh rate of updated data in the returned grid. The actual refresh rate depends on other factors such as the hold-off time and duration.<br/><b>refreshrate</b></p></body></html>
set_cmd: refreshrate
get_cmd: refreshrate
option_value_1: DIG


# DAQ - DAQ FFT

[DAQ FFT - Window]
label: Window
datatype: COMBO
group: DAQ FFT
section: DAQ
tooltip: <html><head/><body><p>The FFT window function to use (default 1 = Hann). Depending on the application it makes a huge difference which of the provided window function is used. Please check the literature to find out the best trade off for your needs.<br/><b>fft_window</b></p></body></html>
set_cmd: fft_window
get_cmd: fft_window
combo_def_1: rectangular
combo_def_2: hann
combo_def_3: hamming
combo_def_4: blackman
combo_def_5: exponential
combo_def_6: sine
combo_def_7: cosine_squared
option_value_1: DIG

# DAQ - DAQ Grid

[DAQ Grid - Mode]
label: Mode
datatype: COMBO
group: DAQ Grid
section: DAQ
tooltip: <html><head/><body><p>Specify how the acquired data is sampled onto the matrix's horizontal axis (time or frequency). Each trigger event becomes a row in the matrix and each trigger event's subscribed data is sampled onto the grid defined by the number of columns (grid/cols) and resampled as specified with this parameter.<br/><b>grid_mode</b></p></body></html>
set_cmd: grid_mode
get_cmd: grid_mode
combo_def_1: nearest
combo_def_2: linear
combo_def_3: exact
option_value_1: DIG


[DAQ Grid - Columns]
label: Columns
datatype: DOUBLE
group: DAQ Grid
section: DAQ
def_value: 512
tooltip: <html><head/><body><p>Specify the number of columns in the returned data grid (matrix). The data along the horizontal axis is resampled to the number of samples defined by grid/cols. The grid/mode parameter specifies how the data is sample onto the time, respectively frequency, grid.<br/><b>grid_cols</b></p></body></html>
set_cmd: grid_cols
get_cmd: grid_cols
option_value_1: DIG


[DAQ Grid - Duration]
label: Duration
datatype: DOUBLE
group: DAQ Grid
section: DAQ
def_value: 0.01
unit: Seconds
tooltip: <html><head/><body><p>The recording length of each trigger event. This is an input parameter when the sampling mode (grid/mode) is either nearest or linear interpolation. In exact sampling mode duration is an output parameter; it is calculated and set by the module based on the value of grid/cols and the highest rate of all the subscribed signal paths.<br/><b>duration</b></p></body></html>
set_cmd: duration
get_cmd: duration
option_value_1: DIG


[DAQ Grid - Rows]
label: Rows
datatype: DOUBLE
group: DAQ Grid
section: DAQ
def_value: 1
tooltip: <html><head/><body><p>Specify the number of rows in the grid's matrix. Each row is the data recorded from one trigger event.<br/><b>grid_rows</b></p></body></html>
set_cmd: grid_rows
get_cmd: grid_rows
option_value_1: DIG


[DAQ Grid - Scan Direction]
label: Scan Direction
datatype: COMBO
group: DAQ Grid
section: DAQ
tooltip: <html><head/><body><p>The direction to organize data in the grid's matrix.<br/><b>grid_direction</b></p></body></html>
set_cmd: grid_direction
get_cmd: grid_direction
combo_def_1: forward
combo_def_2: reverse
combo_def_3: bidirectional
option_value_1: DIG


[DAQ Grid - Repetitions]
label: Repetitions
datatype: DOUBLE
group: DAQ Grid
section: DAQ
def_value: 1
tooltip: <html><head/><body><p>Number of statistical operations performed per grid. Only applied when the subscribed signal path is, for example, an average or a standard deviation.<br/><b>grid_repetitions</b></p></body></html>
set_cmd: grid_repetitions
get_cmd: grid_repetitions
option_value_1: DIG


[DAQ Grid - Row Repetitions]
label: Row Repetitions
datatype: BOOLEAN
group: DAQ Grid
section: DAQ
tooltip: <html><head/><body><p>Enable row-wise repetition. With row-wise repetition, each row is calculated from successive repetitions before starting the next row. With grid-wise repetition, the entire grid is calculated with each repetition.<br/><b>grid_rowrepetition</b></p></body></html>
set_cmd: grid_rowrepetition
get_cmd: grid_rowrepetition
option_value_1: DIG


[DAQ Grid - Waterfall]
label: Waterfall
datatype: BOOLEAN
group: DAQ Grid
section: DAQ
tooltip: <html><head/><body><p>Set to 1 to enable waterfall mode: Move the data upwards upon each trigger event; the data from newest trigger event is placed in row 0.<br/><b>grid_waterfall</b></p></body></html>
set_cmd: grid_waterfall
get_cmd: grid_waterfall
option_value_1: DIG


[DAQ Grid - Overwrite]
label: Overwrite
datatype: BOOLEAN
group: DAQ Grid
section: DAQ
tooltip: <html><head/><body><p>If enabled, the module will return only one data chunk (grid) when it is running, which will then be overwritten by subsequent trigger events.<br/><b>grid_overwrite</b></p></body></html>
set_cmd: grid_overwrite
get_cmd: grid_overwrite
option_value_1: DIG


# Sweeper - Measure


[Sweeper Control - Measure]
label: Measure
datatype: BUTTON
group: Sweeper Control
section: Sweeper
option_value_1: DIG


[Sweeper Control - Timeout]
label: Timeout
datatype: DOUBLE
group: Sweeper Control
section: Sweeper
unit: s
def_value: 20
option_value_1: DIG


[Sweeper Control - Status]
label: Status
datatype: STRING
group: Sweeper Control
section: Sweeper
def_value: Ready for Measurement
permission: READ
option_value_1: DIG


[Sweeper Signals - Number of Signals]
label: Number of Signals
datatype: COMBO
group: Sweeper Control
section: Sweeper
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
option_value_1: DIG


# Sweeper - Sweeper Signal 1


[Sweeper Signal 1 - Source]
label: Source
datatype: COMBO
group: Sweeper Signal 1
section: Sweeper
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: Sweeper Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[Sweeper Signal 1 - Type]
label: Type
datatype: COMBO
group: Sweeper Signal 1
section: Sweeper
def_value: r
combo_def_1: r
combo_def_2: phase
combo_def_3: x
combo_def_4: y
combo_def_5: auxin0
combo_def_6: auxin1
combo_def_7: frequency
state_quant: Sweeper Signal 1 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
option_value_1: DIG


[Sweeper Signal 1 - Operation]
label: Operation
datatype: COMBO
group: Sweeper Signal 1
section: Sweeper
def_value: none
combo_def_1: none
combo_def_2: pwr
combo_def_3: stddev
state_quant: Sweeper Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
option_value_1: DIG


[Sweeper Signal 1 - Trace]
label: Trace
datatype: VECTOR
group: Sweeper Signal 1
section: Sweeper
state_quant: Sweeper Signals - Number of Signals
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
x_name: Sweep Parameter
x_unit: #
option_value_1: DIG


# Sweeper - Sweeper Signal 2


[Sweeper Signal 2 - Source]
label: Source
datatype: COMBO
group: Sweeper Signal 2
section: Sweeper
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: Sweeper Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[Sweeper Signal 2 - Type]
label: Type
datatype: COMBO
group: Sweeper Signal 2
section: Sweeper
def_value: r
combo_def_1: r
combo_def_2: phase
combo_def_3: x
combo_def_4: y
combo_def_5: auxin0
combo_def_6: auxin1
combo_def_7: frequency
state_quant: Sweeper Signal 2 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
option_value_1: DIG


[Sweeper Signal 2 - Operation]
label: Operation
datatype: COMBO
group: Sweeper Signal 2
section: Sweeper
def_value: none
combo_def_1: none
combo_def_2: pwr
combo_def_3: stddev
state_quant: Sweeper Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
option_value_1: DIG


[Sweeper Signal 2 - Trace]
label: Trace
datatype: VECTOR
group: Sweeper Signal 2
section: Sweeper
state_quant: Sweeper Signals - Number of Signals
state_value_1: 2
state_value_2: 3
state_value_3: 4
x_name: Sweep Parameter
x_unit: #
option_value_1: DIG


# Sweeper - Sweeper Signal 3


[Sweeper Signal 3 - Source]
label: Source
datatype: COMBO
group: Sweeper Signal 3
section: Sweeper
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: Sweeper Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[Sweeper Signal 3 - Type]
label: Type
datatype: COMBO
group: Sweeper Signal 3
section: Sweeper
def_value: r
combo_def_1: r
combo_def_2: phase
combo_def_3: x
combo_def_4: y
combo_def_5: auxin0
combo_def_6: auxin1
combo_def_7: frequency
state_quant: Sweeper Signal 3 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
option_value_1: DIG


[Sweeper Signal 3 - Operation]
label: Operation
datatype: COMBO
group: Sweeper Signal 3
section: Sweeper
def_value: none
combo_def_1: none
combo_def_2: pwr
combo_def_3: stddev
state_quant: Sweeper Signals - Number of Signals
state_value_1: 3
state_value_2: 4
option_value_1: DIG


[Sweeper Signal 3 - Trace]
label: Trace
datatype: VECTOR
group: Sweeper Signal 3
section: Sweeper
state_quant: Sweeper Signals - Number of Signals
state_value_1: 3
state_value_2: 4
x_name: Sweep Parameter
x_unit: #
option_value_1: DIG


# Sweeper - Sweeper Signal 4


[Sweeper Signal 4 - Source]
label: Source
datatype: COMBO
group: Sweeper Signal 4
section: Sweeper
def_value: demod0
combo_def_1: dio0
combo_def_2: auxin0
combo_def_3: scope0
combo_def_4: boxcar0
combo_def_5: boxcar1
combo_def_6: outputpwa0
combo_def_7: outputpwa1
combo_def_8: inputpwa0
combo_def_9: inputpwa1
combo_def_10: aucart0
combo_def_11: aucart1
combo_def_12: aupolar0
combo_def_13: aupolar1
combo_def_14: cnt0
combo_def_15: cnt1
combo_def_16: cnt2
combo_def_17: cnt3
combo_def_18: demod0
combo_def_19: demod1
combo_def_20: demod2
combo_def_21: demod3
combo_def_22: demod4
combo_def_23: demod5
combo_def_24: demod6
combo_def_25: demod7
combo_def_26: pid0_value
combo_def_27: pid0_error
combo_def_28: pid0_shift
combo_def_29: pid1_value
combo_def_30: pid1_error
combo_def_31: pid1_shift
combo_def_32: pid2_value
combo_def_33: pid2_error
combo_def_34: pid2_shift
combo_def_35: pid3_value
combo_def_36: pid3_error
combo_def_37: pid3_shift
state_quant: Sweeper Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[Sweeper Signal 4 - Type]
label: Type
datatype: COMBO
group: Sweeper Signal 4
section: Sweeper
def_value: r
combo_def_1: r
combo_def_2: phase
combo_def_3: x
combo_def_4: y
combo_def_5: auxin0
combo_def_6: auxin1
combo_def_7: frequency
state_quant: Sweeper Signal 4 - Source
state_value_1: demod0
state_value_2: demod1
state_value_3: demod2
state_value_4: demod3
option_value_1: DIG


[Sweeper Signal 4 - Operation]
label: Operation
datatype: COMBO
group: Sweeper Signal 4
section: Sweeper
def_value: none
combo_def_1: none
combo_def_2: pwr
combo_def_3: stddev
state_quant: Sweeper Signals - Number of Signals
state_value_1: 4
option_value_1: DIG


[Sweeper Signal 4 - Trace]
label: Trace
datatype: VECTOR
group: Sweeper Signal 4
section: Sweeper
state_quant: Sweeper Signals - Number of Signals
state_value_1: 4
x_name: Sweep Parameter
x_unit: #
option_value_1: DIG


# Sweeper - Sweeper Horizontal

[Sweeper Horizontal - Sweeper - Parameter]
label: Sweeper - Parameter
datatype: COMBO
group: Sweeper Horizontal
section: Sweeper
def_value: frequency0
combo_def_1: auxout0_offset
combo_def_2: auxout1_offset
combo_def_3: auxout2_offset
combo_def_4: auxout3_offset
combo_def_5: awg_amplitude0
combo_def_6: awg_amplitude1
combo_def_7: awg_trigger0
combo_def_8: awg_trigger1
combo_def_9: awg_trigger2
combo_def_10: awg_trigger3
combo_def_11: awg_triggerlevel0
combo_def_12: awg_triggerlevel1
combo_def_13: awg_userreg0
combo_def_14: awg_userreg1
combo_def_15: awg_userreg2
combo_def_16: awg_userreg3
combo_def_17: awg_userreg4
combo_def_18: awg_userreg5
combo_def_19: awg_userreg6
combo_def_20: awg_userreg7
combo_def_21: awg_userreg8
combo_def_22: awg_userreg9
combo_def_23: awg_userreg10
combo_def_24: awg_userreg11
combo_def_25: awg_userreg12
combo_def_26: awg_userreg13
combo_def_27: awg_userreg14
combo_def_28: awg_userreg15
combo_def_29: boxcar0_windowsize
combo_def_30: boxcar0_windowstart
combo_def_31: boxcar1_windowsize
combo_def_32: boxcar1_windowstart
combo_def_33: mod0_carrieramp
combo_def_34: mod0_index
combo_def_35: mod0_sideband0amp
combo_def_36: mod0_sideband1amp
combo_def_37: mod1_carrieramp
combo_def_38: mod1_index
combo_def_39: mod1_sideband0amp
combo_def_40: mod1_sideband1amp
combo_def_41: demdod0_phase
combo_def_42: demdod1_phase
combo_def_43: demdod2_phase
combo_def_44: demdod3_phase
combo_def_45: demdod4_phase
combo_def_46: demdod5_phase
combo_def_47: demdod6_phase
combo_def_48: demdod7_phase
combo_def_49: frequency0
combo_def_50: frequency1
combo_def_51: frequency2
combo_def_52: frequency3
combo_def_53: frequency4
combo_def_54: frequency5
combo_def_55: frequency6
combo_def_56: frequency7
combo_def_57: pid0_setpoint
combo_def_58: pid1_setpoint
combo_def_59: pid2_setpoint
combo_def_60: pid3_setpoint
combo_def_61: output0_amp
combo_def_62: output0_offset
combo_def_63: output1_amp
combo_def_64: output2_offset
option_value_1: DIG


[Sweeper Horizontal - Start]
label: Start
datatype: DOUBLE
group: Sweeper Horizontal
section: Sweeper
def_value: 1000.0
unit: Many
tooltip: <html><head/><body><p>The start value of the sweep parameter.<br/><b>start</b></p></body></html>
set_cmd: start
get_cmd: start
option_value_1: DIG


[Sweeper Horizontal - Stop]
label: Stop
datatype: DOUBLE
group: Sweeper Horizontal
section: Sweeper
def_value: 510000.0
unit: Many
tooltip: <html><head/><body><p>The stop value of the sweep parameter.<br/><b>stop</b></p></body></html>
set_cmd: stop
get_cmd: stop
option_value_1: DIG


[Sweeper Horizontal - Length]
label: Length
datatype: DOUBLE
group: Sweeper Horizontal
section: Sweeper
def_value: 100
tooltip: <html><head/><body><p>The number of measurement points to set the sweep on.<br/><b>samplecount</b></p></body></html>
set_cmd: samplecount
get_cmd: samplecount
option_value_1: DIG


[Sweeper Horizontal - Mode]
label: Mode
datatype: COMBO
group: Sweeper Horizontal
section: Sweeper
tooltip: <html><head/><body><p>Selects the scanning type.<br/><b>scan</b></p></body></html>
set_cmd: scan
get_cmd: scan
combo_def_1: sequential
combo_def_2: binary
combo_def_3: bidirectional
combo_def_4: reverse
option_value_1: DIG


[Sweeper Horizontal - X Mapping]
label: X Mapping
datatype: COMBO
group: Sweeper Horizontal
section: Sweeper
tooltip: <html><head/><body><p>Selects the spacing of the grid used by sweep/gridnode (the sweep parameter).<br/><b>xmapping</b></p></body></html>
set_cmd: xmapping
get_cmd: xmapping
combo_def_1: linear
combo_def_2: logarithmic
option_value_1: DIG


# Sweeper Advanced

[Sweeper Advanced - Show]
label: Show Advanced
datatype: BOOLEAN
group: Sweeper Advanced
section: Sweeper
option_value_1: DIG


[Sweeper Advanced - Application]
label: Application Preset
datatype: COMBO
group: Sweeper Advanced
section: Sweeper
combo_def_1: parameter_sweep
combo_def_2: parameter_sweep_avg
combo_def_3: noise_amplitude_sweep
combo_def_4: frequency_response_analyzer
combo_def_5: omega_sweep
combo_def_6: fra_sinc_filter
combo_def_7: impedance
state_quant: Sweeper Advanced - Show
state_value_1: false
option_value_1: DIG


[Sweeper Advanced - BW Mode]
label: BW Mode
datatype: COMBO
group: Sweeper Advanced
section: Sweeper
tooltip: <html><head/><body><p>Specify how the sweeper should specify the bandwidth of each measurement point. Automatic is recommended, in particular for logarithmic sweeps and assures the whole spectrum is covered.<br/><b>bandwidthcontrol</b></p></body></html>
set_cmd: bandwidthcontrol
get_cmd: bandwidthcontrol
combo_def_1: manual
combo_def_2: fixed
combo_def_3: automatic
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Order]
label: Order
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 4
tooltip: <html><head/><body><p>Defines the filter roll off to use in Fixed bandwidth mode (sweep/bandwidthcontrol=1). Valid values are between 1 (6 dB/octave) and 8 (48 dB/octave).<br/><b>order</b></p></body></html>
set_cmd: order
get_cmd: order
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Max BW]
label: Max BW
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 1250000.0
unit: Hz
tooltip: <html><head/><body><p>Specifies the maximum bandwidth used when in Auto bandwidth mode (sweep/bandwidthcontrol=2). The default is 1.25 MHz.<br/><b>maxbandwidth</b></p></body></html>
set_cmd: maxbandwidth
get_cmd: maxbandwidth
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - BW Overlap]
label: BW Overlap
datatype: BOOLEAN
group: Sweeper Advanced
section: Sweeper
tooltip: <html><head/><body><p>If enabled the bandwidth of a sweep point may overlap with the frequency of neighboring sweep points. The effective bandwidth is only limited by the maximal bandwidth setting and omega suppression. As a result, the bandwidth is independent of the number of sweep points. For frequency response analysis bandwidth overlap should be enabled to achieve maximal sweep speed.<br/><b>bandwidthoverlap</b></p></body></html>
set_cmd: bandwidthoverlap
get_cmd: bandwidthoverlap
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Settling Time]
label: Settling Time
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 0.0
unit: Seconds
tooltip: <html><head/><body><p>Minimum wait time in seconds between setting the new sweep parameter value and the start of the measurement. The maximum between this value and sweep/settling/tc is taken as effective settling time.<br/><b>settling_time</b></p></body></html>
set_cmd: settling_time
get_cmd: settling_time
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Settling Inaccuray]
label: Settling Inaccuray
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 0.0001
tooltip: <html><head/><body><p>Demodulator filter settling inaccuracy defining the wait time between a sweep parameter change and recording of the next sweep point. The settling time is calculated as the time required to attain the specified remaining proportion [1e-13, 0.1] of an incoming step function. Typical inaccuracy values: 10m for highest sweep speed for large signals, 100u for precise amplitude measurements, 100n for precise noise measurements. Depending on the order of the demodulator filter the settling inaccuracy will define the number of filter time constants the sweeper has to wait. The maximum between this value and the settling time is taken as wait time until the next sweep point is recorded. See programming manual for the relationship between sweep/settling/inaccuracy and sweep/settling/tc.<br/><b>settling_inaccuracy</b></p></body></html>
set_cmd: settling_inaccuracy
get_cmd: settling_inaccuracy
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Averaging Sample]
label: Averaging Sample
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 1
unit: Samples
tooltip: <html><head/><body><p>Sets the number of data samples per sweeper parameter point that is considered in the measurement.<br/><b>averaging_sample</b></p></body></html>
set_cmd: averaging_sample
get_cmd: averaging_sample
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Averaging Time]
label: Averaging Time
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 0.0
unit: Seconds
tooltip: <html><head/><body><p>Sets the effective measurement time per sweeper parameter point that is considered in the measurement.<br/><b>averaging_time</b></p></body></html>
set_cmd: averaging_time
get_cmd: averaging_time
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Averaging TC]
label: Averaging TC
datatype: DOUBLE
group: Sweeper Advanced
section: Sweeper
def_value: 0.0
unit: TC
tooltip: <html><head/><body><p>Sets the effective number of time constants per sweeper parameter point that is considered in the measurement.<br/><b>averaging_tc</b></p></body></html>
set_cmd: averaging_tc
get_cmd: averaging_tc
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Phase Unwrap]
label: Phase Unwrap
datatype: BOOLEAN
group: Sweeper Advanced
section: Sweeper
tooltip: <html><head/><body><p>Enable unwrapping of slowly changing phase evolutions around the +/-180 degree boundary.<br/><b>phaseunwrap</b></p></body></html>
set_cmd: phaseunwrap
get_cmd: phaseunwrap
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - Sinc Filter]
label: Sinc Filter
datatype: BOOLEAN
group: Sweeper Advanced
section: Sweeper
tooltip: <html><head/><body><p>Enables the sinc filter if the sweep frequency is below 50 Hz. This will improve the sweep speed at low frequencies as omega components do not need to be suppressed by the normal low pass filter.<br/><b>sincfilter</b></p></body></html>
set_cmd: sincfilter
get_cmd: sincfilter
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG


[Sweeper Advanced - AWG Control]
label: AWG Control
datatype: BOOLEAN
group: Sweeper Advanced
section: Sweeper
tooltip: <html><head/><body><p>Enable AWG control for sweeper. If enabled the sweeper will automatically start the AWG and records the sweep sample based on the even index in hwtrigger.<br/><b>awgcontrol</b></p></body></html>
set_cmd: awgcontrol
get_cmd: awgcontrol
state_quant: Sweeper Advanced - Show
state_value_1: true
option_value_1: DIG