
# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments UHFQA

# The version string should be updated whenever changes are made to this config file
version: 0.9

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_UHFQA
support_arm: True
support_hardware_loop: True
startup : Do nothing

interface: Other
# address: <autodetect>
[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: UHFQA



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#    datatype:           The data type should be one of DOUBLE, BOOLEAN, COMBO, STRING,
#                        COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE, BOOLEAN and COMBO
#                        datatypes can be stepped in a measurement. The BUTTON datatype does not have an
#                        associated value, and can therefore not be controlled from the Measurement
#                        program. It is typically used to manually force an instrument to perform a
#                        certain task. 
#    label:              Label shown next to control in user interface. If not
#                        specified, the label defaults to the name of the quantity.
#    unit:               Unit for the quantity.
#    def_value:          Default value.
#    tooltip:            Tool tip shown when hovering the mouse over the control
#                        in the driver GUI. HTML tags are used to ensure that
#                        tootips are wrapped in the UI.
#    low_lim:            Lowest allowable value. Defaults to -INF.
#    high_lim:           Highest allowable values. Defaults to +INF.
#    x_name:             X-axis label for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    x_unit:             X-axis unit for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    combo_def_1, combo_def_2, ...:      Options for a pull-down combo box. Only used when datatype is COMBO.
#    group:              Name of the group where the control belongs.
#    section:            Name of the section where the control belongs.
#    state_quant:        Quantity that determines this control's visibility.
#    state_value_1,state_value_2, ...:            Values of state_quant for which the control is visible.
#    model_value_1, model_value_2, ...:           Values of model for which the control is
#                        visible. The value must match one of the models defined in the Model and
#                        Options-section described above.
#    option_value_1, option_value_2, ...: Values of option for which the control is visible. 
#    permission:         Sets read/writability, options are BOTH, READ, WRITE or NONE.
#                        Default is BOTH. 
#    show_in_measurement_dlg:            This setting is optional. If True, the
#                        quantity will be automatically shown when adding the instrument to a Measurement
#                        configuration. This is useful for instrument that contain a lot of quantities,
#                        but where most are not likely to be stepped in a measurement.
#    set_cmd:            Command used to send data to the instrument. Put "<*>" where the value
#                        should appear. If "<*>" does not occur in the string, the value will be added
#                        after the command. 
#    get_cmd:            Command used to get the data from the instrument. Default is set_cmd?.
#    cmd_def_1, cmd_def_2, ...:       List of strings that define what is sent to/read from
#                        an instrument for a quantity that is defined as a a list of multiple options.
#                        Only used when datatype is COMBO.

#########################################
# SECTION: Setup
# GROUP: Revisions

[Revisions - Data Server]
label: Data Server
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>Contains the revision number of the Zurich Instruments Data Server.<br/><b>/zi/about/revision</b></p></body></html>
get_cmd: /zi/about/revision
permission: READ

[Revisions - Firmware]
label: Firmware
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>Revision of the device-internal controller software.<br/><b>/system/fwrevision</b></p></body></html>
get_cmd: /system/fwrevision
permission: READ

[Revisions - FPGA]
label: FPGA
datatype: STRING
section: Setup
group: Revisions
def_value:
tooltip: <html><head/><body><p>HDL firmware revision.<br/><b>/system/fpgarevision</b></p></body></html>
get_cmd: /system/fpgarevision
permission: READ


#########################################
# SECTION: Setup
# GROUP: Preset

[Preset - Factory Reset]
label: Factory Reset
datatype: BUTTON
section: Setup
group: Preset
tooltip: <html><head/><body><p>Load the factory default settings.<br/></p></body></html>
permission: BOTH


#########################################
# SECTION: Setup
# GROUP: PQSC

[PQSC - Connect to PQSC]
label: Connect to PQSC
datatype: BOOLEAN
section: Setup
group: PQSC
def_value: False
tooltip: <html><head/><body><p>Configure the instrument to work with PQSC.<br/></p></body></html>
permission: WRITE
show_in_measurement_dlg: True


#########################################
# SECTION: Setup
# GROUP: Device

[Device - Reference Clock]
label: Reference Clock
datatype: COMBO
section: Setup
group: Device
def_value: Internal
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>10 MHz reference clock source.<br/><b>system/extclk</b></p></body></html>
set_cmd: /system/extclk
get_cmd: /system/extclk
state_quant: PQSC - Connect to PQSC
state_value_1: False
cmd_def_1: 0
combo_def_1: Internal
cmd_def_2: 1
combo_def_2: External 10 MHz


#########################################
# SECTION: Inputs
# GROUP: Input 1

[Input 1 - Range]
label: Range
datatype: DOUBLE
section: Inputs/Outputs
group: Input 1
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: Defines the gain of the analog input amplifier. The range should exceed the incoming signal by roughly a factor two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.
set_cmd: /sigins/0/range
get_cmd: /sigins/0/range

[Input 1 - Scaling]
label: Scaling
datatype: DOUBLE
section: Inputs/Outputs
group: Input 1
def_value: 1.0
show_in_measurement_dlg: False
tooltip: Applies the given scaling factor to the input signal.
set_cmd: /sigins/0/scaling
get_cmd: /sigins/0/scaling

[Input 1 - AC]
label: AC
datatype: BOOLEAN
section: Inputs/Outputs
group: Input 1
def_value: 0
show_in_measurement_dlg: False
tooltip: Defines the input coupling for the Signal Inputs. AC coupling inserts a high-pass filter.
set_cmd: /sigins/0/ac
get_cmd: /sigins/0/ac

[Input 1 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: Inputs/Outputs
group: Input 1
def_value: 1
show_in_measurement_dlg: False
tooltip: Switches between 50 Ohm (ON) and 1 M Ohm (OFF).>
set_cmd: /sigins/0/imp50
get_cmd: /sigins/0/imp50

[Input 1 - Diff]
label: Diff
datatype: COMBO
section: Inputs/Outputs
group: Input 1
show_in_measurement_dlg: False
tooltip: Switch input mode between normal (OFF), inverted, and differential. The differential modes are implemented digitally and are not suited for analog common-mode rejection.
set_cmd: /sigins/0/diff
get_cmd: /sigins/0/diff
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Inverted
cmd_def_3: 3
combo_def_3: Input 2 - Input 1
cmd_def_4: 4
combo_def_4: Input 1 - Input 2


#########################################
# SECTION: Inputs
# GROUP: Input 2

[Input 2 - Range]
label: Range
datatype: DOUBLE
section: Inputs/Outputs
group: Input 2
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the gain of the analog input amplifier. The range should exceed the incoming signal by roughly a factor two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.<br/><b>sigins/1/range</b></p></body></html>
set_cmd: /sigins/1/range
get_cmd: /sigins/1/range

[Input 2 - Scaling]
label: Scaling
datatype: DOUBLE
section: Inputs/Outputs
group: Input 2
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Applies the given scaling factor to the input signal.<br/><b>sigins/1/scaling</b></p></body></html>
set_cmd: /sigins/1/scaling
get_cmd: /sigins/1/scaling

[Input 2 - AC]
label: AC
datatype: BOOLEAN
section: Inputs/Outputs
group: Input 2
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the input coupling for the Signal Inputs. AC coupling inserts a high-pass filter.<br/><b>sigins/1/ac</b></p></body></html>
set_cmd: /sigins/1/ac
get_cmd: /sigins/1/ac

[Input 2 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: Inputs/Outputs
group: Input 2
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Switches between 50 Ohm (ON) and 1 M Ohm (OFF).<br/><b>sigins/1/imp50</b></p></body></html>
set_cmd: /sigins/1/imp50
get_cmd: /sigins/1/imp50

[Input 2 - Diff]
label: Diff
datatype: COMBO
section: Inputs/Outputs
group: Input 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Switch input mode between normal (OFF), inverted, and differential. The differential modes are implemented digitally and are not suited for analog common-mode rejection.<br/><b>sigins/1/diff</b></p></body></html>
set_cmd: /sigins/1/diff
get_cmd: /sigins/1/diff
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Inverted
cmd_def_3: 3
combo_def_3: Input 2 - Input 1
cmd_def_4: 4
combo_def_4: Input 1 - Input 2



#########################################
# SECTION: Outputs
# GROUP: Output 1

[Output 1 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: Inputs/Outputs
group: Output 1
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the load impedance between 50 Ohm and HiZ. The impedance of the output is always 50 Ohm. For a load impedance of 50 Ohm the displayed voltage is half the output voltage to reflect the voltage seen at the load.<br/><b>sigouts/0/imp50</b></p></body></html>
set_cmd: /sigouts/0/imp50
get_cmd: /sigouts/0/imp50

[Output 1 - Range]
label: Range
datatype: DOUBLE
section: Inputs/Outputs
group: Output 1
def_value: 1.5
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/0/range</b></p></body></html>
set_cmd: /sigouts/0/range
get_cmd: /sigouts/0/range


[Output 1 - Offset]
label: Offset
datatype: DOUBLE
section: Inputs/Outputs
group: Output 1
def_value: 0.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/0/offset</b></p></body></html>
set_cmd: /sigouts/0/offset
get_cmd: /sigouts/0/offset


#########################################
# SECTION: Outputs
# GROUP: Output 2

; [Output 2 - On]
; label: On
; datatype: BOOLEAN
; section: Inputs/Outputs
; group: Output 2
; def_value: 0
; show_in_measurement_dlg: True
; tooltip: <html><head/><body><p>Enabling/Disabling the Signal Output. Corresponds to the blue LED indicator on the instrument front panel.<br/><b>sigouts/1/on</b></p></body></html>
; set_cmd: /sigouts/1/on
; get_cmd: /sigouts/1/on

[Output 2 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: Inputs/Outputs
group: Output 2
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the load impedance between 50 Ohm and HiZ. The impedance of the output is always 50 Ohm. For a load impedance of 50 Ohm the displayed voltage is half the output voltage to reflect the voltage seen at the load.<br/><b>sigouts/1/imp50</b></p></body></html>
set_cmd: /sigouts/1/imp50
get_cmd: /sigouts/1/imp50

[Output 2 - Range]
label: Range
datatype: DOUBLE
section: Inputs/Outputs
group: Output 2
def_value: 1.5
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/1/range</b></p></body></html>
set_cmd: /sigouts/1/range
get_cmd: /sigouts/1/range


[Output 2 - Offset]
label: Offset
datatype: DOUBLE
section: Inputs/Outputs
group: Output 2
def_value: 0.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/1/offset</b></p></body></html>
set_cmd: /sigouts/1/offset
get_cmd: /sigouts/1/offset



#########################################
# SECTION: QA Itegration
# GROUP: Integration

[Integration - Time]
label: Integration Time
unit: s
datatype: DOUBLE
section: QA Setup
group: Integration
def_value: 2.2755e-6
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Integration time of all weighted integration units. A maximum of 4096 samples can be integrated, which corresponds to 2.275 us.</p></body></html>


[Delay - Delay]
label: Delay
datatype: DOUBLE
section: QA Setup
group: Integration
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Delay in units of samples that adjusts the time at which the integration starts in relation to the trigger signal of the weighted integration units.<br/><b>qas/0/delay</b></p></body></html>
set_cmd: /qas/0/delay
get_cmd: /qas/0/delay

#########################################
# SECTION: QA Setup
# GROUP: Deskew

[Deskew - Matrix (0,0)]
label: Matrix (0,0)
datatype: DOUBLE
section: QA Setup
group: Deskew
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Implements a 2x2 matrix multiplication. The two input signals are treated as a vector with two elements and the result is a vector as well.<br/><b>qas/0/deskew/rows/0/cols/0</b></p></body></html>
set_cmd: /qas/0/deskew/rows/0/cols/0
get_cmd: /qas/0/deskew/rows/0/cols/0

[Deskew - Matrix (0,1)]
label: Matrix (0,1)
datatype: DOUBLE
section: QA Setup
group: Deskew
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Implements a 2x2 matrix multiplication. The two input signals are treated as a vector with two elements and the result is a vector as well.<br/><b>qas/0/deskew/rows/0/cols/1</b></p></body></html>
set_cmd: /qas/0/deskew/rows/0/cols/1
get_cmd: /qas/0/deskew/rows/0/cols/1

[Deskew - Matrix (1,0)]
label: Matrix (1,0)
datatype: DOUBLE
section: QA Setup
group: Deskew
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Implements a 2x2 matrix multiplication. The two input signals are treated as a vector with two elements and the result is a vector as well.<br/><b>qas/0/deskew/rows/1/cols/0</b></p></body></html>
set_cmd: /qas/0/deskew/rows/1/cols/0
get_cmd: /qas/0/deskew/rows/1/cols/0

[Deskew - Matrix (1,1)]
label: Matrix (1,1)
datatype: DOUBLE
section: QA Setup
group: Deskew
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Implements a 2x2 matrix multiplication. The two input signals are treated as a vector with two elements and the result is a vector as well.<br/><b>qas/0/deskew/rows/1/cols/1</b></p></body></html>
set_cmd: /qas/0/deskew/rows/1/cols/1
get_cmd: /qas/0/deskew/rows/1/cols/1



#########################################
# SECTION: QA Setup
# GROUP: Crosstalk

[Crosstalk - Bypass]
label: Bypass
datatype: BOOLEAN
section: QA Setup
group: Crosstalk
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Bypass the Crosstalk matrix in order to reduce the latency through the system.<br/><b>qas/0/crosstalk/bypass</b></p></body></html>
set_cmd: /qas/0/crosstalk/bypass
get_cmd: /qas/0/crosstalk/bypass

[Crosstalk - Reset]
label: Reset
datatype: BUTTON
section: QA Setup
group: Crosstalk
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Reset the crosstalk matrix to the identity.</p></body></html>
state_quant: Crosstalk - Bypass
state_value_1: False





#########################################
# SECTION: QA Setup
# GROUP: Crosstalk

[Crosstalk - advanced]
section: QA Setup
group: Crosstalk
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
combo_def_10: 9
combo_def_11: 10
def_value: 1
state_quant: Crosstalk - Bypass
state_value_1: False

[Crosstalk - 1 , 1]
label: Crosstalk - 1 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/0
get_cmd: /qas/0/crosstalk/rows/0/cols/0
state_quant: Crosstalk - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10

[Crosstalk - 1 , 2]
label: Crosstalk - 1 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/1
get_cmd: /qas/0/crosstalk/rows/0/cols/1
state_quant: Crosstalk - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10

[Crosstalk - 1 , 3]
label: Crosstalk - 1 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/2
get_cmd: /qas/0/crosstalk/rows/0/cols/2
state_quant: Crosstalk - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10

[Crosstalk - 1 , 4]
label: Crosstalk - 1 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/3
get_cmd: /qas/0/crosstalk/rows/0/cols/3
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 1 , 5]
label: Crosstalk - 1 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/4
get_cmd: /qas/0/crosstalk/rows/0/cols/4
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 1 , 6]
label: Crosstalk - 1 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/5
get_cmd: /qas/0/crosstalk/rows/0/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 1 , 7]
label: Crosstalk - 1 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/6
get_cmd: /qas/0/crosstalk/rows/0/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 1 , 8]
label: Crosstalk - 1 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/7
get_cmd: /qas/0/crosstalk/rows/0/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 1 , 9]
label: Crosstalk - 1 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/8
get_cmd: /qas/0/crosstalk/rows/0/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 1 , 10]
label: Crosstalk - 1 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/0/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/0/cols/9
get_cmd: /qas/0/crosstalk/rows/0/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 2

[Crosstalk - 2 , 1]
label: Crosstalk - 2 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/0
get_cmd: /qas/0/crosstalk/rows/1/cols/0
state_quant: Crosstalk - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10

[Crosstalk - 2 , 2]
label: Crosstalk - 2 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/1
get_cmd: /qas/0/crosstalk/rows/1/cols/1
state_quant: Crosstalk - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10

[Crosstalk - 2 , 3]
label: Crosstalk - 2 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/2
get_cmd: /qas/0/crosstalk/rows/1/cols/2
state_quant: Crosstalk - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10

[Crosstalk - 2 , 4]
label: Crosstalk - 2 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/3
get_cmd: /qas/0/crosstalk/rows/1/cols/3
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 2 , 5]
label: Crosstalk - 2 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/4
get_cmd: /qas/0/crosstalk/rows/1/cols/4
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 2 , 6]
label: Crosstalk - 2 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/5
get_cmd: /qas/0/crosstalk/rows/1/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 2 , 7]
label: Crosstalk - 2 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/6
get_cmd: /qas/0/crosstalk/rows/1/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 2 , 8]
label: Crosstalk - 2 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/7
get_cmd: /qas/0/crosstalk/rows/1/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 2 , 9]
label: Crosstalk - 2 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/8
get_cmd: /qas/0/crosstalk/rows/1/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 2 , 10]
label: Crosstalk - 2 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/1/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/1/cols/9
get_cmd: /qas/0/crosstalk/rows/1/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 3

[Crosstalk - 3 , 1]
label: Crosstalk - 3 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/0
get_cmd: /qas/0/crosstalk/rows/2/cols/0
state_quant: Crosstalk - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10

[Crosstalk - 3 , 2]
label: Crosstalk - 3 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/1
get_cmd: /qas/0/crosstalk/rows/2/cols/1
state_quant: Crosstalk - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10

[Crosstalk - 3 , 3]
label: Crosstalk - 3 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/2
get_cmd: /qas/0/crosstalk/rows/2/cols/2
state_quant: Crosstalk - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10

[Crosstalk - 3 , 4]
label: Crosstalk - 3 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/3
get_cmd: /qas/0/crosstalk/rows/2/cols/3
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 3 , 5]
label: Crosstalk - 3 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/4
get_cmd: /qas/0/crosstalk/rows/2/cols/4
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 3 , 6]
label: Crosstalk - 3 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/5
get_cmd: /qas/0/crosstalk/rows/2/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 3 , 7]
label: Crosstalk - 3 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/6
get_cmd: /qas/0/crosstalk/rows/2/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 3 , 8]
label: Crosstalk - 3 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/7
get_cmd: /qas/0/crosstalk/rows/2/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 3 , 9]
label: Crosstalk - 3 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/8
get_cmd: /qas/0/crosstalk/rows/2/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 3 , 10]
label: Crosstalk - 3 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/2/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/2/cols/9
get_cmd: /qas/0/crosstalk/rows/2/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 4

[Crosstalk - 4 , 1]
label: Crosstalk - 4 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/0
get_cmd: /qas/0/crosstalk/rows/3/cols/0
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 4 , 2]
label: Crosstalk - 4 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/1
get_cmd: /qas/0/crosstalk/rows/3/cols/1
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 4 , 3]
label: Crosstalk - 4 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/2
get_cmd: /qas/0/crosstalk/rows/3/cols/2
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 4 , 4]
label: Crosstalk - 4 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/3
get_cmd: /qas/0/crosstalk/rows/3/cols/3
state_quant: Crosstalk - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10

[Crosstalk - 4 , 5]
label: Crosstalk - 4 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/4
get_cmd: /qas/0/crosstalk/rows/3/cols/4
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 4 , 6]
label: Crosstalk - 4 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/5
get_cmd: /qas/0/crosstalk/rows/3/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 4 , 7]
label: Crosstalk - 4 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/6
get_cmd: /qas/0/crosstalk/rows/3/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 4 , 8]
label: Crosstalk - 4 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/7
get_cmd: /qas/0/crosstalk/rows/3/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 4 , 9]
label: Crosstalk - 4 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/8
get_cmd: /qas/0/crosstalk/rows/3/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 4 , 10]
label: Crosstalk - 4 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/3/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/3/cols/9
get_cmd: /qas/0/crosstalk/rows/3/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 5 

[Crosstalk - 5 , 1]
label: Crosstalk - 5 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/0
get_cmd: /qas/0/crosstalk/rows/4/cols/0
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 5 , 2]
label: Crosstalk - 5 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/1
get_cmd: /qas/0/crosstalk/rows/4/cols/1
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 5 , 3]
label: Crosstalk - 5 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/2
get_cmd: /qas/0/crosstalk/rows/4/cols/2
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 5 , 4]
label: Crosstalk - 5 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/3
get_cmd: /qas/0/crosstalk/rows/4/cols/3
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 5 , 5]
label: Crosstalk - 5 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/4
get_cmd: /qas/0/crosstalk/rows/4/cols/4
state_quant: Crosstalk - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10

[Crosstalk - 5 , 6]
label: Crosstalk - 5 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/5
get_cmd: /qas/0/crosstalk/rows/4/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 5 , 7]
label: Crosstalk - 5 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/6
get_cmd: /qas/0/crosstalk/rows/4/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 5 , 8]
label: Crosstalk - 5 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/7
get_cmd: /qas/0/crosstalk/rows/4/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 5 , 9]
label: Crosstalk - 5 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/8
get_cmd: /qas/0/crosstalk/rows/4/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 5 , 10]
label: Crosstalk - 5 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/4/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/4/cols/9
get_cmd: /qas/0/crosstalk/rows/4/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 6

[Crosstalk - 6 , 1]
label: Crosstalk - 6 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/0
get_cmd: /qas/0/crosstalk/rows/5/cols/0
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 2]
label: Crosstalk - 6 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/1
get_cmd: /qas/0/crosstalk/rows/5/cols/1
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 3]
label: Crosstalk - 6 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/2
get_cmd: /qas/0/crosstalk/rows/5/cols/2
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 4]
label: Crosstalk - 6 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/3
get_cmd: /qas/0/crosstalk/rows/5/cols/3
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 5]
label: Crosstalk - 6 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/4
get_cmd: /qas/0/crosstalk/rows/5/cols/4
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 6]
label: Crosstalk - 6 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/5
get_cmd: /qas/0/crosstalk/rows/5/cols/5
state_quant: Crosstalk - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10

[Crosstalk - 6 , 7]
label: Crosstalk - 6 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/6
get_cmd: /qas/0/crosstalk/rows/5/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 6 , 8]
label: Crosstalk - 6 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/7
get_cmd: /qas/0/crosstalk/rows/5/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 6 , 9]
label: Crosstalk - 6 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/8
get_cmd: /qas/0/crosstalk/rows/5/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 6 , 10]
label: Crosstalk - 6 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/5/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/5/cols/9
get_cmd: /qas/0/crosstalk/rows/5/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 7

[Crosstalk - 7 , 1]
label: Crosstalk - 7 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/0
get_cmd: /qas/0/crosstalk/rows/6/cols/0
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 2]
label: Crosstalk - 7 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/1
get_cmd: /qas/0/crosstalk/rows/6/cols/1
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 3]
label: Crosstalk - 7 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/2
get_cmd: /qas/0/crosstalk/rows/6/cols/2
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 4]
label: Crosstalk - 7 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/3
get_cmd: /qas/0/crosstalk/rows/6/cols/3
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 5]
label: Crosstalk - 7 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/4
get_cmd: /qas/0/crosstalk/rows/6/cols/4
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 6]
label: Crosstalk - 7 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/5
get_cmd: /qas/0/crosstalk/rows/6/cols/5
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 7]
label: Crosstalk - 7 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/6
get_cmd: /qas/0/crosstalk/rows/6/cols/6
state_quant: Crosstalk - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10

[Crosstalk - 7 , 8]
label: Crosstalk - 7 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/7
get_cmd: /qas/0/crosstalk/rows/6/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 7 , 9]
label: Crosstalk - 7 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/8
get_cmd: /qas/0/crosstalk/rows/6/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 7 , 10]
label: Crosstalk - 7 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/6/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/6/cols/9
get_cmd: /qas/0/crosstalk/rows/6/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 8

[Crosstalk - 8 , 1]
label: Crosstalk - 8 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/0
get_cmd: /qas/0/crosstalk/rows/7/cols/0
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 2]
label: Crosstalk - 8 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/1
get_cmd: /qas/0/crosstalk/rows/7/cols/1
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 3]
label: Crosstalk - 8 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/2
get_cmd: /qas/0/crosstalk/rows/7/cols/2
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 4]
label: Crosstalk - 8 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/3
get_cmd: /qas/0/crosstalk/rows/7/cols/3
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 5]
label: Crosstalk - 8 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/4
get_cmd: /qas/0/crosstalk/rows/7/cols/4
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 6]
label: Crosstalk - 8 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/5
get_cmd: /qas/0/crosstalk/rows/7/cols/5
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 7]
label: Crosstalk - 8 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/6
get_cmd: /qas/0/crosstalk/rows/7/cols/6
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 8]
label: Crosstalk - 8 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/7
get_cmd: /qas/0/crosstalk/rows/7/cols/7
state_quant: Crosstalk - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10

[Crosstalk - 8 , 9]
label: Crosstalk - 8 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/8
get_cmd: /qas/0/crosstalk/rows/7/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 8 , 10]
label: Crosstalk - 8 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/7/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/7/cols/9
get_cmd: /qas/0/crosstalk/rows/7/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 9

[Crosstalk - 9 , 1]
label: Crosstalk - 9 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/0
get_cmd: /qas/0/crosstalk/rows/8/cols/0
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 2]
label: Crosstalk - 9 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/1
get_cmd: /qas/0/crosstalk/rows/8/cols/1
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 3]
label: Crosstalk - 9 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/2
get_cmd: /qas/0/crosstalk/rows/8/cols/2
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 4]
label: Crosstalk - 9 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/3
get_cmd: /qas/0/crosstalk/rows/8/cols/3
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 5]
label: Crosstalk - 9 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/4
get_cmd: /qas/0/crosstalk/rows/8/cols/4
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 6]
label: Crosstalk - 9 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/5
get_cmd: /qas/0/crosstalk/rows/8/cols/5
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 7]
label: Crosstalk - 9 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/6
get_cmd: /qas/0/crosstalk/rows/8/cols/6
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 8]
label: Crosstalk - 9 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/7
get_cmd: /qas/0/crosstalk/rows/8/cols/7
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 9]
label: Crosstalk - 9 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/8
get_cmd: /qas/0/crosstalk/rows/8/cols/8
state_quant: Crosstalk - advanced
state_value_1: 9
state_value_2: 10

[Crosstalk - 9 , 10]
label: Crosstalk - 9 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/8/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/8/cols/9
get_cmd: /qas/0/crosstalk/rows/8/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10


#########################################
# SECTION: QA Setup
# GROUP: Crosstalk Row 10


[Crosstalk - 10 , 1]
label: Crosstalk - 10 , 1
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/0</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/0
get_cmd: /qas/0/crosstalk/rows/9/cols/0
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 2]
label: Crosstalk - 10 , 2
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/1</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/1
get_cmd: /qas/0/crosstalk/rows/9/cols/1
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 3]
label: Crosstalk - 10 , 3
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/2</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/2
get_cmd: /qas/0/crosstalk/rows/9/cols/2
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 4]
label: Crosstalk - 10 , 4
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/3</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/3
get_cmd: /qas/0/crosstalk/rows/9/cols/3
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 5]
label: Crosstalk - 10 , 5
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/4</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/4
get_cmd: /qas/0/crosstalk/rows/9/cols/4
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 6]
label: Crosstalk - 10 , 6
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/5</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/5
get_cmd: /qas/0/crosstalk/rows/9/cols/5
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 7]
label: Crosstalk - 10 , 7
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/6</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/6
get_cmd: /qas/0/crosstalk/rows/9/cols/6
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 8]
label: Crosstalk - 10 , 8
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/7</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/7
get_cmd: /qas/0/crosstalk/rows/9/cols/7
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 9]
label: Crosstalk - 10 , 9
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 0.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/8</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/8
get_cmd: /qas/0/crosstalk/rows/9/cols/8
state_quant: Crosstalk - advanced
state_value_1: 10

[Crosstalk - 10 , 10]
label: Crosstalk - 10 , 10
datatype: DOUBLE
section: QA Setup
group: Crosstalk
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Transformation coefficients for each channel as a 10x10 matrix. The values are defined as floating point numbers. In hardware, the coefficients are implemented as 17-bit signed integers.<br/><b>qas/0/crosstalk/rows/9/cols/9</b></p></body></html>
set_cmd: /qas/0/crosstalk/rows/9/cols/9
get_cmd: /qas/0/crosstalk/rows/9/cols/9
state_quant: Crosstalk - advanced
state_value_1: 10



#########################################
# SECTION: QA Monitor
# GROUP: QA Monitor

[QA Monitor - Enable]
label: Enable
datatype: BOOLEAN
section: QA Monitor
group: QA Monitor
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enable the trigger inputs of the MONITOR from the AWG.<br/><b>qas/0/monitor/enable</b></p></body></html>
set_cmd: /qas/0/monitor/enable
get_cmd: /qas/0/monitor/enable

[QA Monitor - Averages]
label: Averages
datatype: DOUBLE
section: QA Monitor
group: QA Monitor
def_value: 1.0
show_in_measurement_dlg: False
tooltip: Number of averages (should be power of 2, e.g., 2, 4, 8, etc.).
set_cmd: /qas/0/monitor/averages
get_cmd: /qas/0/monitor/averages

[QA Monitor - Reset]
label: Reset
datatype: BUTTON
section: QA Monitor
group: QA Monitor
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Reset the MONITOR and prepare it for a new measurement.<br/><b>qas/0/monitor/reset</b></p></body></html>
set_cmd: /qas/0/monitor/reset
get_cmd: /qas/0/monitor/reset


[QA Monitor - Input 1]
datatype: VECTOR
section: QA Monitor
group: QA Monitor
unit: V
show_in_measurement_dlg: True
permission: READ
x_name: Time
x_unit: s

[QA Monitor - Input 2]
datatype: VECTOR
section: QA Monitor
group: QA Monitor
unit: V
show_in_measurement_dlg: True
permission: READ
x_name: Time
x_unit: s



#########################################
# SECTION: QA Results
# GROUP: QA Results

[QA Results - Enable]
label: Enable
datatype: BOOLEAN
section: QA Results
group: QA Results
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enable the trigger inputs of the MONITOR from the AWG.<br/><b>qas/0/result/enable</b></p></body></html>
set_cmd: /qas/0/result/enable
get_cmd: /qas/0/result/enable


[QA Results - Source]
label: Source
datatype: COMBO
section: QA Results
group: QA Results
def_value: Crosstalk
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal source of the Result Logger.<br/><b>qas/0/result/source</b></p></body></html>
set_cmd: /qas/0/result/source
get_cmd: /qas/0/result/source
cmd_def_1: 0
combo_def_1: Crosstalk
cmd_def_2: 1
combo_def_2: Threshold
cmd_def_3: 2
combo_def_3: Rotation
cmd_def_4: 7
combo_def_4: Integration

[QA Results - Length]
label: Length
datatype: DOUBLE
section: QA Results
group: QA Results
def_value: 1
show_in_measurement_dlg: True
tooltip: <html><head/><body><p>The time duration of each capture in samples. A maximum of 4096 samples can be captured, which corresponds to 2.3 us.<br/><b>qas/0/result/length</b></p></body></html>
set_cmd: /qas/0/result/length
get_cmd: /qas/0/result/length

[QA Results - HW Averages]
label: Averages
datatype: DOUBLE
section: QA Results
group: QA Results
def_value: 1
show_in_measurement_dlg: True
tooltip: Number of averages (should be power of 2, e.g., 2, 4, 8, etc.).
set_cmd: /qas/0/result/averages
get_cmd: /qas/0/result/averages

[QA Results - Averaging Mode]
label: Averaging Mode
datatype: COMBO
section: QA Results
group: QA Results
def_value: Sequential
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the averaging mode of the Result Logger. Cyclic: The first point of the Result vector is the average of over the results 1, 2M+1, 3M+1, ... where M is equal to the Length setting.<br/><b>qas/0/result/mode</b></p></body></html>
set_cmd: /qas/0/result/mode
get_cmd: /qas/0/result/mode
cmd_def_1: 0
combo_def_1: Cyclic
cmd_def_2: 1
combo_def_2: Sequential



#########################################
# SECTION: QA Results
# GROUP: Results

[Results - advanced]
section: QA Results
group: Results
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
combo_def_10: 9
combo_def_11: 10
def_value: 1

[Result Avg - QB 1]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: True
state_quant: Results - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
permission: READ


[Result Avg - QB 2]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
permission: READ


[Result Avg - QB 3]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
permission: READ


[Result Avg - QB 4]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10
permission: READ


[Result Avg - QB 5]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10
permission: READ


[Result Avg - QB 6]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10
permission: READ


[Result Avg - QB 7]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10
permission: READ


[Result Avg - QB 8]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10
permission: READ


[Result Avg - QB 9]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 9
state_value_2: 10
permission: READ


[Result Avg - QB 10]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 10
permission: READ


[Result Vector - QB 1]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: True
state_quant: Results - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
permission: READ


[Result Vector - QB 2]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
permission: READ


[Result Vector - QB 3]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
permission: READ


[Result Vector - QB 4]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10
permission: READ


[Result Vector - QB 5]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10
permission: READ


[Result Vector - QB 6]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10
permission: READ


[Result Vector - QB 7]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10
permission: READ


[Result Vector - QB 8]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10
permission: READ


[Result Vector - QB 9]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 9
state_value_2: 10
permission: READ


[Result Vector - QB 10]
datatype: VECTOR_COMPLEX
section: QA Results
group: Results
unit: V
x_name: Samples
x_unit: #
show_in_measurement_dlg: False
state_quant: Results - advanced
state_value_1: 10
permission: READ


[Result Demod 1-2]
datatype: COMPLEX
section: QA Results
group: Results
unit: V
show_in_measurement_dlg: True
permission: READ
tooltip: Demodulation result (complex value)

#########################################
# SECTION: Channel 1

[Channel 1 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 1-2
group: Channel 1
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/0
get_cmd: /qas/0/integration/sources/0
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 1 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 1-2
group: Channel 1
def_value: 0

[Channel 1 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 1-2
group: Channel 1
def_value: 0

[Channel 1 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 1-2
group: Channel 1
def_value: false

[Channel 1 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 1-2
group: Channel 1
def_value: 100e6
state_quant: Channel 1 - Enable
state_value: true

[Channel 1 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 1-2
group: Channel 1
def_value: 1.0
state_quant: Channel 1 - Enable
state_value: true

[Channel 1 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 1-2
group: Channel 1
def_value: 0
state_quant: Channel 1 - Enable
state_value: true



#########################################
# SECTION: Channel 2

[Channel 2 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 1-2
group: Channel 2
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/1
get_cmd: /qas/0/integration/sources/1
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 2 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 1-2
group: Channel 2
def_value: 0

[Channel 2 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 1-2
group: Channel 2
def_value: 0

[Channel 2 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 1-2
group: Channel 2
def_value: false

[Channel 2 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 1-2
group: Channel 2
def_value: 100e6
state_quant: Channel 2 - Enable
state_value: true

[Channel 2 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 1-2
group: Channel 2
def_value: 1.0
state_quant: Channel 2 - Enable
state_value: true

[Channel 2 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 1-2
group: Channel 2
def_value: 0
state_quant: Channel 2 - Enable
state_value: true


#########################################
# SECTION: Channel 3

[Channel 3 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 3-4
group: Channel 3
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/2
get_cmd: /qas/0/integration/sources/2
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag


[Channel 3 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 3-4
group: Channel 3
def_value: 0

[Channel 3 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 3-4
group: Channel 3
def_value: 0

[Channel 3 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 3-4
group: Channel 3
def_value: false

[Channel 3 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 3-4
group: Channel 3
def_value: 100e6
state_quant: Channel 3 - Enable
state_value: true

[Channel 3 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 3-4
group: Channel 3
def_value: 1.0
state_quant: Channel 3 - Enable
state_value: true

[Channel 3 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 3-4
group: Channel 3
def_value: 0
state_quant: Channel 3 - Enable
state_value: true



#########################################
# SECTION: Channel 4

[Channel 4 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 3-4
group: Channel 4
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/3
get_cmd: /qas/0/integration/sources/3
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 4 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 3-4
group: Channel 4
def_value: 0

[Channel 4 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 3-4
group: Channel 4
def_value: 0

[Channel 4 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 3-4
group: Channel 4
def_value: false

[Channel 4 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 3-4
group: Channel 4
def_value: 100e6
state_quant: Channel 4 - Enable
state_value: true

[Channel 4 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 3-4
group: Channel 4
def_value: 1.0
state_quant: Channel 4 - Enable
state_value: true

[Channel 4 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 3-4
group: Channel 4 
def_value: 0
state_quant: Channel 4 - Enable
state_value: true



#########################################
# SECTION: Channel 5

[Channel 5 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 5-6
group: Channel 5
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/4
get_cmd: /qas/0/integration/sources/4
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 5 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 5-6
group: Channel 5
def_value: 0

[Channel 5 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 5-6
group: Channel 5
def_value: 0

[Channel 5 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 5-6
group: Channel 5
def_value: false

[Channel 5 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 5-6
group: Channel 5
def_value: 100e6
state_quant: Channel 5 - Enable
state_value: true

[Channel 5 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 5-6
group: Channel 5
def_value: 1.0
state_quant: Channel 5 - Enable
state_value: true

[Channel 5 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 5-6
group: Channel 5
def_value: 0
state_quant: Channel 5 - Enable
state_value: true



#########################################
# SECTION: Channel 6

[Channel 6 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 5-6
group: Channel 6
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/5
get_cmd: /qas/0/integration/sources/5
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 6 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 5-6
group: Channel 6
def_value: 0

[Channel 6 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 5-6
group: Channel 6
def_value: 0

[Channel 6 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 5-6
group: Channel 6
def_value: false

[Channel 6 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 5-6
group: Channel 6
def_value: 100e6
state_quant: Channel 6 - Enable
state_value: true

[Channel 6 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 5-6
group: Channel 6
def_value: 1.0
state_quant: Channel 6 - Enable
state_value: true

[Channel 6 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 5-6
group: Channel 6
def_value: 0
state_quant: Channel 6 - Enable
state_value: true



#########################################
# SECTION: Channel 7

[Channel 7 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 7-8
group: Channel 7
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/6
get_cmd: /qas/0/integration/sources/6
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 7 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 7-8
group: Channel 7
def_value: 0

[Channel 7 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 7-8
group: Channel 7
def_value: 0

[Channel 7 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 7-8
group: Channel 7
def_value: false

[Channel 7 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 7-8
group: Channel 7
def_value: 100e6
state_quant: Channel 7 - Enable
state_value: true

[Channel 7 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 7-8
group: Channel 7
def_value: 1.0
state_quant: Channel 7 - Enable
state_value: true

[Channel 7 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 7-8
group: Channel 7
def_value: 0
state_quant: Channel 7 - Enable
state_value: true


#########################################
# SECTION: Channel 8

[Channel 8 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 7-8
group: Channel 8
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/7
get_cmd: /qas/0/integration/sources/7
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 8 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 7-8
group: Channel 8
def_value: 0

[Channel 8 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 7-8
group: Channel 8
def_value: 0

[Channel 8 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 7-8
group: Channel 8
def_value: false

[Channel 8 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 7-8
group: Channel 8
def_value: 100e6
state_quant: Channel 8 - Enable
state_value: true

[Channel 8 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 7-8
group: Channel 8
def_value: 1.0
state_quant: Channel 8 - Enable
state_value: true

[Channel 8 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 7-8
group: Channel 8
def_value: 0
state_quant: Channel 8 - Enable
state_value: true



#########################################
# SECTION: Channel 9

[Channel 9 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 9-10
group: Channel 9
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/8
get_cmd: /qas/0/integration/sources/8
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 9 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 9-10
group: Channel 9
def_value: 0

[Channel 9 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 9-10
group: Channel 9
def_value: 0

[Channel 9 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 9-10
group: Channel 9
def_value: false

[Channel 9 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 9-10
group: Channel 9
def_value: 100e6
state_quant: Channel 9 - Enable
state_value: true

[Channel 9 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 9-10
group: Channel 9
def_value: 1.0
state_quant: Channel 9 - Enable
state_value: true

[Channel 9 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 9-10
group: Channel 9
def_value: 0
state_quant: Channel 9 - Enable
state_value: true



#########################################
# SECTION: Channel 10

[Channel 10 - Mapping]
label: Input Mapping
datatype: COMBO
section: Channel 9-10
group: Channel 10
def_value: 1->Real  2->Imag
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Controls the routing of the input signals to the INTEGRATION units.<br/><b>qas/0/integration/sources/0</b></p></body></html>
set_cmd: /qas/0/integration/sources/9
get_cmd: /qas/0/integration/sources/9
cmd_def_1: 0
combo_def_1: 1->Real  2->Imag
cmd_def_2: 1
combo_def_2: 2->Real  1->Imag

[Channel 10 - Rotation]
label: Rotation
datatype: DOUBLE
section: Channel 9-10
group: Channel 10
def_value: 0

[Channel 10 - Threshold]
label: Threshold
datatype: DOUBLE
section: Channel 9-10
group: Channel 10
def_value: 0

[Channel 10 - Enable]
label: Enable Weighted Integration
datatype: BOOLEAN
section: Channel 9-10
group: Channel 10
def_value: false

[Channel 10 - Frequency]
label: Readout Frequency
datatype: DOUBLE
section: Channel 9-10
group: Channel 10
def_value: 100e6
state_quant: Channel 10 - Enable
state_value: true

[Channel 10 - Amplitude]
label: Readout Amplitude
datatype: DOUBLE
section: Channel 9-10
group: Channel 10
def_value: 1.0
state_quant: Channel 10 - Enable
state_value: true

[Channel 10 - Phase Shift]
label: Readout Phase Shift
datatype: DOUBLE
section: Channel 9-10
group: Channel 10
def_value: 0
state_quant: Channel 10 - Enable
state_value: true



#########################################
# SECTION: AWG Sequencer
# GROUP: AWG

[AWG - Run]
label: Run
datatype: BUTTON
section: Sequencer
group: Control
def_value: false
show_in_measurement_dlg: True
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>
set_cmd: /awgs/0/enable
get_cmd: /awgs/0/enable


[Control - Output 1]
label: Output 1
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: false


[Control - Output 2]
label: Output 2
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: false

[Control - Gain 1]
label: Gain 1
datatype: DOUBLE
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: 1.0


[Control - Gain 2]
label: Gain 2
datatype: DOUBLE
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: 1.0


[Sequencer - Trigger Mode]
label: Trigger Mode
datatype: COMBO
section: Sequencer
group: Sequencer
def_value: None
show_in_measurement_dlg: True
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Receive Trigger
cmd_def_3: 2
combo_def_3: ZSync Trigger
tooltip: This parameter specifies whether the UHFQA is used as a master trigger, expects a trigger or is used by itself.

[Sequencer - Alignment]
label: Alignment
datatype: COMBO
section: Sequencer
group: Sequencer
def_value: Start with Trigger
show_in_measurement_dlg: True
tooltip: MISSING
cmd_def_1: 0
combo_def_1: Start with Trigger
cmd_def_2: 1
combo_def_2: End with Trigger

[Sequencer - Single]
label: Single
datatype: COMBO
section: Sequencer
group: Sequencer
def_value: Off
show_in_measurement_dlg: False
tooltip: Puts the Sequencer into single-shot mod
set_cmd: /awgs/0/single
get_cmd: /awgs/0/single
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: On

[Sequencer - Trigger Delay]
label: Trigger Delay
datatype: DOUBLE
section: Sequencer
group: Sequencer
show_in_measurement_dlg: False
def_value: 0
unit: s
state_quant: Sequencer - Trigger Mode
state_value_1: Receive Trigger

[Sequencer - Period]
label: Period
datatype: DOUBLE
section: Sequencer
group: Sequencer
def_value: 100e-6
unit: s
show_in_measurement_dlg: True
tooltip: MISSING

[Sequencer - Dead Time]
label: Dead Time
datatype: DOUBLE
section: Sequencer
group: Sequencer
def_value: 5e-6
unit: s
show_in_measurement_dlg: True
tooltip: The time in seconds between the time origin t=0 and the end of the period. This parameter determines the time origin t=0.

[Sequencer - Latency]
label: Latency
datatype: DOUBLE
section: Sequencer
group: Sequencer
def_value: 160e-9
unit: s
show_in_measurement_dlg: True
tooltip: The latency time in seconds (compensates for different trigger latencies of different instruments).

[Waveform 1]
datatype: VECTOR
section: Sequencer
group: Sequencer
show_in_measurement_dlg: False
permission : WRITE

[Waveform 2]
datatype: VECTOR
section: Sequencer
group: Sequencer
show_in_measurement_dlg: False
permission : WRITE

#########################################
# SECTION: AWG Sequencer
# GROUP: AWG

[Sequencer - Sequence]
label: Sequence
datatype: COMBO
section: Sequencer
group: Sequence Parameters
def_value: Simple
show_in_measurement_dlg: True
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Simple
cmd_def_3: 2
combo_def_3: Readout
cmd_def_4: 3
combo_def_4: Pulsed Spectroscopy
cmd_def_5: 4
combo_def_5: CW Spectroscopy
cmd_def_6: 5
combo_def_6: Custom

[Custom Sequence - Path]
label: Path
datatype: PATH
section: Sequencer
group: Sequence Parameters
state_quant: Sequencer - Sequence
state_value_1: Custom


[Sequencer - Readout Length]
label: Readout Duration
datatype: DOUBLE
section: Sequencer
group: Sequence Parameters
def_value: 2e-6
unit: s
state_quant: Sequencer - Sequence
state_value: Readout


[Sequencer - Pulse Length]
label: Pulse Length
datatype: DOUBLE
section: Sequencer
group: Sequence Parameters
def_value: 2e-6
unit: s
state_quant: Sequencer - Sequence
state_value: Pulsed Spectroscopy

[Sequencer - Pulse Amplitude]
label: Pulse Amplitude
datatype: DOUBLE
section: Sequencer
group: Sequence Parameters
def_value: 1
state_quant: Sequencer - Sequence
state_value: Pulsed Spectroscopy

#########################################
# SECTION: AWG Sequencer
# GROUP: DIO Trigger

[Sequencer - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/0/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/index
get_cmd: /awgs/0/dio/strobe/index
state_quant: Sequencer - Trigger Mode
state_value_1: None
state_value_2: Receive Trigger

[Sequencer - Strobe Slope]
label: Strobe Slope
datatype: COMBO
section: Sequencer
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/0/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/slope
get_cmd: /awgs/0/dio/strobe/slope
state_quant: Sequencer - Trigger Mode
state_value_1: None
state_value_2: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both

[Sequencer - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/0/dio/valid/index</b></p></body></html>
set_cmd: /awgs/0/dio/valid/index
get_cmd: /awgs/0/dio/valid/index
state_quant: Sequencer - Trigger Mode
state_value_1: None
state_value_2: Receive Trigger

[Sequencer - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/0/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/0/dio/valid/polarity
get_cmd: /awgs/0/dio/valid/polarity
state_quant: Sequencer - Trigger Mode
state_value_1: None
state_value_2: Receive Trigger
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both


#########################################
# SECTION: Oscillator
# GROUP: Oscillator

[Modulation Frequency]
label: Modulation Frequency
datatype: DOUBLE
section: Sequencer
group: Sequence Parameters
def_value: 10000000.0
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/0/freq</b></p></body></html>
set_cmd: oscs/0/freq
get_cmd: oscs/0/freq
state_quant: Sequencer - Sequence
state_value_1: Pulsed Spectroscopy
state_value_2: CW Spectroscopy


#########################################
# SECTION: DIO
# GROUP: Digital I/O

[Digital I/O - Mode]
label: Mode
datatype: COMBO
section: DIO
group: Digital I/O
show_in_measurement_dlg: False
def_value: Manual
tooltip: <html><head/><body><p>Select DIO mode<br/><b>dios/0/mode</b></p></body></html>
set_cmd: /dios/0/mode
get_cmd: /dios/0/mode
state_quant: PQSC - Connect to PQSC
state_value_1: False
cmd_def_1: 0
combo_def_1: Manual
cmd_def_2: 1
combo_def_2: AWG Sequencer
cmd_def_3: 2
combo_def_3: QA Result
cmd_def_4: 4
combo_def_4: QA Result QCCS

[Digital I/O - Output]
label: Output
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the value of the DIO output for those bytes where 'drive' is enabled.<br/><b>dios/0/output</b></p></body></html>
set_cmd: /dios/0/output
get_cmd: /dios/0/output
state_quant: PQSC - Connect to PQSC
state_value_1: False


[Digital I/O - Drive]
label: Drive
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When on (1), the corresponding 8-bit bus is in output mode. When off (0), it is in input mode. Bit 0 corresponds to the least significant byte. For example, the value 1 drives the least significant byte, the value 8 drives the most significant byte.<br/><b>dios/0/drive</b></p></body></html>
set_cmd: /dios/0/drive
get_cmd: /dios/0/drive
state_quant: PQSC - Connect to PQSC
state_value_1: False


[Digital I/O - Ext Clock]
label: Ext Clock
datatype: COMBO
section: DIO
group: Digital I/O
def_value: Internal 56 MHz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select DIO internal or external clocking.<br/><b>dios/0/extclk</b></p></body></html>
set_cmd: /dios/0/extclk
get_cmd: /dios/0/extclk
state_quant: PQSC - Connect to PQSC
state_value_1: False
cmd_def_1: 0
combo_def_1: Internal 56 MHz
cmd_def_2: 1
combo_def_2: Clk Pin 68
cmd_def_3: 2
combo_def_3: Internal 50 MHz


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Input 1

[Ref/Trigger Input 1 - Level]
label: Level
datatype: DOUBLE
section: DIO
group: Ref/Trigger Input 1
def_value: 0.1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/0/level</b></p></body></html>
set_cmd: /triggers/in/0/level
get_cmd: /triggers/in/0/level

[Ref/Trigger Input 1 - Auto Threshold]
label: Auto Threshold
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.<br/><b>triggers/in/0/autothreshold</b></p></body></html>
set_cmd: /triggers/in/0/autothreshold
get_cmd: /triggers/in/0/autothreshold

[Ref/Trigger Input 1 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 1
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/0/imp50</b></p></body></html>
set_cmd: /triggers/in/0/imp50
get_cmd: /triggers/in/0/imp50


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Output 1

[Ref/Trigger Output 1 - Signal]
label: Signal
datatype: COMBO
section: DIO
group: Ref/Trigger Output 1
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p><br/><b>triggers/out/0/source</b></p></body></html>
set_cmd: /triggers/out/0/source
get_cmd: /triggers/out/0/source
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 2
combo_def_2: Scope Trigger
cmd_def_3: 3
combo_def_3: Scope /Trigger
cmd_def_4: 4
combo_def_4: Scope Armed
cmd_def_5: 5
combo_def_5: Scope /Armed
cmd_def_6: 6
combo_def_6: Scope Active
cmd_def_7: 7
combo_def_7: Scope /Active
cmd_def_8: 8
combo_def_8: AWG Marker 1
cmd_def_9: 9
combo_def_9: AWG Marker 2
cmd_def_10: 10
combo_def_10: AWG Marker 3
cmd_def_11: 11
combo_def_11: AWG Marker 4
cmd_def_12: 32
combo_def_12: AWG Trigger 1
cmd_def_13: 33
combo_def_13: AWG Trigger 2
cmd_def_14: 34
combo_def_14: AWG Trigger 3
cmd_def_15: 35
combo_def_15: AWG Trigger 4
cmd_def_16: 20
combo_def_16: AWG Active
cmd_def_17: 21
combo_def_17: AWG Waiting
cmd_def_18: 22
combo_def_18: AWG Fetching
cmd_def_19: 23
combo_def_19: AWG Playing
cmd_def_20: 51
combo_def_20: MDS Clock Out
cmd_def_21: 52
combo_def_21: MDS Sync Out
cmd_def_22: 64
combo_def_22: QA Result 1
cmd_def_23: 65
combo_def_23: QA Result 2
cmd_def_24: 66
combo_def_24: QA Result 3
cmd_def_25: 67
combo_def_25: QA Result 4
cmd_def_26: 68
combo_def_26: QA Result 5
cmd_def_27: 69
combo_def_27: QA Result 6
cmd_def_28: 70
combo_def_28: QA Result 7
cmd_def_29: 71
combo_def_29: QA Result 8
cmd_def_30: 72
combo_def_30: QA Result 9
cmd_def_31: 73
combo_def_31: QA Result 10
cmd_def_32: 74
combo_def_32: QA Result Trigger

[Ref/Trigger Output 1 - Delay]
label: Delay
datatype: DOUBLE
section: DIO
group: Ref/Trigger Output 1
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/0/delay</b></p></body></html>
set_cmd: /triggers/out/0/delay
get_cmd: /triggers/out/0/delay

[Ref/Trigger Output 1 - Drive]
label: Drive
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Output 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When on, the bidirectional trigger on the front panel is in output mode. When off, the trigger is in input mode.<br/><b>triggers/out/0/drive</b></p></body></html>
set_cmd: /triggers/out/0/drive
get_cmd: /triggers/out/0/drive


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Input 2

[Ref/Trigger Input 2 - Level]
label: Level
datatype: DOUBLE
section: DIO
group: Ref/Trigger Input 2
def_value: 0.1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/1/level</b></p></body></html>
set_cmd: /triggers/in/1/level
get_cmd: /triggers/in/1/level

[Ref/Trigger Input 2 - Auto Threshold]
label: Auto Threshold
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.<br/><b>triggers/in/1/autothreshold</b></p></body></html>
set_cmd: /triggers/in/1/autothreshold
get_cmd: /triggers/in/1/autothreshold

[Ref/Trigger Input 2 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 2
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/1/imp50</b></p></body></html>
set_cmd: /triggers/in/1/imp50
get_cmd: /triggers/in/1/imp50


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Output 2

[Ref/Trigger Output 2 - Signal]
label: Signal
datatype: COMBO
section: DIO
group: Ref/Trigger Output 2
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p><br/><b>triggers/out/1/source</b></p></body></html>
set_cmd: /triggers/out/1/source
get_cmd: /triggers/out/1/source
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 2
combo_def_2: Scope Trigger
cmd_def_3: 3
combo_def_3: Scope /Trigger
cmd_def_4: 4
combo_def_4: Scope Armed
cmd_def_5: 5
combo_def_5: Scope /Armed
cmd_def_6: 6
combo_def_6: Scope Active
cmd_def_7: 7
combo_def_7: Scope /Active
cmd_def_8: 8
combo_def_8: AWG Marker 1
cmd_def_9: 9
combo_def_9: AWG Marker 2
cmd_def_10: 10
combo_def_10: AWG Marker 3
cmd_def_11: 11
combo_def_11: AWG Marker 4
cmd_def_12: 32
combo_def_12: AWG Trigger 1
cmd_def_13: 33
combo_def_13: AWG Trigger 2
cmd_def_14: 34
combo_def_14: AWG Trigger 3
cmd_def_15: 35
combo_def_15: AWG Trigger 4
cmd_def_16: 20
combo_def_16: AWG Active
cmd_def_17: 21
combo_def_17: AWG Waiting
cmd_def_18: 22
combo_def_18: AWG Fetching
cmd_def_19: 23
combo_def_19: AWG Playing
cmd_def_20: 51
combo_def_20: MDS Clock Out
cmd_def_21: 52
combo_def_21: MDS Sync Out
cmd_def_22: 64
combo_def_22: QA Result 1
cmd_def_23: 65
combo_def_23: QA Result 2
cmd_def_24: 66
combo_def_24: QA Result 3
cmd_def_25: 67
combo_def_25: QA Result 4
cmd_def_26: 68
combo_def_26: QA Result 5
cmd_def_27: 69
combo_def_27: QA Result 6
cmd_def_28: 70
combo_def_28: QA Result 7
cmd_def_29: 71
combo_def_29: QA Result 8
cmd_def_30: 72
combo_def_30: QA Result 9
cmd_def_31: 73
combo_def_31: QA Result 10
cmd_def_32: 74
combo_def_32: QA Result Trigger

[Ref/Trigger Output 2 - Delay]
label: Delay
datatype: DOUBLE
section: DIO
group: Ref/Trigger Output 2
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/1/delay</b></p></body></html>
set_cmd: /triggers/out/1/delay
get_cmd: /triggers/out/1/delay

[Ref/Trigger Output 2 - Drive]
label: Drive
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Output 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When on, the bidirectional trigger on the front panel is in output mode. When off, the trigger is in input mode.<br/><b>triggers/out/1/drive</b></p></body></html>
set_cmd: /triggers/out/1/drive
get_cmd: /triggers/out/1/drive


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Input 3

[Ref/Trigger Input 3 - Level]
label: Level
datatype: DOUBLE
section: DIO
group: Ref/Trigger Input 3
def_value: 0.1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/2/level</b></p></body></html>
set_cmd: /triggers/in/2/level
get_cmd: /triggers/in/2/level

[Ref/Trigger Input 3 - Auto Threshold]
label: Auto Threshold
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.<br/><b>triggers/in/2/autothreshold</b></p></body></html>
set_cmd: /triggers/in/2/autothreshold
get_cmd: /triggers/in/2/autothreshold

[Ref/Trigger Input 3 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 3
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/2/imp50</b></p></body></html>
set_cmd: /triggers/in/2/imp50
get_cmd: /triggers/in/2/imp50


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Output 3

[Ref/Trigger Output 3 - Signal]
label: Signal
datatype: COMBO
section: DIO
group: Ref/Trigger Output 3
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p><br/><b>triggers/out/2/source</b></p></body></html>
set_cmd: /triggers/out/2/source
get_cmd: /triggers/out/2/source
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 2
combo_def_2: Scope Trigger
cmd_def_3: 3
combo_def_3: Scope /Trigger
cmd_def_4: 4
combo_def_4: Scope Armed
cmd_def_5: 5
combo_def_5: Scope /Armed
cmd_def_6: 6
combo_def_6: Scope Active
cmd_def_7: 7
combo_def_7: Scope /Active
cmd_def_8: 8
combo_def_8: AWG Marker 1
cmd_def_9: 9
combo_def_9: AWG Marker 2
cmd_def_10: 10
combo_def_10: AWG Marker 3
cmd_def_11: 11
combo_def_11: AWG Marker 4
cmd_def_12: 32
combo_def_12: AWG Trigger 1
cmd_def_13: 33
combo_def_13: AWG Trigger 2
cmd_def_14: 34
combo_def_14: AWG Trigger 3
cmd_def_15: 35
combo_def_15: AWG Trigger 4
cmd_def_16: 20
combo_def_16: AWG Active
cmd_def_17: 21
combo_def_17: AWG Waiting
cmd_def_18: 22
combo_def_18: AWG Fetching
cmd_def_19: 23
combo_def_19: AWG Playing
cmd_def_20: 51
combo_def_20: MDS Clock Out
cmd_def_21: 52
combo_def_21: MDS Sync Out
cmd_def_22: 64
combo_def_22: QA Result 1
cmd_def_23: 65
combo_def_23: QA Result 2
cmd_def_24: 66
combo_def_24: QA Result 3
cmd_def_25: 67
combo_def_25: QA Result 4
cmd_def_26: 68
combo_def_26: QA Result 5
cmd_def_27: 69
combo_def_27: QA Result 6
cmd_def_28: 70
combo_def_28: QA Result 7
cmd_def_29: 71
combo_def_29: QA Result 8
cmd_def_30: 72
combo_def_30: QA Result 9
cmd_def_31: 73
combo_def_31: QA Result 10
cmd_def_32: 74
combo_def_32: QA Result Trigger

[Ref/Trigger Output 3 - Delay]
label: Delay
datatype: DOUBLE
section: DIO
group: Ref/Trigger Output 3
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/2/delay</b></p></body></html>
set_cmd: /triggers/out/2/delay
get_cmd: /triggers/out/2/delay


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Input 4

[Ref/Trigger Input 4 - Level]
label: Level
datatype: DOUBLE
section: DIO
group: Ref/Trigger Input 4
def_value: 0.1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/3/level</b></p></body></html>
set_cmd: /triggers/in/3/level
get_cmd: /triggers/in/3/level

[Ref/Trigger Input 4 - Auto Threshold]
label: Auto Threshold
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.<br/><b>triggers/in/3/autothreshold</b></p></body></html>
set_cmd: /triggers/in/3/autothreshold
get_cmd: /triggers/in/3/autothreshold

[Ref/Trigger Input 4 - 50 Ohm]
label: 50 Ohm
datatype: BOOLEAN
section: DIO
group: Ref/Trigger Input 4
def_value: true
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/3/imp50</b></p></body></html>
set_cmd: /triggers/in/3/imp50
get_cmd: /triggers/in/3/imp50


#########################################
# SECTION: DIO
# GROUP: Ref/Trigger Output 4

[Ref/Trigger Output 4 - Signal]
label: Signal
datatype: COMBO
section: DIO
group: Ref/Trigger Output 4
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p><br/><b>triggers/out/3/source</b></p></body></html>
set_cmd: /triggers/out/3/source
get_cmd: /triggers/out/3/source
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 2
combo_def_2: Scope Trigger
cmd_def_3: 3
combo_def_3: Scope /Trigger
cmd_def_4: 4
combo_def_4: Scope Armed
cmd_def_5: 5
combo_def_5: Scope /Armed
cmd_def_6: 6
combo_def_6: Scope Active
cmd_def_7: 7
combo_def_7: Scope /Active
cmd_def_8: 8
combo_def_8: AWG Marker 1
cmd_def_9: 9
combo_def_9: AWG Marker 2
cmd_def_10: 10
combo_def_10: AWG Marker 3
cmd_def_11: 11
combo_def_11: AWG Marker 4
cmd_def_12: 32
combo_def_12: AWG Trigger 1
cmd_def_13: 33
combo_def_13: AWG Trigger 2
cmd_def_14: 34
combo_def_14: AWG Trigger 3
cmd_def_15: 35
combo_def_15: AWG Trigger 4
cmd_def_16: 20
combo_def_16: AWG Active
cmd_def_17: 21
combo_def_17: AWG Waiting
cmd_def_18: 22
combo_def_18: AWG Fetching
cmd_def_19: 23
combo_def_19: AWG Playing
cmd_def_20: 51
combo_def_20: MDS Clock Out
cmd_def_21: 52
combo_def_21: MDS Sync Out
cmd_def_22: 64
combo_def_22: QA Result 1
cmd_def_23: 65
combo_def_23: QA Result 2
cmd_def_24: 66
combo_def_24: QA Result 3
cmd_def_25: 67
combo_def_25: QA Result 4
cmd_def_26: 68
combo_def_26: QA Result 5
cmd_def_27: 69
combo_def_27: QA Result 6
cmd_def_28: 70
combo_def_28: QA Result 7
cmd_def_29: 71
combo_def_29: QA Result 8
cmd_def_30: 72
combo_def_30: QA Result 9
cmd_def_31: 73
combo_def_31: QA Result 10
cmd_def_32: 74
combo_def_32: QA Result Trigger

[Ref/Trigger Output 4 - Delay]
label: Delay
datatype: DOUBLE
section: DIO
group: Ref/Trigger Output 4
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/3/delay</b></p></body></html>
set_cmd: /triggers/out/3/delay
get_cmd: /triggers/out/3/delay