# Instrument driver configuration file.
[General settings]
name: Zurich Instruments Waveform Processor
driver_path: Zurich_Instruments_Waveform_Processor
version: 1.0
signal_generator: True


[Complex - Signal]
label = Complex Signal
datatype = VECTOR_COMPLEX
tooltip = <html><body><p>Complex Fomat (wave 1 + j wave 2)</p></body></html>
permission = BOTH

[Interleaved - Signal]
label = Interleaved Signal
datatype = VECTOR
tooltip = <html><body><p>Interleaved format (wave1,wave2,marker)</p><p>Internal format of Waveforms of the HDAWG and SHFSG</p></body></html>
permission = BOTH

[Interleaved - Num - Channels]
label = Interleaved Num Channels
datatype = COMBO
permission = BOTH
cmd_def_1 = 1
combo_def_1 = 1
cmd_def_2 = 2
combo_def_2 = 2
def_value = 2
tooltip = <html><body><p>Number of channels(waves) persent in the interleaved waveform</p></body></html>

[Interleaved - Marker - Present]
label = Interleaved Marker Present
datatype = BOOLEAN
permission = BOTH
def_value = True
tooltip = <html><body><p>Falg if the Markers are persent in the interleaved waveform</p></body></html>

[Wave 1 - Signal]
label = Marker Signal
datatype = VECTOR
tooltip = <html><body><p>Wave 1</p></body></html>
permission = BOTH
x_name = Time
x_unit = s

[Wave 2 - Signal]
label = Marker Signal
datatype = VECTOR
tooltip = <html><body><p>Wave 2</p></body></html>
permission = BOTH
x_name = Time
x_unit = s

[Marker - Signal]
label = Marker Signal
datatype = VECTOR
tooltip = <html><body><p>Markers</p></body></html>
permission = BOTH
x_name = Time
x_unit = s
